PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -0.5000, -0.5000, -0.5000
  expName = emotion-regulation
  expVersion = 0.52
  keyboardBackend = PsychToolbox
  logging level = debug
  runMode = 1
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Routines
  Routine experimentSetup
    RoutineSettingsComponent experimentSetup
      saveStartStop = False
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      desc:
        This routine contains all Before Experiment and Begin Experiment code components used across the entire study.
        It centralizes global variables, screen geometry, scaling logic, and shared helper functions so that all other routines operate within a consistent coordinate system and configuration.

        Because these variables are referenced throughout the experiment, changes should be made cautiously and with awareness of downstream effects.
        This routine must appear before any trial‑based routines in the experiment flow.
    CodeComponent code_experiment_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_experiment_setup
        # Global screen geometry and shared layout variables.
        #
        # Computes window aspect ratio and establishes a unified
        # coordinate system in 'height' units so all routines scale
        # consistently across monitors.
        #
        # Also defines shared wrap-width values for text components.
        # ------------------------------------------------------------

        # ============================================================
        # =============== GLOBAL SCREEN GEOMETRY =====================
        # ============================================================
        # Centralized screen geometry so all routines share the same coordinate system

        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5

        # Wrap width as a percentage of screen width
        aspect80 = aspect * 0.80 # 80% of screen width
        aspect20 = aspect * 0.20  # 20% of screen width
        comp_wrap_width_body = aspect80
        comp_wrap_width_header = aspect80
        comp_wrap_width_continue = aspect80
    CodeComponent code_state_measure_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_state_measure_setup
        # Global setup logic for the stateMeasure routine.
        #
        # Handles scaling rules, slider configuration helpers, and
        # shared variables needed to dynamically construct rating
        # scales based on loop parameters.
        #
        # The stateMeasure routine depends on this setup code to
        # size components correctly and interpret SAM/text settings.
        # ------------------------------------------------------------
        _THIS_DIR = os.path.dirname(__file__)
        _REPO_ROOT = os.path.abspath(os.path.join(_THIS_DIR, '..', '..', '..'))
        if _REPO_ROOT not in sys.path:
            sys.path.insert(0, _REPO_ROOT)

        from neuroflare.shared.state_measure import StateMeasure, parse_tick_values

        sm = StateMeasure(win=win, aspect=aspect, screen_width=screen_width, screen_height=screen_height)
    CodeComponent code_trigger_setup
      Code Type = Py
      Begin Experiment:
        # ------------------------------------------------------------
        # code_trigger_setup

        # Manage a Brain Products TriggerBox over a virtual serial port.
        # Provides connection discovery, reconnection, and high/low
        # trigger management without crashing when the COM port is missing.
        # ------------------------------------------------------------
        from neuroflare.shared.trigger_box import TriggerBoxManager
        tb = TriggerBoxManager()
        tb.begin_experiment()

        # Emotion Regulation (30-39):
        trigger_neutral_image = (30, "neutral_image")
        trigger_practice_image = (31, "practice_image")
        trigger_negative_image = (32, "negative_image")
        trigger_regulation_cue = (38, "regulation_cue")
      End Experiment:
        # Close connection and send reset byte.
        tb.end_experiment()
      End Routine:
        # Clear out any residual triggers
        # Acts as both a marker and connection insurance.
        tb.send_event(value=1, name="experiment_start")
        tb.send_idle() # immediately return to baseline
    CodeComponent code_iasp_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_iasp_setup
        # Computes on-screen size for IASP images based on the window's
        # aspect ratio. Preserves the original 4:3 image ratio and scales
        # to the largest size that fits without distortion.
        #
        # Used by iaspView to size the image consistently across monitors.
        # ------------------------------------------------------------

        # Image aspect ratio (width / height)
        iasp_img_aspect = 1024 / 768  # = 1.3333

        # If the window is wider than the image, height is the limiting factor
        if aspect >= iasp_img_aspect:
            # Height fills the screen (minus a small margin if you want)
            iasp_comp_img_size_height = 1.0
            iasp_comp_img_size_width = iasp_comp_img_size_height * iasp_img_aspect
        else:
            # Width fills the screen
            iasp_comp_img_size_width = aspect
            iasp_comp_img_size_height = iasp_comp_img_size_width / aspect

        # If you want a little breathing room around the image:
        #iasp_margin = 0.05  # 5% margin
        #iasp_comp_img_height *= (1 - iasp_margin)
        #iasp_comp_img_width  *= (1 - iasp_margin)
    CodeComponent code_iasp_block_randomizer
      Code Type = Py
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      Before Experiment:
        # ------------------------------------------------------------
        # code_iasp_block_randomizer
        #
        # Generates all trial CSV files used by the experiment:
        #   - emotion_regulation_unpleasant_trials.csv
        #   - emotion_regulation_neutral_trials.csv
        #   - emotion_regulation_practice_trials.csv
        #
        # Performs the following:
        #   • Checks for missing or extra IASP images
        #   • Randomizes technique assignment to blocks
        #   • Randomizes block order
        #   • Randomizes photo order within each block
        #   • Inserts placeholder images if needed
        #
        # This code runs once before the experiment begins and writes
        # fully randomized trial files that the main loops will read.
        #
        # IMPORTANT:
        #   This component does NOT slice or select trials during the
        #   experiment. It only creates the CSVs.
        # ------------------------------------------------------------

        import random
        import csv
        import os

        placeholder_filename = 'IASP/placeholder.jpg'

        # Fallback: if placeholder image is absent, use empty string to avoid PsychoPy crash
        if not os.path.exists(placeholder_filename):
            print("Warning: placeholder image not found; using empty string to avoid crash.")
            placeholder_filename = ''

        # Techniques and blocks
        techniques = ['View', 'Suppress', 'Reappraise', 'Suppress and Reappraise']
        block_ids = ['block1', 'block2', 'block3', 'block4']

        # Photo sets per block
        photo_sets = {
            'block1': [1019, 1040, 1070, 1110, 1201, 1321, 2130, 2691, 2700, 2751, 2811, 3016, 3215, 3301, 5920, 6010, 6242, 6311, 6370, 6800, 6940, 8485, 9041, 9180, 9230, 9300, 9340, 9404, 9410, 9419, 9425, 9430, 9471, 9561, 9584, 9611, 9635, 9900, 9910, 9920],
            'block2': [1022, 1050, 1080, 1111, 1274, 1302, 2120, 2683, 2695, 2705, 2800, 3005, 3181, 3300, 4621, 5973, 6241, 6260, 6315, 6571, 6840, 8480, 9040, 9140, 9220, 9270, 9330, 9373, 9411, 9420, 9426, 9440, 9480, 9570, 9592, 9620, 9700, 9901, 9911, 9921],
            'block3': [1026, 1051, 1090, 1114, 1275, 1301, 2095, 2220, 2694, 2704, 2799, 3001, 3110, 3230, 3530, 5971, 6212, 6250, 6313, 6560, 6383, 8231, 9001, 9120, 9210, 9254, 9320, 9342, 9409, 9417, 9423, 9429, 9470, 9520, 9582, 9600, 9630, 9830, 9903, 9913],
            'block4': [1030, 1052, 1101, 1200, 1300, 1932, 2205, 2692, 2703, 2795, 2900, 3030, 3225, 3500, 5950, 6200, 6243, 6312, 6550, 6821, 8230, 9000, 9050, 9181, 9250, 9301, 9341, 9405, 9415, 9421, 9427, 9452, 9490, 9571, 9594, 9622, 9810, 9902, 9912, 9925],
        }

        block_neutral = [2272, 2383, 2393, 2396, 2397, 2435, 2480, 2514, 2518, 2575, 2580, 2593, 2594, 2870, 2880, 2980, 5395, 5455, 5471, 5520, 5740, 7002, 7004, 7036, 7037, 7041, 7130, 7140, 7205, 7217, 7491, 7493, 7495, 7496, 7504, 7546, 7550, 7640, 7705, 8221]
        block_practice = [1205, 3103, 3180, 3213, 3220, 3280, 5970, 6190]

        all_sets = list(photo_sets.values()) + [block_neutral, block_practice]

        # Check to see if any photos are missing
        def check_missing_photos(photo_id: str) -> bool:
            return not os.path.exists(f"IASP/{photo_id}.jpg")

        missing_list = [
            photo_id
            for block in all_sets
            for photo_id in block
            if check_missing_photos(photo_id)
        ]

        missing_set = set(missing_list)

        if missing_list:
            print(f"Missing stimuli: {len(missing_set)}")
            print("Names:", sorted(missing_set))
        else:
            print("All IASP files found.")

        # ----------------------------------------------------------
        # Check for extra files in IASP/ that are not referenced in any block
        def _collect_image_ids(folder: str) -> set[int]:
            ids = set()
            try:
                for name in os.listdir(folder):
                    lower = name.lower()
                    if lower.endswith(('.jpg', '.jpeg')):
                        stem, _ = os.path.splitext(name)
                        if stem.lower() == 'placeholder':
                            continue
                        if stem.isdigit():
                            ids.add(int(stem))
            except FileNotFoundError:
                pass
            return ids

        iasp_folder = 'IASP'
        available_ids = _collect_image_ids(iasp_folder)
        expected_ids = {pid for block in all_sets for pid in block}
        extra_ids = sorted(available_ids - expected_ids)

        if not os.path.isdir(iasp_folder):
            print("IASP folder not found; skipping extra-file check.")
        elif extra_ids:
            print(f"Extra stimuli in IASP not used: {len(extra_ids)}")
            print("Names:", extra_ids)
        else:
            print("No extra stimuli in IASP source folder.")

        # ----------------------------------------------------------
        # Create negative blocks trials file
        # Randomly assign techniques to blocks
        negative_file_name = 'emotion_regulation_unpleasant_trials.csv'

        random.shuffle(techniques)
        block_to_technique = dict(zip(block_ids, techniques))
        negative_trials_technique_order = [] # Referenced in reset routine

        # Randomize block order
        block_order = block_ids.copy()
        random.shuffle(block_order)

        # Build trial list
        negative_trials = []
        negative_trial_number = 1

        for block in block_order:
            technique = block_to_technique[block]
            negative_trials_technique_order.append(technique)
            photos = photo_sets[block].copy()
            random.shuffle(photos)

            for photo_id in photos:
                if photo_id in missing_set:
                    photo_path = placeholder_filename
                else:
                    photo_path = f"IASP/{photo_id}.jpg"

                negative_trials.append({
                    'trial_number': negative_trial_number,
                    'block_id': block,
                    'technique': technique,
                    'photo_filename': photo_path
                })
                negative_trial_number += 1

        # Save to CSV
        with open(negative_file_name, 'w', newline='') as f:
            writer = csv.DictWriter(f, fieldnames=negative_trials[0].keys())
            writer.writeheader()
            writer.writerows(negative_trials)

        print(f"Saved randomized trial file: {negative_file_name}")

        # ----------------------------------------------------------
        # Create block_neutral trials file
        neutral_file_name = 'emotion_regulation_neutral_trials.csv'
        neutral_trials = []
        neutral_trial_number = 1

        # Randomize photo order
        neutral_photos = block_neutral.copy()
        random.shuffle(neutral_photos)

        for photo_id in neutral_photos:
            if photo_id in missing_set:
                photo_path = placeholder_filename
            else:
                photo_path = f"IASP/{photo_id}.jpg"

            neutral_trials.append({
                'trial_number': neutral_trial_number,
                'block_id': 'block_neutral',
                'technique': 'View',
                'photo_filename': photo_path
            })
            neutral_trial_number += 1

        # Save block_neutral to CSV
        with open(neutral_file_name, 'w', newline='') as f:
            writer = csv.DictWriter(f, fieldnames=neutral_trials[0].keys())
            writer.writeheader()
            writer.writerows(neutral_trials)

        print(f"Saved randomized trial file: {neutral_file_name}")

        # ----------------------------------------------------------
        # Create block_practice trials file
        practice_file_name = 'emotion_regulation_practice_trials.csv'
        practice_trials = []
        practice_trial_number = 1

        # Randomize photo order
        practice_photos = block_practice.copy()
        random.shuffle(practice_photos)

        for photo_id in practice_photos:
            if photo_id in missing_set:
                photo_path = placeholder_filename
            else:
                photo_path = f"IASP/{photo_id}.jpg"

            practice_trials.append({
                'trial_number': practice_trial_number,
                'block_id': 'block_practice',
                'technique': 'View',
                'photo_filename': photo_path
            })
            practice_trial_number += 1

        # Save block_practice to CSV
        with open(practice_file_name, 'w', newline='') as f:
            writer = csv.DictWriter(f, fieldnames=practice_trials[0].keys())
            writer.writeheader()
            writer.writerows(practice_trials)

        print(f"Saved randomized trial file: {practice_file_name}")
      Begin Experiment:
        # Initialize slice indices
        start = 0
        end = 40

        # Store for logging
        thisExp.addData('block_order', block_order)
        thisExp.addData('block_to_technique', block_to_technique)
  Routine welcome
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    TextComponent t_welcome_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Message
      units = height
      wrapWidth = comp_wrap_width_body
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    TextComponent t_welcome_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to continue
      units = height
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stateMeasure
    RoutineSettingsComponent stateMeasure
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      desc:
        This routine presents a rating scale that adapts based on parameters supplied by the surrounding loop.
        To use it, place stateMeasure inside a loop whose conditions file includes rating_category.
        Then, make sure state_measure_labels.py has the following for your category:
        - message
        - min_label
        - max_label
        - picture_path (SAM only; expects a 1168×231 image)
        - tick_values
        - granularity
        - style
        The routine reads these values on each iteration and configures the slider dynamically.
        Make sure to update Selected Rows to only use the ratings you want.
        The standard rows are: [0, 1, 2, 3, 4, 5, 6], which describe:
        fatigue, sleepiness, pain, pain_unpleasantness, sam_valence, sam_arousal, sam_dominance
        The experiment must include the code_state_measure_setup component, which handles global setup and shared logic.
    CodeComponent code_sm_helper
      Code Type = Py
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      Begin Routine:
        # --- Create a fresh slider for this trial ---
        allowContinue = False
        sm.begin_routine_from_category(rating_category)
      Each Frame:
        # If rated, allow spacebar to end the routine
        if sm.has_rating():
            allowContinue = True
      End Routine:
        # Log rating, rt, and turn off AutoDraw
        sm.end_routine(currentLoop)
    TextComponent t_sm_continue
      durationEstim = 4.8
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_sm
      allowedKeys [set every repeat] = 'space'
      durationEstim = 4.8
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $allowContinue == True
      store = nothing
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  Routine instructionNeutral
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    TextComponent t_neutral_instruction
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = comp_wrap_width_body
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      text:
        First, you will just view neutral pictures.

        Look at each picture naturally as it appears.
        Do not try to change your thoughts, feelings, or reactions.
        Simply observe the picture and let your response unfold on its own.
    TextComponent t_neutral_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_neutral
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructionUnpleasant
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    TextComponent t_unpleasant_instruction
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = comp_wrap_width_body
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      text [set every repeat]:
        Next, you will begin the main set of unpleasant picture trials.

        If at any point you would like to stop, please let the experimenter know.
    TextComponent t_unpleasant_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Otherwise, press the SPACEBAR to begin the emotion regulation tasks
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_unpleasant
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine reset
    RoutineSettingsComponent reset
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      desc:
        Prepares participants for the upcoming block by displaying emotion regulation instructions and advancing the trial slice.
        This routine:
        - Shows task instructions before each block
        - Uses code_slicer_helper to select the next 40-trial slice
        - Can be extended to display block-specific strategy guidance
        If dynamic instructions are enabled, the routine can show tailored guidance based on the current emotion regulation strategy (e.g., Suppress, Reappraise).
        To support this, the current technique must be accessible from the loop or stored globally during block setup.
    CodeComponent code_slicer_helper
      Code Type = Py
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      Begin Experiment:
        reset_routine_counter = 0
        just_view_text = "Just View\n\nLook at each picture naturally as it appears.\nDo not try to change your thoughts, feelings, or reactions.\nSimply observe the picture and let your response unfold on its own."
        suppress_text = "Suppress Emotion\n\nTry to reduce or hold back the unpleasant feelings the picture might bring up.\nYou can push the feelings down, ignore them, or keep a neutral expression.\nFocus on staying steady and minimizing your emotional reaction."
        reappraise_text = "Reappraise\n\nChange the way you think about the picture so it feels less unpleasant.\nYou might reinterpret what is happening, imagine a different meaning,\nor think about the situation in a way that makes it feel less intense."
        suppress_and_reappraise_text = "Suppress and Reappraise\n\nUse both strategies at the same time.\nFirst, reinterpret the picture in a way that makes it feel less unpleasant.\nAt the same time, try to hold back or reduce your emotional reaction."
      Begin Routine:
        # ------------------------------------------------------------
        # code_slicer_helper
        #
        # Selects the current 40 trial slice from the pre-randomized
        # CSV file. The surrounding loop uses this slice to determine
        # which trials to run for the current block.
        #
        # Begin Routine:
        #   • Builds a "start:end" slice string (e.g., "0:40")
        #   • Logs the slice to the data file for analysis
        #
        # End Routine:
        #   • Advances start/end by 40 to move to the next block
        #
        # This component does NOT randomize trials. It only selects
        # which portion of the CSV to use on each loop iteration.
        # ------------------------------------------------------------

        # Define slice for current block
        row_section = f"{start}:{end}"
        #print(row_section)

        # Log which slice was used
        #currentLoop.addData('row_section', row_section)

        # Change current emotion regulation strategy text
        current_technique = negative_trials_technique_order[reset_routine_counter]
        t_reset_instruction_text = ""

        if current_technique == "View":
            t_reset_instruction_text = just_view_text
        elif current_technique == "Suppress":
            t_reset_instruction_text = suppress_text
        elif current_technique == "Reappraise":
            t_reset_instruction_text = reappraise_text
        elif current_technique == "Suppress and Reappraise":
            t_reset_instruction_text = suppress_and_reappraise_text
        else:
            t_reset_instruction_text = "Unknown technique. Please contact the experimenter."
      End Routine:
        # Advance slice for next block
        start += 40
        end += 40

        if reset_routine_counter < len(negative_trials_technique_order):
            reset_routine_counter += 1
    TextComponent t_reset_instruction
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $t_reset_instruction_text
      wrapWidth = comp_wrap_width_body
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    TextComponent t_reset_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_reset
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine emotionRegulationCue
    RoutineSettingsComponent emotionRegulationCue
      color = -1.0000, -1.0000, -1.0000
      durationEstim = 2.8
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      desc:
        This routine presents the regulation cue for the current trial.
        It must be paired with iaspView inside the same loop.
        The loop’s conditions file must include the following columns:
        - trial_number
        - block_id
        - technique (required by this routine)
        - photo_filename
        The routine displays a fixation cross, followed by the regulation cue text, and then a variable blank delay.
        The delay duration is randomized between 0.5–1.5 seconds using the code_delay_calculator component.

        This routine does not handle trial order randomization; it only reads values supplied by the loop.
    CodeComponent code_delay_calculator
      Code Type = Py
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      Begin Routine:
        # Gives a random float between 0.5 and 1.5 seconds (i.e., 500–1500 ms)
        # Used for t_blank_delayer
        delay_time = random.uniform(0.5, 1.5)
        currentLoop.addData('delay_time', delay_time)
        tb.send_event(*trigger_regulation_cue)
      End Routine:
        tb.send_idle()
    PolygonComponent cross_fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = height
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    TextComponent t_emotion_regulation_cue
      letterHeight = 0.12
      pos = (0.0, 0.05)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1
      text [set every repeat] = $technique
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    TextComponent t_blank_delayer
      durationEstim = 1.5
      letterHeight = 0.07
      pos = (0.0, 0.05)
      startEstim = 1.3
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = $delay_time
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    KeyboardComponent key_resp_cue_debug
      allowedKeys = 'right'
      disabled = True
      durationEstim = 2.8
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = t_blank_delayer.status == STOPPED
      store = nothing
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  Routine iaspView
    RoutineSettingsComponent iaspView
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 5
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      desc:
        This routine presents the IASP image for the current trial and (optionally) sends the corresponding trigger.
        It must be paired with emotionRegulationCue inside the same loop.
        The loop’s conditions file must include the following columns:
        - trial_number
        - block_id
        - technique
        - photo_filename (required by this routine)
        The routine displays the trial’s image for a fixed duration and uses the p_port_iasp component to send a trigger aligned to image onset and offset (if available).
        Trigger behavior depends on the parallel‑port setup.

        This routine does not perform any randomization; it simply uses the values provided by the loop.
    ImageComponent image_iasp
      image [set every repeat] = $photo_filename
      size [set every repeat] = [iasp_comp_img_size_width, iasp_comp_img_size_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = height
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    CodeComponent code_iasp_helper
      Code Type = Py
      Begin Experiment:
        background_box = visual.Rect(
            win,
            width=aspect,   # full width in height units
            height=1.0,     # full height
            fillColor='black',
            lineColor='black'
        )
      Begin Routine:
        background_box.setAutoDraw(True)

        if currentLoop.name == "iasp_neutral_trials":
            trigger_value, trigger_name = trigger_neutral_image
        elif currentLoop.name == "iasp_practice_trials":
            trigger_value, trigger_name = trigger_practice_image
        elif currentLoop.name == "iasp_unpleasant_trials":
            trigger_value, trigger_name = trigger_negative_image
        else:
            tb._log_error(f"Unknown loop '{currentLoop.name}' - no trigger assigned")
            trigger_value, trigger_name = (32, "negative_image_placeholder")
      Each Frame:
        if image_iasp.status == STARTED:
            tb.send_event(trigger_value, trigger_name)
        elif image_iasp.status == STOPPED:
            tb.send_idle()
            background_box.autoDraw = False
      End Routine:
        tb.send_idle()
        background_box.setAutoDraw(False)
    KeyboardComponent key_resp_iasp_debug
      allowedKeys = 'right'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = nothing
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  Routine goodbye
    RoutineSettingsComponent goodbye
      stopVal [duration (s)] = 4
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    TextComponent t_goodbye
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = You have completed the trial. Thank you!
      wrapWidth = comp_wrap_width_body
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  Routine instructionPractice
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    TextComponent t_practice_instruction
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = comp_wrap_width_body
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      text:
        You will see examples of unpleasant pictures.

        Look at each picture naturally as it appears.
        Do not try to change your thoughts, feelings, or reactions.
        Simply observe the picture and let your response unfold on its own.
    TextComponent t_practice_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_practice
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine experimentSetup
  LoopInitiator intro_prompts loopType="TrialHandler"
    conditionsFile = loopEmotionRegulationIntro.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Message', 'Emotion Regulation\nPicture Viewing Task\n-Neutral or Unpleasant-')]),
      OrderedDict([('Message', 'You will see several series of pictures that represent different events that occur in life.')]),
      OrderedDict([('Message', 'We will do a neutral and practice trial before the unpleasant trial.\n\nPlease let the experimenter know if you have any questions.')])]
    Routine welcome
  LoopTerminator intro_prompts
  LoopInitiator state_measure_pretrial loopType="TrialHandler"
    Selected rows = [0, 1, 2, 3, 4, 5, 6]
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_category', 'fatigue')]),
      OrderedDict([('rating_category', 'sleepiness')]),
      OrderedDict([('rating_category', 'pain')]),
      OrderedDict([('rating_category', 'pain_unpleasantness')]),
      OrderedDict([('rating_category', 'sam_valence')]),
      OrderedDict([('rating_category', 'sam_arousal')]),
      OrderedDict([('rating_category', 'sam_dominance')]),
      OrderedDict([('rating_category', 'emotion_regulation')])]
    Routine stateMeasure
  LoopTerminator state_measure_pretrial
  Routine instructionNeutral
  LoopInitiator iasp_neutral_trials loopType="TrialHandler"
    conditionsFile = emotion_regulation_neutral_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_number', np.int64(1)), ('block_id', 'block_neutral'), ('technique', 'View'), ('photo_filename', 'IASP/2435.jpg')]),
      OrderedDict([('trial_number', np.int64(2)), ('block_id', 'block_neutral'), ('technique', 'View'), ('photo_filename', 'IASP/2980.jpg')]),
      OrderedDict([('trial_number', np.int64(3)), ('block_id', 'block_neutral'), ('technique', 'View'), ('photo_filename', 'IASP/2480.jpg')]),
      OrderedDict([('trial_number', np.int64(4)), ('block_id', 'block_neutral'), ('technique', 'View'), ('photo_filename', 'IASP/7546.jpg')]),
      OrderedDict([('trial_number', np.int64(5)), ('block_id', 'block_neutral'), ('technique', 'View'), ('photo_filename', 'IASP/7036.jpg')]),
      OrderedDict([('trial_number', np.int64(6)), ('block_id', 'block_neutral'), ('technique', 'View'), ('photo_filename', 'IASP/7705.jpg')]),
      OrderedDict([('trial_number', np.int64(7)), ('block_id', 'block_neutral'), ('technique', 'View'), ('photo_filename', 'IASP/2593.jpg')]),
      OrderedDict([('trial_number', np.int64(8)), ('block_id', 'block_neutral'), ('technique', 'View'), ('photo_filename', 'IASP/7002.jpg')]),
      OrderedDict([('trial_number', np.int64(9)), ('block_id', 'block_neutral'), ('technique', 'View'), ('photo_filename', 'IASP/2880.jpg')]),
      OrderedDict([('trial_number', np.int64(10)), ('block_id', 'block_neutral'), ('technique', 'View'), ('photo_filename', 'IASP/5471.jpg')]),
      OrderedDict([('trial_number', np.int64(11)), ('block_id', 'block_neutral'), ('technique', 'View'), ('photo_filename', 'IASP/7550.jpg')])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
    Routine emotionRegulationCue
    Routine iaspView
  LoopTerminator iasp_neutral_trials
  LoopInitiator state_measure_neutral loopType="TrialHandler"
    Selected rows = [0, 1, 2, 3, 4, 5, 6]
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_category', 'fatigue')]),
      OrderedDict([('rating_category', 'sleepiness')]),
      OrderedDict([('rating_category', 'pain')]),
      OrderedDict([('rating_category', 'pain_unpleasantness')]),
      OrderedDict([('rating_category', 'sam_valence')]),
      OrderedDict([('rating_category', 'sam_arousal')]),
      OrderedDict([('rating_category', 'sam_dominance')]),
      OrderedDict([('rating_category', 'emotion_regulation')])]
    Routine stateMeasure
  LoopTerminator state_measure_neutral
  Routine instructionPractice
  LoopInitiator iasp_practice_trials loopType="TrialHandler"
    conditionsFile = emotion_regulation_practice_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_number', np.int64(1)), ('block_id', 'block_practice'), ('technique', 'View'), ('photo_filename', 'IASP/3180.jpg')]),
      OrderedDict([('trial_number', np.int64(2)), ('block_id', 'block_practice'), ('technique', 'View'), ('photo_filename', 'IASP/6190.jpg')]),
      OrderedDict([('trial_number', np.int64(3)), ('block_id', 'block_practice'), ('technique', 'View'), ('photo_filename', 'IASP/5970.jpg')]),
      OrderedDict([('trial_number', np.int64(4)), ('block_id', 'block_practice'), ('technique', 'View'), ('photo_filename', 'IASP/3103.jpg')]),
      OrderedDict([('trial_number', np.int64(5)), ('block_id', 'block_practice'), ('technique', 'View'), ('photo_filename', 'IASP/3213.jpg')]),
      OrderedDict([('trial_number', np.int64(6)), ('block_id', 'block_practice'), ('technique', 'View'), ('photo_filename', 'IASP/3280.jpg')]),
      OrderedDict([('trial_number', np.int64(7)), ('block_id', 'block_practice'), ('technique', 'View'), ('photo_filename', 'IASP/1205.jpg')]),
      OrderedDict([('trial_number', np.int64(8)), ('block_id', 'block_practice'), ('technique', 'View'), ('photo_filename', 'IASP/3220.jpg')])]
    Routine emotionRegulationCue
    Routine iaspView
  LoopTerminator iasp_practice_trials
  Routine instructionUnpleasant
  LoopInitiator block_loop loopType="TrialHandler"
    conditionsFile = current_slice.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('slice_id', np.int64(0))]),
      OrderedDict([('slice_id', np.int64(1))]),
      OrderedDict([('slice_id', np.int64(2))]),
      OrderedDict([('slice_id', np.int64(3))])]
    Routine reset
    LoopInitiator iasp_unpleasant_trials loopType="TrialHandler"
      Selected rows = $row_section
      conditionsFile = emotion_regulation_unpleasant_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('trial_number', np.int64(1)), ('block_id', 'block3'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9470.jpg')]),
        OrderedDict([('trial_number', np.int64(2)), ('block_id', 'block3'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/1275.jpg')]),
        OrderedDict([('trial_number', np.int64(3)), ('block_id', 'block3'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9903.jpg')]),
        OrderedDict([('trial_number', np.int64(4)), ('block_id', 'block3'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/6383.jpg')]),
        OrderedDict([('trial_number', np.int64(5)), ('block_id', 'block3'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/6212.jpg')]),
        OrderedDict([('trial_number', np.int64(6)), ('block_id', 'block3'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/3230.jpg')]),
        OrderedDict([('trial_number', np.int64(7)), ('block_id', 'block3'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9520.jpg')]),
        OrderedDict([('trial_number', np.int64(8)), ('block_id', 'block3'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/8231.jpg')]),
        OrderedDict([('trial_number', np.int64(9)), ('block_id', 'block3'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9342.jpg')]),
        OrderedDict([('trial_number', np.int64(10)), ('block_id', 'block3'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9582.jpg')]),
        OrderedDict([('trial_number', np.int64(11)), ('block_id', 'block3'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/3530.jpg')])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
      Routine emotionRegulationCue
      Routine iaspView
    LoopTerminator iasp_unpleasant_trials
    LoopInitiator state_measure_unpleasant loopType="TrialHandler"
      Selected rows = [7, 0, 1, 2, 3, 4, 5, 6]
      conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine stateMeasure
    LoopTerminator state_measure_unpleasant
  LoopTerminator block_loop
  Routine goodbye
