PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $(-0.5000, -0.5000, -0.5000)
  expName = open-closed
  expVersion = 1.0
  keyboardBackend = ioHub
  logging level = debug
  runMode = 0
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Routines
  Routine experimentSetup
    RoutineSettingsComponent experimentSetup
      saveStartStop = False
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      desc:
        This routine contains all Before Experiment and Begin Experiment code components used across the entire study.
        It centralizes global variables, screen geometry, scaling logic, and shared helper functions so that all other routines operate within a consistent coordinate system and configuration.

        Because these variables are referenced throughout the experiment, changes should be made cautiously and with awareness of downstream effects.
        This routine must appear before any trial‑based routines in the experiment flow.
    CodeComponent code_experiment_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_experiment_setup
        # Global screen geometry and shared layout variables.
        #
        # Computes window aspect ratio and establishes a unified
        # coordinate system in 'height' units so all routines scale
        # consistently across monitors.
        #
        # Also defines shared wrap-width values for text components.
        # ------------------------------------------------------------

        # ============================================================
        # =============== GLOBAL SCREEN GEOMETRY =====================
        # ============================================================
        # Centralized screen geometry so all routines share the same coordinate system

        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5

        # Wrap width as a percentage of screen width
        aspect80 = aspect * 0.80 # 80% of screen width
        aspect20 = aspect * 0.20  # 20% of screen width
        comp_wrap_width_body = aspect80
        comp_wrap_width_header = aspect80
        comp_wrap_width_continue = aspect80
    CodeComponent code_state_measure_setup
      Code Type = Py
      disabled = True
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_state_measure_setup
        # Global setup logic for the stateMeasure routine.
        #
        # Handles scaling rules, slider configuration helpers, and
        # shared variables needed to dynamically construct rating
        # scales based on loop parameters.
        #
        # The stateMeasure routine depends on this setup code to
        # size components correctly and interpret SAM/text settings.
        # ------------------------------------------------------------

        # --- Helper functions for dynamic slider configuration ---
        def parse_tick_values(raw):
            # If PsychoPy already parsed it into a list, just return it
            if isinstance(raw, list):
                return raw
            # Otherwise assume it's a comma-separated string
            return [int(x.strip()) for x in raw.split(',')]

        # ===============================================================
        # ============== STATE-MEASURE SPECIFIC GEOMETRY ================
        # ===============================================================

        def sm_compute_tick_positions(tick_values, rating_type):
            """
            Compute slider size, slider position, and min/max label positions
            for both SAM and Generic rating types.
            """

            if rating_type == "SAM":
                # SAM uses the precomputed geometry
                slider_size = (sm_sam_comp_slider_width, sm_sam_comp_slider_size_height)
                slider_pos  = (0, sm_sam_comp_slider_pos_y)

                # Tick positions already computed globally
                tick_positions = sm_sam_tick_positions

                label_min_pos = (tick_positions[0],  sm_sam_comp_label_pos_y)
                label_max_pos = (tick_positions[-1], sm_sam_comp_label_pos_y)

            else:
                # Generic slider: evenly spaced ticks across the slider width
                slider_size = (sm_gen_comp_slider_size_width, sm_gen_comp_slider_size_height)
                slider_pos  = (0, sm_gen_comp_slider_pos_y)

                # Compute generic tick positions dynamically
                num_ticks = len(tick_values)
                half_width = sm_gen_comp_slider_size_width / 2

                # Even spacing across the width
                tick_positions = [
                    -half_width + (i / (num_ticks - 1)) * sm_gen_comp_slider_size_width
                    for i in range(num_ticks)
                ]

                # Labels sit below the slider
                label_min_pos = (tick_positions[0],  sm_gen_comp_label_pos_y)
                label_max_pos = (tick_positions[-1], sm_gen_comp_label_pos_y)

            return {
                "slider_size": slider_size,
                "slider_pos": slider_pos,
                "tick_positions": tick_positions,
                "label_min_pos": label_min_pos,
                "label_max_pos": label_max_pos
            }

        # ===============================================================
        # =================== GEN SPECIFIC GEOMETRY =====================
        # ===============================================================

        # --- Generic Slider Scaling ---
        # Full-width slider across screen
        # Generic slider (used when rating_type != "SAM")

        # Slider layout (height units)
        sm_gen_comp_slider_size_width  = aspect * 0.6  # 60% of screen width
        sm_gen_comp_slider_size_height = 0.1           # slider thickness/height
        sm_gen_comp_slider_pos_y       = 0             # vertical position of the slider center

        # Label Min/Max layout
        sm_gen_comp_label_pos_y = sm_gen_comp_slider_pos_y - 0.2

        # ===============================================================
        # =================== SAM SPECIFIC GEOMETRY =====================
        # ===============================================================

        # --- SAM image geometry (pixels) ---
        sm_sam_img_px_width  = 1168
        sm_sam_img_px_height = 231
        sm_sam_img_aspect    = sm_sam_img_px_width / sm_sam_img_px_height  # ≈ 5.056

        # Pictogram/gap geometry (pixels)
        # Note: there are 5 pictograms and 4 gaps spanning the full image width
        sm_sam_pictogram_px_width     = 215
        sm_sam_pictogram_gap_px_width = 23

        # --- Layout decisions (height units) ---
        sm_sam_comp_img_size_height = 0.25                                             # 25% of screen height
        sm_sam_comp_img_size_width  = sm_sam_comp_img_size_height * sm_sam_img_aspect  # scaled width based on aspect
        sm_sam_comp_img_pos_y       = 0.1                                              # vertical position of the image

        # Message Layout
        sm_sam_comp_message_pos_y = sm_sam_comp_img_pos_y + 0.2

        # Slider layout (height units)
        sm_sam_comp_slider_pos_y       = -0.09      # vertical position of the slider center
        sm_sam_comp_slider_size_height = 0.06       # slider thickness/height
        sm_sam_slider_px_width    = sm_sam_img_px_width - 215
        sm_sam_comp_slider_width  = sm_sam_comp_img_size_width * (sm_sam_slider_px_width / sm_sam_img_px_width)

        # Scale factor: px -> 'height' units within the image width
        sm_sam_scale_factor = sm_sam_comp_img_size_width / sm_sam_img_px_width

        sm_sam_pictogram_w  = sm_sam_pictogram_px_width * sm_sam_scale_factor
        sm_sam_gap_w        = sm_sam_pictogram_gap_px_width * sm_sam_scale_factor

        # --- Compute 9 tick x-positions aligned to pictograms ---
        sm_sam_tick_positions = []
        sm_sam_tick_x = -sm_sam_comp_img_size_width / 2 + sm_sam_pictogram_w / 2

        for i in range(9):
            sm_sam_tick_positions.append(sm_sam_tick_x)
            if i % 2 == 0:
                sm_sam_tick_x += sm_sam_pictogram_w / 2 + sm_sam_gap_w / 2
            else:
                sm_sam_tick_x += sm_sam_gap_w / 2 + sm_sam_pictogram_w / 2

        # Label Min/Max layout
        sm_sam_comp_label_pos_y = sm_sam_comp_slider_pos_y - 0.15
    CodeComponent code_open_closed_setup
      Code Type = Py
      Begin Experiment:
        # ------------------------------------------------------------
        # code_open_closed_setup
        # Define the instruction text for each eye-state condition.
        # ------------------------------------------------------------
        # These strings are kept in-code (rather than in the CSV) so the
        # condition file only needs to specify the Category. This keeps
        # the output cleaner and prevents text duplication across files.
        open_eyes_text = "Look at the + mark and stay still for 5 minutes."
        closed_eyes_text = "Close your eyes and stay still for 5 minutes."

        # This variable will be updated on each loop iteration by the
        # instruction helper code. It provides the text shown in the
        # instruction routine.
        instruction_text = "Default message."
    CodeComponent code_new_state_measure
      Code Type = Py
      Begin Experiment:
        _THIS_DIR = os.path.dirname(__file__)
        _REPO_ROOT = os.path.abspath(os.path.join(_THIS_DIR, '..', '..', '..'))
        if _REPO_ROOT not in sys.path:
            sys.path.insert(0, _REPO_ROOT)

        from neuroflare.shared.state_measure import StateMeasure, parse_tick_values

        sm = StateMeasure(win=win, aspect=aspect, screen_width=screen_width, screen_height=screen_height)
  Routine welcome
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    TextComponent t_welcome_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Message
      units = height
      wrapWidth = comp_wrap_width_body
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    TextComponent t_welcome_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to continue
      units = height
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stateMeasure
    CodeComponent code_sm_helper
      Code Type = Py
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      Begin Routine:
        allowContinue = False

        # Parse tick values from the condition file
        tick_values_parsed = parse_tick_values(tick_values)

        try:
            logging.debug(f"Starting state-measure in loop: {currentLoop.name}")
            logging.debug(f"State-measure current row: {rating_category}, {rating_type}")
            logging.debug(f"State-measure tick values: {tick_values_parsed}")
        except:
            logging.error("Error printing current state measure row.")

        # Compute geometry based on rating type
        sm_geometry = sm_compute_tick_positions(tick_values_parsed, rating_type)

        sm_comp_slider_size = sm_geometry["slider_size"]
        sm_comp_slider_pos  = sm_geometry["slider_pos"]
        sm_comp_label_min_pos = sm_geometry["label_min_pos"]
        sm_comp_label_max_pos = sm_geometry["label_max_pos"]

        t_sm_label_min = visual.TextStim(
            win=win,
            text=rating_min_label,
            pos=(sm_comp_label_min_pos[0], sm_comp_label_min_pos[1]),
            wrapWidth=aspect20,
            anchorVert='top',
            height=0.05,
            color='white',
            font='Noto Sans'
        )

        t_sm_label_max = visual.TextStim(
            win=win,
            text=rating_max_label,
            pos=(sm_comp_label_max_pos[0], sm_comp_label_max_pos[1]),
            wrapWidth=aspect20,
            anchorVert='top',
            height=0.05,
            color='white',
            font='Noto Sans'
        )

        #t_label_min.setPos(sm_comp_label_min_pos)
        #t_label_max.setPos(sm_comp_label_max_pos)

        # --- Create a fresh slider for this trial ---
        sm_slider = visual.Slider(
            win=win,
            ticks=tick_values_parsed,
            labels=tick_values_parsed,
            granularity=granularity,
            style=style.lower(),
            pos=sm_comp_slider_pos,
            size=sm_comp_slider_size,
            labelHeight=0.05,
            colorSpace='rgb',
            markerColor='Red',
            lineColor='White',
            labelColor='LightGray',
            font='Noto Sans'
        )

        # --- SAM image logic ---
        if rating_type == 'SAM':
            image_SAM.setImage(picture_path)
            image_SAM.setAutoDraw(True)
        else:
            image_SAM.setAutoDraw(False)
      Each Frame:
        # Draw state measure components
        sm_slider.draw()
        t_sm_label_min.draw()
        t_sm_label_max.draw()

        # If rated, allow spacebar to end the routine
        if sm_slider.getRating() is not None:
            allowContinue = True
      End Routine:
        #thisExp.addData('rating', sm_slider.getRating())
        currentLoop.addData('rating', sm_slider.getRating())
        currentLoop.addData('rating_rt', sm_slider.getRT())

        try:
            logging.data(f"State-measure rating: {rating_category}, {sm_slider.getRating()}")
        except:
            logging.error("Error printing state-measure rating")
    RoutineSettingsComponent stateMeasure
      disabled = True
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      desc:
        This routine presents a rating scale that adapts based on parameters supplied by the surrounding loop.
        To use it, place stateMeasure inside a loop whose conditions file includes the following columns:
        - rating_type
        - rating_category
        - rating_message
        - rating_min_label
        - rating_max_label
        - picture_path (SAM only; expects a 1168×231 image)
        - tick_values
        - granularity
        - style
        The routine reads these values on each iteration and configures the slider dynamically.
        The experiment must include the code_state_measure_setup component, which handles global setup and shared logic.
    ImageComponent image_SAM
      image [set every repeat] = $picture_path
      pos [set every repeat] = (0, sm_sam_comp_img_pos_y)
      saveStartStop = False
      size [set every repeat] = (sm_sam_comp_img_size_width, sm_sam_comp_img_size_height)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent t_sm_message
      letterHeight = 0.07
      pos = (0, .35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = comp_wrap_width_header
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    TextComponent t_sm_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_sm
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $allowContinue == True
      store = nothing
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  Routine instruction
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    CodeComponent code_instruction_helper
      Code Type = Py
      Begin Routine:
        # ------------------------------------------------------------
        # code_instruction_helper

        # Select the appropriate instruction text based on the current
        # trial's Category value. This keeps the logic centralized and
        # avoids storing long text strings in the condition file.
        # ------------------------------------------------------------
        if Category == "Open-Eyes":
            instruction_text = open_eyes_text
        elif Category == "Closed-Eyes":
            instruction_text = closed_eyes_text
        else:
            # Fallback message in case the condition file contains an
            # unexpected category. This helps catch typos or file issues.
            instruction_text = "Unknown category. Please contact the experimenter."
    TextComponent t_instruction_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
      units = height
      wrapWidth = comp_wrap_width_body
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    TextComponent t_instruction_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    RoutineSettingsComponent fixation
      durationEstim = 300
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    PolygonComponent cross_fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      units = height
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    TextComponent t_fixation_closed
      durationEstim = 300
      letterHeight = 0.03
      pos = (0.0, -0.4)
      saveStartStop = False
      startEstim = 0
      startVal [condition] = $Category == "Closed-Eyes"
      stopVal [condition] = $Category != "Closed-Eyes"
      text [set every repeat] = Please keep your eyes closed during this block.
      units = height
      wrapWidth = comp_wrap_width_body
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    ParallelOutComponent p_port_fixation
      address = 0x0378
      disabled = True
      durationEstim = 300
      register = EIO
      startData = 1
      startEstim = 0
      startVal [condition] = $cross_fixation.status == STARTED
      stopData = 0
      stopVal [condition] = $cross_fixation.status == STOPPED
      syncScreen = True
      syncScreenRefresh = True
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    KeyboardComponent key_resp_fixation_debug
      allowedKeys = 'right'
      disabled = True
      durationEstim = 300
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine goodbye
    RoutineSettingsComponent goodbye
      stopVal [duration (s)] = 4
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    TextComponent t_goodbye
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = You have completed the trial. Thank you!
      units = height
      wrapWidth = comp_wrap_width_header
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  Routine newStateMeasure
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    CodeComponent code_new_state_helper
      Code Type = Py
      Begin Routine:
        allowContinue = False

        #sm.begin_routine(
        #    rating_type=rating_type,
        #    rating_category=rating_category,
        #    rating_message=rating_message,
        #    rating_min_label=rating_min_label,
        #    rating_max_label=rating_max_label,
        #    picture_path=picture_path,
        #    tick_values=tick_values,
        #    granularity=granularity,
        #    style=style,
        #    auto_draw=True,
        #)

        sm.begin_routine_from_category(rating_category)
      Each Frame:
        if sm.has_rating():
            allowContinue = True
      End Routine:
        #try:
        #    # Add data via module helper if currentLoop exists; otherwise just log
        #    end_info = None
        #    if 'currentLoop' in globals() and currentLoop is not None:
        #        end_info = sm.end_routine(currentLoop)
        #    else:
        #        end_info = sm.end_routine(None)
        #    logging.data(f"State-measure rating: {rating_category}, {end_info['rating']}")
        #except Exception:
        #    logging.error("Error printing state-measure rating")

        sm.end_routine(currentLoop)
    TextComponent t_sm_message_2
      disabled = True
      letterHeight = 0.07
      pos = (0, .35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = comp_wrap_width_header
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    TextComponent t_sm_continue_2
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_sm_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $allowContinue == True
      store = nothing
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Flow
  Routine experimentSetup
  LoopInitiator new_state_measure loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_category', 'fatigue')]),
      OrderedDict([('rating_category', 'sleepiness')]),
      OrderedDict([('rating_category', 'pain')]),
      OrderedDict([('rating_category', 'pain_unpleasantness')]),
      OrderedDict([('rating_category', 'sam_valence')]),
      OrderedDict([('rating_category', 'sam_arousal')]),
      OrderedDict([('rating_category', 'sam_dominance')]),
      OrderedDict([('rating_category', 'emotion_regulation')])]
    Routine newStateMeasure
  LoopTerminator new_state_measure
  LoopInitiator intro_prompts loopType="TrialHandler"
    conditionsFile = loopOpenClosedIntro.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Message', 'Welcome to the Open-Closed Eyes Experiment!\n\nThis is designed for the Wireless EEG and EMG devices. ')]),
      OrderedDict([('Message', 'Please relax and remain still during the experiment while we record your baseline brain activity.')]),
      OrderedDict([('Message', 'Follow the on-screen instructions to open or close your eyes as prompted.\n\nWe will do this twice, with each round lasting 5 minutes.')]),
      OrderedDict([('Message', 'During the eyes-open section,\nlook steadily at the cross mark in the center of the screen.')]),
      OrderedDict([('Message', "For the eyes-closed section,\nyou'll close your eyes for the given duration.\n\nPlease avoid falling asleep!")]),
      OrderedDict([('Message', 'The trial will begin on the following screen.\n\nPlease let us know if you have any remaining questions.')])]
    Routine welcome
  LoopTerminator intro_prompts
  LoopInitiator state_measure_pretrial loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Fatigue'), ('rating_message', 'Rate your current fatigue level'), ('rating_min_label', 'No fatigue at all'), ('rating_max_label', 'As bad as you can imagine'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
      OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Sleepiness'), ('rating_message', 'Rate your current sleepiness level'), ('rating_min_label', 'Not at all sleepy'), ('rating_max_label', 'As bad as you can imagine'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
      OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Pain'), ('rating_message', 'Rate your current pain level'), ('rating_min_label', 'No pain'), ('rating_max_label', 'Worst possible pain'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
      OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Pain Unpleasantness'), ('rating_message', 'Rate your current pain unpleasantness level'), ('rating_min_label', 'Not at all unpleasant pain'), ('rating_max_label', 'Worst possible unpleasant pain'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')])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
    Routine stateMeasure
  LoopTerminator state_measure_pretrial
  LoopInitiator openclosed_trials loopType="TrialHandler"
    conditionsFile = loopOpenClosedTrial.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Category', 'Open-Eyes')]),
      OrderedDict([('Category', 'Closed-Eyes')])]
    Routine instruction
    Routine fixation
    LoopInitiator state_measure_trials loopType="TrialHandler"
      Selected rows = 0:7
      conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Fatigue'), ('rating_message', 'Rate your current fatigue level'), ('rating_min_label', 'No fatigue at all'), ('rating_max_label', 'As bad as you can imagine'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
        OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Sleepiness'), ('rating_message', 'Rate your current sleepiness level'), ('rating_min_label', 'Not at all sleepy'), ('rating_max_label', 'As bad as you can imagine'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
        OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Pain'), ('rating_message', 'Rate your current pain level'), ('rating_min_label', 'No pain'), ('rating_max_label', 'Worst possible pain'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
        OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Pain Unpleasantness'), ('rating_message', 'Rate your current pain unpleasantness level'), ('rating_min_label', 'Not at all unpleasant pain'), ('rating_max_label', 'Worst possible unpleasant pain'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')])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
      Routine stateMeasure
    LoopTerminator state_measure_trials
  LoopTerminator openclosed_trials
  Routine goodbye
