PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $(-0.5000, -0.5000, -0.5000)
  expName = open-closed
  expVersion = 1.03
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine experimentSetup
    RoutineSettingsComponent experimentSetup
      saveStartStop = False
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      desc:
        This routine contains all Before Experiment and Begin Experiment code components used across the entire study.
        It centralizes global variables, screen geometry, scaling logic, and shared helper functions so that all other routines operate within a consistent coordinate system and configuration.

        Because these variables are referenced throughout the experiment, changes should be made cautiously and with awareness of downstream effects.
        This routine must appear before any trial‑based routines in the experiment flow.
    CodeComponent code_experiment_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_experiment_setup
        # Global screen geometry and shared layout variables.
        #
        # Computes window aspect ratio and establishes a unified
        # coordinate system in 'height' units so all routines scale
        # consistently across monitors.
        #
        # Also defines shared wrap-width values for text components.
        # ------------------------------------------------------------

        # ============================================================
        # =============== GLOBAL SCREEN GEOMETRY =====================
        # ============================================================
        # Centralized screen geometry so all routines share the same coordinate system
        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5

        # Wrap width as a percentage of screen width
        aspect80 = aspect * 0.80 # 80% of screen width
        aspect20 = aspect * 0.20  # 20% of screen width
        comp_wrap_width_body = aspect80
        comp_wrap_width_header = aspect80
        comp_wrap_width_continue = aspect80
    CodeComponent code_state_measure_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_state_measure_setup
        # Global setup logic for the stateMeasure routine.
        #
        # Handles scaling rules, slider configuration helpers, and
        # shared variables needed to dynamically construct rating
        # scales based on loop parameters.
        #
        # The stateMeasure routine depends on this setup code to
        # size components correctly and interpret SAM/text settings.
        # ------------------------------------------------------------
        _THIS_DIR = os.path.dirname(__file__)
        _REPO_ROOT = os.path.abspath(os.path.join(_THIS_DIR, '..', '..', '..'))
        if _REPO_ROOT not in sys.path:
            sys.path.insert(0, _REPO_ROOT)

        from neuroflare.shared.state_measure import StateMeasure, parse_tick_values

        sm = StateMeasure(win=win, aspect=aspect, screen_width=screen_width, screen_height=screen_height)
    CodeComponent code_trigger_setup
      Code Type = Py
      Begin Experiment:
        # ------------------------------------------------------------
        # code_trigger_setup

        # Manage a Brain Products TriggerBox over a virtual serial port.
        # Provides connection discovery, reconnection, and high/low
        # trigger management without crashing when the COM port is missing.
        # ------------------------------------------------------------
        from neuroflare.shared.trigger_box import TriggerBoxManager
        tb = TriggerBoxManager()
        tb.begin_experiment()

        # Open/Closed Eyes (10-19):
        trigger_eyes_open = (10, "fixation_eyes_open")
        trigger_eyes_closed = (11, "fixation_eyes_closed")
        trigger_sound_played = (240, "sound_played")
      End Experiment:
        tb.end_experiment()
        status = tb.get_status()  # for summary logging if desired
      End Routine:
        tb.send_event(value=1, name="experiment_start")
        tb.send_idle() # immediately return to baseline
    CodeComponent code_open_closed_setup
      Code Type = Py
      Begin Experiment:
        # ------------------------------------------------------------
        # code_open_closed_setup
        # Define the instruction text for each eye-state condition.
        # ------------------------------------------------------------
        # These strings are kept in-code (rather than in the CSV) so the
        # condition file only needs to specify the Category. This keeps
        # the output cleaner and prevents text duplication across files.
        open_eyes_text = "Look at the + mark and stay still for 5 minutes."
        closed_eyes_text = "Close your eyes and stay still for 5 minutes."

        # This variable will be updated on each loop iteration by the
        # instruction helper code. It provides the text shown in the
        # instruction routine.
        instruction_text = "Default message."

        # Used by code_fixation_helper to determine what text
        # should be on screen during the fixation routine.
        fixation_text = ""
        fixation_open_text = ""
        fixation_closed_text = "Please keep your eyes closed during this block."
    CodeComponent code_sound_setup
      Code Type = Py
      Begin Experiment:
        # ------------------------------------------------------------
        # code_sound_setup
        # Create a sound that will be played after the fixation routine
        # Also used during testing to ensure sound backend is working
        # ------------------------------------------------------------

        test_sound = sound.Sound(
            value=330,
            volume=1.0,
            secs=1.0,
            hamming=True,
            stereo=True,
            autoLog=False,
            name='test_sound'
        )
  Routine welcome
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    TextComponent t_welcome_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Message
      units = height
      wrapWidth = comp_wrap_width_body
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    TextComponent t_welcome_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to continue
      units = height
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine testSound
    RoutineSettingsComponent testSound
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      desc:
        Allow the user to test the sound alert that will be played after the fixation Routine.
        The user can only continue if they have pressed the button that plays the sound.
    TextComponent t_test_sound
      durationEstim = 5
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = comp_wrap_width_body
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      text:
        At the end of each round, a brief sound will play to let you know it is complete.

        Press T to test the sound.

        If you do not hear it, try pressing T again or adjust your volume.
    CodeComponent code_test_sound_helper
      Code Type = Py
      Begin Routine:
        # Clear any recorded keys so that the sound doesn't play early
        event.clearEvents(eventType='keyboard')

        # If sound_tested is true, then the user can continue to the next routine
        sound_tested = False
      Each Frame:
        # Check to see if the key is pressed
        # If it is, play the sound and let the user continue
        if 't' in event.getKeys() and not test_sound.isPlaying:
            test_sound.play()
            sound_tested = True
    TextComponent t_test_sound_continue
      durationEstim = 4.8
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $sound_tested
      text = Press the SPACEBAR to continue
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_test_sound
      allowedKeys [set every repeat] = 'space'
      durationEstim = 4.8
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $sound_tested
      store = nothing
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  Routine stateMeasure
    RoutineSettingsComponent stateMeasure
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      desc:
        This routine presents a rating scale that adapts based on parameters supplied by the surrounding loop.
        To use it, place stateMeasure inside a loop whose conditions file includes rating_category.
        Then, make sure state_measure_labels.py has the following for your category:
        - message
        - min_label
        - max_label
        - picture_path (SAM only; expects a 1168×231 image)
        - tick_values
        - granularity
        - style
        The routine reads these values on each iteration and configures the slider dynamically.
        Make sure to update Selected Rows to only use the ratings you want.
        The standard rows are: [0, 1, 2, 3, 4, 5, 6], which describe:
        fatigue, sleepiness, pain, pain_unpleasantness, sam_valence, sam_arousal, sam_dominance
        The experiment must include the code_state_measure_setup component, which handles global setup and shared logic.
    CodeComponent code_sm_helper
      Code Type = Py
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      Begin Routine:
        # --- Create a fresh slider for this trial ---
        allowContinue = False
        sm.begin_routine_from_category(rating_category)
      Each Frame:
        # If rated, allow spacebar to end the routine
        if sm.has_rating():
            allowContinue = True
      End Routine:
        # Log rating, rt, and turn off AutoDraw
        sm.end_routine(currentLoop)
    TextComponent t_sm_continue
      durationEstim = 4.8
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_sm
      allowedKeys [set every repeat] = 'space'
      durationEstim = 4.8
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $allowContinue == True
      store = nothing
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  Routine instruction
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    CodeComponent code_instruction_helper
      Code Type = Py
      Begin Routine:
        # ------------------------------------------------------------
        # code_instruction_helper

        # Select the appropriate instruction text based on the current
        # trial's Category value. This keeps the logic centralized and
        # avoids storing long text strings in the condition file.
        # ------------------------------------------------------------
        if category == "open-eyes":
            instruction_text = open_eyes_text
            fixation_text = fixation_closed_text
        elif category == "closed-eyes":
            instruction_text = closed_eyes_text
            fixation_text = fixation_open_text
        else:
            # Fallback message in case the condition file contains an
            # unexpected category. This helps catch typos or file issues.
            instruction_text = "Unknown category. Please contact the experimenter."
            fixation_text = ""
    TextComponent t_instruction_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
      units = height
      wrapWidth = comp_wrap_width_body
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    TextComponent t_instruction_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    RoutineSettingsComponent fixation
      durationEstim = 300
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    PolygonComponent cross_fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      units = height
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    CodeComponent code_fixation_helper
      Code Type = Py
      Begin Routine:
        # One-shot flag
        unknown_category_logged = False
      Each Frame:
        if cross_fixation.status == STARTED:
            if category == "open-eyes":
                tb.send_event(*trigger_eyes_open)
            elif category == "closed-eyes":
                tb.send_event(*trigger_eyes_closed)
            else:
                if not unknown_category_logged:
                    tb._log_error(f"Unknown category '{category}' - no trigger sent")
                    unknown_category_logged = True
                tb.send_idle()
        elif cross_fixation.status == STOPPED:
            tb.send_idle()
      End Routine:
        tb.send_idle()
    TextComponent t_fixation_closed
      durationEstim = 300
      letterHeight = 0.03
      pos = (0.0, -0.4)
      saveStartStop = False
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [condition] = $cross_fixation.status == STOPPED
      text [set every repeat] = $fixation_text
      units = height
      wrapWidth = comp_wrap_width_body
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    SerialOutComponent serialPort_fixation
      deviceLabel = COM3
      disabled = True
      durationEstim = 300
      getResponse = False
      startDataBinary = 1110010
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 1
      startDataStr = r
      startDataType = num
      startEstim = 0
      startVal [condition] = $cross_fixation.status == STARTED
      stopDataBinary = 1111000
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 0
      stopDataStr = x
      stopDataType = num
      stopVal [condition] = $cross_fixation.status == STOPPED
      syncScreenRefresh = True
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    KeyboardComponent key_resp_fixation_debug
      allowedKeys = 'right'
      disabled = True
      durationEstim = 300
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $cross_fixation.status == STOPPED
      store = nothing
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  Routine fixationFinish
    RoutineSettingsComponent fixationFinish
      desc = Play a sound and display some text to alert the user that the fixation Routine has finished.
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    TextComponent t_fixation_finish
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = This round is complete.
      wrapWidth = comp_wrap_width_body
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    CodeComponent code_fixation_finish_helper
      Code Type = Py
      Begin Routine:
        # Plays a sound created in code_sound_setup to let
        # the user know that the fixatio nroutine has ended
        test_sound.play()
        tb.send_event(*trigger_sound_played)
      End Routine:
        tb.send_idle()
  Routine goodbye
    RoutineSettingsComponent goodbye
      stopVal [duration (s)] = 4
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    TextComponent t_goodbye
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = You have completed the trial. Thank you!
      units = height
      wrapWidth = comp_wrap_width_header
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Flow
  Routine experimentSetup
  LoopInitiator intro_prompts loopType="TrialHandler"
    conditionsFile = loopOpenClosedIntro.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Message', 'Welcome to the Open-Closed Eyes Experiment!\n\nThis is designed for the Wireless EEG and EMG devices. ')]),
      OrderedDict([('Message', 'Please relax and remain still during the experiment while we record your baseline brain activity.')]),
      OrderedDict([('Message', 'Follow the on-screen instructions to open or close your eyes as prompted.\n\nWe will do this twice, with each round lasting 5 minutes.')]),
      OrderedDict([('Message', 'During the eyes-open section,\nlook steadily at the cross mark in the center of the screen.')]),
      OrderedDict([('Message', "For the eyes-closed section,\nyou'll close your eyes for the given duration.\n\nPlease avoid falling asleep!")]),
      OrderedDict([('Message', 'The trial will begin on the following screen.\n\nPlease let us know if you have any remaining questions.')])]
    Routine welcome
  LoopTerminator intro_prompts
  Routine testSound
  LoopInitiator state_measure_pretrial loopType="TrialHandler"
    Selected rows = [0, 1, 2, 3, 4, 5, 6]
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_category', 'fatigue')]),
      OrderedDict([('rating_category', 'sleepiness')]),
      OrderedDict([('rating_category', 'pain')]),
      OrderedDict([('rating_category', 'pain_unpleasantness')]),
      OrderedDict([('rating_category', 'sam_valence')]),
      OrderedDict([('rating_category', 'sam_arousal')]),
      OrderedDict([('rating_category', 'sam_dominance')]),
      OrderedDict([('rating_category', 'emotion_regulation')])]
    Routine stateMeasure
  LoopTerminator state_measure_pretrial
  LoopInitiator openclosed_trials loopType="TrialHandler"
    conditionsFile = loopOpenClosedTrial.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('category', 'open-eyes')]),
      OrderedDict([('category', 'closed-eyes')])]
    Routine instruction
    Routine fixation
    Routine fixationFinish
    LoopInitiator state_measure_trials loopType="TrialHandler"
      Selected rows = [0, 1, 2, 3, 4, 5, 6]
      conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('rating_category', 'fatigue')]),
        OrderedDict([('rating_category', 'sleepiness')]),
        OrderedDict([('rating_category', 'pain')]),
        OrderedDict([('rating_category', 'pain_unpleasantness')]),
        OrderedDict([('rating_category', 'sam_valence')]),
        OrderedDict([('rating_category', 'sam_arousal')]),
        OrderedDict([('rating_category', 'sam_dominance')]),
        OrderedDict([('rating_category', 'emotion_regulation')])]
      Routine stateMeasure
    LoopTerminator state_measure_trials
  LoopTerminator openclosed_trials
  Routine goodbye
