PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-0.5000, -0.5000, -0.5000]
  expName = pain-appraisal
  expVersion = 0.5
  keyboardBackend = PsychToolbox
  logging level = debug
  runMode = 0
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Routines
  Routine experimentSetup
    RoutineSettingsComponent experimentSetup
      saveStartStop = False
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      desc:
        This routine contains all Before Experiment and Begin Experiment code components used across the entire study.
        It centralizes global variables, screen geometry, scaling logic, and shared helper functions so that all other routines operate within a consistent coordinate system and configuration.

        Because these variables are referenced throughout the experiment, changes should be made cautiously and with awareness of downstream effects.
        This routine must appear before any trial‑based routines in the experiment flow.
    CodeComponent code_experiment_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_experiment_setup
        # Global screen geometry and shared layout variables.
        #
        # Computes window aspect ratio and establishes a unified
        # coordinate system in 'height' units so all routines scale
        # consistently across monitors.
        #
        # Also defines shared wrap-width values for text components.
        # ------------------------------------------------------------

        # ============================================================
        # =============== GLOBAL SCREEN GEOMETRY =====================
        # ============================================================
        # Centralized screen geometry so all routines share the same coordinate system

        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5

        # Wrap width as a percentage of screen width
        aspect80 = aspect * 0.80 # 80% of screen width
        aspect20 = aspect * 0.20  # 20% of screen width
        comp_wrap_width_body = aspect80
        comp_wrap_width_header = aspect80
        comp_wrap_width_continue = aspect80
    CodeComponent code_state_measure_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_state_measure_setup
        # Global setup logic for the stateMeasure routine.
        #
        # Handles scaling rules, slider configuration helpers, and
        # shared variables needed to dynamically construct rating
        # scales based on loop parameters.
        #
        # The stateMeasure routine depends on this setup code to
        # size components correctly and interpret SAM/text settings.
        # ------------------------------------------------------------
        _THIS_DIR = os.path.dirname(__file__)
        _REPO_ROOT = os.path.abspath(os.path.join(_THIS_DIR, '..', '..', '..'))
        if _REPO_ROOT not in sys.path:
            sys.path.insert(0, _REPO_ROOT)

        from neuroflare.shared.state_measure import StateMeasure, parse_tick_values

        sm = StateMeasure(win=win, aspect=aspect, screen_width=screen_width, screen_height=screen_height)
    CodeComponent code_trigger_setup
      Code Type = Py
      Begin Experiment:
        # ------------------------------------------------------------
        # code_trigger_setup

        # Manage a Brain Products TriggerBox over a virtual serial port.
        # Provides connection discovery, reconnection, and high/low
        # trigger management without crashing when the COM port is missing.
        # ------------------------------------------------------------
        from neuroflare.shared.trigger_box import TriggerBoxManager
        tb = TriggerBoxManager()
        tb.begin_experiment()

        # Emotion Regulation (30-39):
        trigger_neutral_image = (30, "neutral_image")
        trigger_practice_image = (31, "practice_image")
        trigger_negative_image = (32, "negative_image")
        trigger_regulation_cue = (38, "regulation_cue")
      End Experiment:
        # Close connection and send reset byte.
        tb.end_experiment()
      End Routine:
        # Clear out any residual triggers
        # Acts as both a marker and connection insurance.
        tb.send_event(value=1, name="experiment_start")
        tb.send_idle() # immediately return to baseline
  Routine welcome
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    TextComponent t_welcome_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = comp_wrap_width_body
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      text [set every repeat]:
        Please relax and remain as still as possible while we record your brain activity.

        Follow the on-screen instructions to assess your body pain at present.
    TextComponent t_welcome_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to continue
      units = height
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stateMeasure
    RoutineSettingsComponent stateMeasure
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      desc:
        This routine presents a rating scale that adapts based on parameters supplied by the surrounding loop.
        To use it, place stateMeasure inside a loop whose conditions file includes rating_category.
        Then, make sure state_measure_labels.py has the following for your category:
        - message
        - min_label
        - max_label
        - picture_path (SAM only; expects a 1168×231 image)
        - tick_values
        - granularity
        - style
        The routine reads these values on each iteration and configures the slider dynamically.
        Make sure to update Selected Rows to only use the ratings you want.
        The standard rows are: [0, 1, 2, 3, 4, 5, 6], which describe:
        fatigue, sleepiness, pain, pain_unpleasantness, sam_valence, sam_arousal, sam_dominance
        The experiment must include the code_state_measure_setup component, which handles global setup and shared logic.
    CodeComponent code_sm_helper
      Code Type = Py
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      Begin Routine:
        # --- Create a fresh slider for this trial ---
        allowContinue = False
        sm.begin_routine_from_category(rating_category)
      Each Frame:
        # If rated, allow spacebar to end the routine
        if sm.has_rating():
            allowContinue = True
      End Routine:
        # Log rating, rt, and turn off AutoDraw
        sm.end_routine(currentLoop)
    TextComponent t_sm_continue
      durationEstim = 4.8
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_sm
      allowedKeys [set every repeat] = 'space'
      durationEstim = 4.8
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $allowContinue == True
      store = nothing
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  Routine intro
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    TextComponent t_intro
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        We are now going to ask you to rate different words that describe pain. Click the number that best matches your experience for each word.​


        For each word shown, rate how well it describes your current pain using the following scale: ​

        0 – none, 1 – Mild, 2 – Moderate, 3 – Severe​

        ​

        **When you're ready, press the spacebar to begin.**
    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    RoutineSettingsComponent fixation
      stopVal [duration (s)] = 1
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    PolygonComponent cross_fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = height
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  Routine pain_adjectives01
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    TextComponent t_pain_adj
      letterHeight = 0.15
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $pain_adjs
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    SliderComponent slider_pain_adj
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      labels = "None","Mild","Moderate","Severe"
      letterHeight = 0.05
      pos [set every repeat] = (0, slider_pain_y)
      size [set every repeat] = (slider_pain_width, slider_pain_height)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0, 1, 2, 3)
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    CodeComponent code_pain_helper
      Code Type = Py
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      Begin Experiment:
        # --- Slider Scaling ---
        slider_pain_width = aspect * 0.7   # 70% of screen width

        # Slider layout (height units)
        slider_pain_y      = -0.09                     # vertical position of the slider center
        slider_pain_height = 0.06                      # slider thickness/height
      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (slider_pain_adj.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
    TextComponent t_pain_adj_continue
      durationEstim = 4.8
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_pain_adj
      allowedKeys [set every repeat] = 'space'
      durationEstim = 4.8
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $allowContinue == True
      store = nothing
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    KeyboardComponent pain_adjectives_kb_response
      allowedKeys [set every repeat] = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [condition] = $allowContinue == True
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  Routine pain_adjectives02
    RoutineSettingsComponent pain_adjectives02
      disabled = True
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    TextComponent pain_adjectives2_text
      letterHeight = 0.15
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pain_adjs
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    KeyboardComponent pain_adjectives_key_resp02
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent pain_continue_tb2
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = Press SPACEBAR to continue
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  Routine Pain_current
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    TextComponent textCurrentPain
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = 1.5
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    SliderComponent slider_curr_pain_level
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = "No Pain","Mild","Discomforting","Distressing","Horrible","Excrutiating"
      letterHeight = 0.033
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (slider_gen_width2, 0.1)
      startVal [condition] = $rating_type == 'currPainLevel'
      stopVal [condition] = $rating_type != 'currPainLevel'
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5)
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    TextboxComponent tb_continue_sm
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.25)
      startVal [condition] = $allowContinue == True
      text = Please press the SPACEBAR to continue
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    KeyboardComponent key_resp_pain_curr
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [condition] = $allowContinue == True
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    CodeComponent currPainHelper
      Code Type = Py
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      Begin Experiment:
        # Scale SAM properly
        # Window and coordinate setup
        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5


        # --- Generic Slider Scaling ---
        # Full-width slider across screen
        slider_gen_width = aspect * 0.7   # 70% of screen width
        slider_gen_width2 = aspect * 0.75

        # --- SAM image geometry (pixels) ---
        sam_px_width = 1168
        sam_px_height = 231
        sam_aspect = sam_px_width / sam_px_height  # ≈ 5.065

        # Pictogram/gap geometry (pixels)
        pictogram_px_width = 215
        gap_px_width = 23
        num_pictograms = 5
        num_gaps = num_pictograms - 1

        # Sanity check total width in px (info only)
        total_calc_px = num_pictograms * pictogram_px_width + num_gaps * gap_px_width
        # Note: total_calc_px ≈ 1175; close enough to 1170 given source image padding.

        # --- Layout decisions (height units) ---
        sam_height = 0.25                         # 25% of screen height
        sam_width  = sam_height * sam_aspect      # scaled width based on aspect
        sam_y      = 0.1                          # vertical position of the image

        # Slider layout (height units)
        slider_y      = -0.09                     # vertical position of the slider center
        slider_height = 0.06                      # slider thickness/height
        slider_px_width = sam_px_width - 215
        slider_width = sam_width * (slider_px_width / sam_px_width) # match slider width to image width

        # Label MinMax layout
        label_y = slider_y - 0.2 # slightly below the slider

        # Scale factor: px -> 'height' units within the image width
        scale_factor = sam_width / sam_px_width

        pictogram_w = pictogram_px_width * scale_factor
        gap_w       = gap_px_width * scale_factor

        # --- Compute 9 tick x-positions aligned to pictograms (1,3,5,7,9) and gaps (2,4,6,8) ---
        tick_positions = []
        # Start at the center of the first pictogram: left edge + half pictogram width
        x = -sam_width / 2 + pictogram_w / 2

        for i in range(9):
            tick_positions.append(x)
            # Advance: pictogram -> gap -> pictogram -> gap ...
            if i % 2 == 0:  # 0,2,4,6,8 (odd-numbered ticks under pictograms)
                x += pictogram_w / 2 + gap_w / 2
            else:           # 1,3,5,7 (even-numbered ticks under gaps)
                x += gap_w / 2 + pictogram_w / 2

        # Helpful mapping: tick index (0..8) -> value (1..9)
        tick_values = list(range(1, 10))
      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (slider_curr_pain_level.getRating() is not None) or (slider_curr_pain_generic.getRating() is not None) or (slider_curr_pain_conf.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
    SliderComponent slider_curr_pain_generic
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.045
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (slider_gen_width, 0.1)
      startVal [condition] = $rating_type == 'generic'
      stopVal [condition] = $rating_type != 'generic'
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent slider_curr_pain_conf
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = "Not at all \nconfident","Slightly \nconfident", "Moderately \nconfident", "Very \nconfident", "Extremely \nconfident"
      letterHeight = 0.040
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (slider_gen_width2, 0.1)
      startVal [condition] = $rating_type == 'currPainConf'
      stopVal [condition] = $rating_type != 'currPainConf'
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textLabelMin
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[0]-0.075, label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_min_label
      wrapWidth = 0.5
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    TextComponent textLabelMax
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[-1], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_max_label
      wrapWidth = 0.5
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  Routine state_measure_outro
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    SliderComponent sliderGeneric2
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10
      letterHeight = 0.05
      size [set every repeat] = (slider_gen_width, 0.1)
      startVal [condition] = $rating_type == 'Generic'
      stopVal [condition] = $rating_type != 'Generic'
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent sliderSAM2
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      labels = 1, 2, 3, 4, 5, 6, 7, 8, 9
      letterHeight = 0.05
      pos [set every repeat] = (0, slider_y)
      size [set every repeat] = (slider_width, slider_height)
      startVal [condition] = $rating_type == 'SAM'
      stopVal [condition] = $rating_type != 'SAM'
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ImageComponent imageSAM2
      image [set every repeat] = $picture_path
      pos [set every repeat] = (0, sam_y)
      size [set every repeat] = (sam_width, sam_height)
      startVal [time (s)] = 0
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    TextComponent textStateMeasure2
      letterHeight = 0.05
      pos [set every repeat] = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = 1.5
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    TextComponent textLabelMin2
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[0], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_min_label
      wrapWidth = 0.5
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    TextComponent textLabelMax2
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[-1], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_max_label
      wrapWidth = 0.5
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    TextboxComponent tb_continue_02
      bold = False
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, -0.40)
      size [set every repeat] = (0.5, 0.25)
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
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    CodeComponent stateMeasureHelper2
      Code Type = Py
      Begin Experiment:
        # Scale SAM properly
        # Window and coordinate setup
        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5


        # --- Generic Slider Scaling ---
        # Full-width slider across screen
        slider_gen_width = aspect * 0.7   # 70% of screen width

        # --- SAM image geometry (pixels) ---
        sam_px_width = 1168
        sam_px_height = 231
        sam_aspect = sam_px_width / sam_px_height  # ≈ 5.065

        # Pictogram/gap geometry (pixels)
        pictogram_px_width = 215
        gap_px_width = 23
        num_pictograms = 5
        num_gaps = num_pictograms - 1

        # Sanity check total width in px (info only)
        total_calc_px = num_pictograms * pictogram_px_width + num_gaps * gap_px_width
        # Note: total_calc_px ≈ 1175; close enough to 1170 given source image padding.

        # --- Layout decisions (height units) ---
        sam_height = 0.25                         # 25% of screen height
        sam_width  = sam_height * sam_aspect      # scaled width based on aspect
        sam_y      = 0.1                          # vertical position of the image

        # Slider layout (height units)
        slider_y      = -0.09                     # vertical position of the slider center
        slider_height = 0.06                      # slider thickness/height
        slider_px_width = sam_px_width - 215
        slider_width = sam_width * (slider_px_width / sam_px_width) # match slider width to image width

        # Label MinMax layout
        label_y = slider_y - 0.2 # slightly below the slider

        # Scale factor: px -> 'height' units within the image width
        scale_factor = sam_width / sam_px_width

        pictogram_w = pictogram_px_width * scale_factor
        gap_w       = gap_px_width * scale_factor

        # --- Compute 9 tick x-positions aligned to pictograms (1,3,5,7,9) and gaps (2,4,6,8) ---
        tick_positions = []
        # Start at the center of the first pictogram: left edge + half pictogram width
        x = -sam_width / 2 + pictogram_w / 2

        for i in range(9):
            tick_positions.append(x)
            # Advance: pictogram -> gap -> pictogram -> gap ...
            if i % 2 == 0:  # 0,2,4,6,8 (odd-numbered ticks under pictograms)
                x += pictogram_w / 2 + gap_w / 2
            else:           # 1,3,5,7 (even-numbered ticks under gaps)
                x += gap_w / 2 + pictogram_w / 2

        # Helpful mapping: tick index (0..8) -> value (1..9)
        tick_values = list(range(1, 10))
      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (sliderGeneric2.getRating() is not None) or (sliderSAM2.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
    KeyboardComponent key_resp_state_measure2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [condition] = $allowContinue == True
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  Routine End
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of this secion.

        Thank you.
Flow
  Routine experimentSetup
  Routine welcome
  LoopInitiator state_measure_pretrial loopType="TrialHandler"
    Selected rows = [0, 1, 2, 3, 4, 5, 6]
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_category', 'fatigue')]),
      OrderedDict([('rating_category', 'sleepiness')]),
      OrderedDict([('rating_category', 'pain')]),
      OrderedDict([('rating_category', 'pain_unpleasantness')]),
      OrderedDict([('rating_category', 'sam_valence')]),
      OrderedDict([('rating_category', 'sam_arousal')]),
      OrderedDict([('rating_category', 'sam_dominance')]),
      OrderedDict([('rating_category', 'emotion_regulation')]),
      OrderedDict([('rating_category', 'pain_management')])]
    Routine stateMeasure
  LoopTerminator state_measure_pretrial
  Routine intro
  LoopInitiator pain_adjectives_loop loopType="TrialHandler"
    conditionsFile = pain_adjectives_01.xlsx
    loopType = random
    nReps = 1
    random seed = 1234
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    conditions:
      [{'pain_adjs': 'Throbbing'},
      {'pain_adjs': 'Shooting'},
      {'pain_adjs': 'Stabbing'},
      {'pain_adjs': 'Sharp'},
      {'pain_adjs': 'Gnawing'},
      {'pain_adjs': 'Hot-Burning'},
      {'pain_adjs': 'Aching'},
      {'pain_adjs': 'Heavy'},
      {'pain_adjs': 'Tender'},
      {'pain_adjs': 'Splitting'},
      {'pain_adjs': 'Tiring-Exhausting'},
      {'pain_adjs': 'Sickening'},
      {'pain_adjs': 'Fearful'},
      {'pain_adjs': 'Punishing-Cruel'},
      {'pain_adjs': 'Cramping'}]
    Routine fixation
    Routine pain_adjectives01
  LoopTerminator pain_adjectives_loop
  LoopInitiator pain_adjectives_loop2 loopType="TrialHandler"
    conditionsFile = pain_adjectives_01.xlsx
    loopType = random
    nReps = 1
    random seed = 1
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    conditions:
      [{'pain_adjs': 'Throbbing'},
      {'pain_adjs': 'Shooting'},
      {'pain_adjs': 'Stabbing'},
      {'pain_adjs': 'Sharp'},
      {'pain_adjs': 'Gnawing'},
      {'pain_adjs': 'Hot-Burning'},
      {'pain_adjs': 'Aching'},
      {'pain_adjs': 'Heavy'},
      {'pain_adjs': 'Tender'},
      {'pain_adjs': 'Splitting'},
      {'pain_adjs': 'Tiring-Exhausting'},
      {'pain_adjs': 'Sickening'},
      {'pain_adjs': 'Fearful'},
      {'pain_adjs': 'Punishing-Cruel'},
      {'pain_adjs': 'Cramping'}]
    Routine fixation
    Routine pain_adjectives02
  LoopTerminator pain_adjectives_loop2
  LoopInitiator pain_current_loop loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = D:/Github/neuroflare-experiments/neuroflare/shared/loop-templates/loopSpontaneousPainExpected.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'rating_type': 'currPainLevel', 'rating_category': 'CurrentPainLevel', 'rating_min_label': ' ', 'rating_max_label': ' ', 'picture_path': None, 'rating_message': 'Please select the word that best describes your current pain level:', 'current_pain_1': 'Mild', 'current_pain_2': 'Discomforting', 'current_pain_3': 'Distressing', 'current_pain_4': 'Horrible', 'anticip_conf_pain_2': None, 'anticip_conf_pain_3': None, 'anticip_conf_pain_4': None},
      {'rating_type': 'generic', 'rating_category': 'OverallPainIntensity', 'rating_min_label': 'No Pain', 'rating_max_label': 'Worst Possible Pain', 'picture_path': None, 'rating_message': 'Please rate your overall pain intensity by marking a point on the line that best represents your pain level at present', 'current_pain_1': None, 'current_pain_2': None, 'current_pain_3': None, 'current_pain_4': None, 'anticip_conf_pain_2': None, 'anticip_conf_pain_3': None, 'anticip_conf_pain_4': None},
      {'rating_type': 'generic', 'rating_category': 'UnplesantPain', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Please rate how unpleasnt your pain feels at present', 'current_pain_1': None, 'current_pain_2': None, 'current_pain_3': None, 'current_pain_4': None, 'anticip_conf_pain_2': None, 'anticip_conf_pain_3': None, 'anticip_conf_pain_4': None},
      {'rating_type': 'generic', 'rating_category': 'PainMgmntConfidence', 'rating_min_label': 'No control', 'rating_max_label': 'Perfect Control', 'picture_path': None, 'rating_message': 'How confident are you in managing your pain sensations now?', 'current_pain_1': None, 'current_pain_2': None, 'current_pain_3': None, 'current_pain_4': None, 'anticip_conf_pain_2': None, 'anticip_conf_pain_3': None, 'anticip_conf_pain_4': None}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
    Routine fixation
    Routine Pain_current
  LoopTerminator pain_current_loop
  LoopInitiator state_measure_end loopType="TrialHandler"
    Selected rows = [0, 1, 2, 3, 4, 5, 6]
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_category', 'fatigue')]),
      OrderedDict([('rating_category', 'sleepiness')]),
      OrderedDict([('rating_category', 'pain')]),
      OrderedDict([('rating_category', 'pain_unpleasantness')]),
      OrderedDict([('rating_category', 'sam_valence')]),
      OrderedDict([('rating_category', 'sam_arousal')]),
      OrderedDict([('rating_category', 'sam_dominance')]),
      OrderedDict([('rating_category', 'emotion_regulation')]),
      OrderedDict([('rating_category', 'pain_management')])]
    Routine stateMeasure
  LoopTerminator state_measure_end
  Routine End
