PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Data filename = u'../../../data/%s_%s_%s' % (expInfo['date'], expName, expInfo['participant'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = (1920, 1080)
  color = $(-0.7804, -0.7804, -0.7804)
  expName = pain-regulation
  expVersion = 0.65
  keyboardBackend = PsychToolbox
  logging level = debug
  runMode = 1
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Routines
  Routine experimentSetup
    RoutineSettingsComponent experimentSetup
      saveStartStop = False
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      desc:
        This routine contains all Before Experiment and Begin Experiment code components used across the entire study.
        It centralizes global variables, screen geometry, scaling logic, and shared helper functions so that all other routines operate within a consistent coordinate system and configuration.

        Because these variables are referenced throughout the experiment, changes should be made cautiously and with awareness of downstream effects.
        This routine must appear before any trial‑based routines in the experiment flow.
    CodeComponent code_experiment_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_experiment_setup
        # Global screen geometry and shared layout variables.
        #
        # Computes window aspect ratio and establishes a unified
        # coordinate system in 'height' units so all routines scale
        # consistently across monitors.
        #
        # Also defines shared wrap-width values for text components.
        # ------------------------------------------------------------

        # ============================================================
        # =============== GLOBAL SCREEN GEOMETRY =====================
        # ============================================================
        # Centralized screen geometry so all routines share the same coordinate system

        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect

        # Wrap width as a percentage of screen width
        aspect80 = aspect * 0.80 # 80% of screen width
        aspect75 = aspect * 0.70 # 75% of screen width
        comp_wrap_width_body = aspect80
        comp_wrap_width_header = aspect80
        comp_wrap_width_continue = aspect80

        # Log and print custom data level logs
        def log_and_print(message):
            logging.data(message)
            try:
                print(f"{globalClock.getTime():.4f} \tDATA \t{message}")
            except:
                print(f"DATA \t{message}")
    CodeComponent code_state_measure_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_state_measure_setup
        # Global setup logic for the stateMeasure routine.
        #
        # Handles scaling rules, slider configuration helpers, and
        # shared variables needed to dynamically construct rating
        # scales based on loop parameters.
        #
        # The stateMeasure routine depends on this setup code to
        # size components correctly and interpret SAM/text settings.
        # ------------------------------------------------------------
        _THIS_DIR = os.path.dirname(__file__)
        _REPO_ROOT = os.path.abspath(os.path.join(_THIS_DIR, '..', '..', '..'))
        if _REPO_ROOT not in sys.path:
            sys.path.insert(0, _REPO_ROOT)

        from neuroflare.shared.state_measure import StateMeasure, parse_tick_values

        sm = StateMeasure(win=win, aspect=aspect, screen_width=screen_width, screen_height=screen_height)
    CodeComponent code_trigger_setup
      Code Type = Py
      Begin Experiment:
        # ------------------------------------------------------------
        # code_trigger_setup

        # Manage a Brain Products TriggerBox over a virtual serial port.
        # Provides connection discovery, reconnection, and high/low
        # trigger management without crashing when the COM port is missing.
        # ------------------------------------------------------------
        from neuroflare.shared.trigger_box import TriggerBoxManager
        from neuroflare.shared.external_pulse_usb6363 import pulse_multiple_counters

        tb = TriggerBoxManager()
        tb.begin_experiment()

        # Setting up trigger variables
        trigger_pain_reg_observe_start = (tb.TRIG["pain_reg_observe_start"], "pain_reg_observe_start")
        trigger_pain_reg_observe_end = (tb.TRIG["pain_reg_observe_end"], "pain_reg_observe_end")

        trigger_pain_reg_inhibit_start = (tb.TRIG["pain_reg_inhibit_start"], "pain_reg_inhibit_start")
        trigger_pain_reg_inhibit_end = (tb.TRIG["pain_reg_inhibit_end"], "pain_reg_inhibit_end")

        trigger_pain_reg_facilitate_start = (tb.TRIG["pain_reg_facilitate_start"], "pain_reg_facilitate_start")
        trigger_pain_reg_facilitate_end = (tb.TRIG["pain_reg_facilitate_end"], "pain_reg_facilitate_end")

        # These two variables are assigned to open or closed during the instruction routine
        current_trigger_start = (9, "default_start")
        current_trigger_stop = (10, "default_stop")
      Begin Routine:
        # Clear out any residual triggers
        tb.send_idle()
      End Experiment:
        # Close connection and send reset byte.
        tb.end_experiment()
    CodeComponent code_pain_reg_setup
      Code Type = Py
      Begin Experiment:
        # ------------------------------------------------------------
        # code_pain_regulation_trials
        #
        # Includes instruction variables.
        # ------------------------------------------------------------

        observe_instruction = "(Observe)\nDuring this exercise, you'll start by rating your current pain level on the scale that follows. Then, bring to mind the area of your body where you typically feel pain. Imagine its appearance exactly as it is, without trying to alter or influence it.\n\nYour rating on the pain scale is recorded throughout the trial. If your pain level alters, change your pain rating. Continue to change your rating as needed."
        facilitate_instruction = "(Facilitate)\nDuring this exercise, you'll start by rating your current pain level on the scale that follows. Then, bring to mind the area of your body where you typically feel pain. Imagine it becoming more irritated or distressed, as if the sensations in that area are intensifying.\n\nYour rating on the pain scale is recorded throughout the trial. If your pain level alters, change your pain rating. Continue to change your rating as needed."
        inhibit_instruction = "(Inhibit)\nDuring this exercise, you'll start by rating your current pain level on the scale that follows. Then, bring to mind the area of your body where you typically feel pain. Imagine it recovering or settling, as if the sensations in that area are easing.\n\nYour rating on the pain scale is recorded throughout the trial. If your pain level alters, change your pain rating. Continue to change your rating as needed."
  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    TextComponent t_welcome_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $message
      units = height
      wrapWidth = comp_wrap_width_body
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    TextComponent t_welcome_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press LEFT CLICK to continue
      units = height
      wrapWidth = comp_wrap_width_continue
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    MouseComponent mouse_welcome
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.2
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    CodeComponent code_connection_warning
      Code Type = Py
      Begin Experiment:
        warning_text = ""
      Begin Routine:
        tb.send_idle()
        if tb.get_status()["connected"] is False:
            warning_text = "No TriggerBox connection!"
        else:
            warning_text = ""
    TextComponent t_connection_warning
      color = $(0.3961, -0.7333, -0.7333)
      letterHeight = 0.04
      pos = (0, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $warning_text
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  Routine stateMeasure
    RoutineSettingsComponent stateMeasure
      saveStartStop = False
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      desc:
        This routine presents a rating scale that adapts based on parameters supplied by the surrounding loop.
        To use it, place stateMeasure inside a loop whose conditions file includes rating_category.
        Then, make sure state_measure_labels.py has the following for your category:
        - message
        - min_label
        - max_label
        - picture_path (SAM only; expects a 1168×231 image)
        - tick_values
        - granularity
        - style
        The routine reads these values on each iteration and configures the slider dynamically.
        Make sure to update Selected Rows to only use the ratings you want.
        The standard rows are: [0, 1, 2, 3, 4, 5, 6], which describe:
        fatigue, sleepiness, pain, pain_unpleasantness, sam_valence, sam_arousal, sam_dominance
        The experiment must include the code_state_measure_setup component, which handles global setup and shared logic.
    CodeComponent code_sm_helper
      Code Type = Py
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      Begin Routine:
        # --- Create a fresh slider for this trial ---
        allowContinue = False
        sm.begin_routine_from_category(rating_category)
      Each Frame:
        # If rated, allow spacebar to end the routine
        # Check slider for response to end Routine
        if sm.has_rating():
            allowContinue = True
            continueRoutine = False
      End Routine:
        # Log rating, rt, and turn off AutoDraw
        sm.end_routine(currentLoop)
    TextComponent t_sm_continue
      durationEstim = 4.8
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $allowContinue == True
      wrapWidth = comp_wrap_width_continue
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  Routine instruction
    RoutineSettingsComponent instruction
      saveStartStop = False
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    CodeComponent code_instruction_helper
      Code Type = Py
      Begin Experiment:
        emg_trigger_status = NOT_STARTED
      Begin Routine:
        # ------------------------------------------------------------
        # code_instruction_helper

        # Select the appropriate instruction text based on the current
        # trial's Category value. This keeps the logic centralized and
        # avoids storing long text strings in the condition file.
        # ------------------------------------------------------------
        technique_text = technique.capitalize()

        if technique == "observe":
            instruction_text = observe_instruction
            current_trigger_start = trigger_pain_reg_observe_start
            current_trigger_stop = trigger_pain_reg_observe_end
        elif technique == "facilitate":
            instruction_text = facilitate_instruction
            current_trigger_start = trigger_pain_reg_facilitate_start
            current_trigger_stop = trigger_pain_reg_facilitate_end
        elif technique == "inhibit":
            instruction_text = inhibit_instruction
            current_trigger_start = trigger_pain_reg_inhibit_start
            current_trigger_stop = trigger_pain_reg_inhibit_end
        else:
            instruction_text = "Unknown category. Please contact the experimenter."

        # Attempt to stop EMG
        #if emg_trigger_status == STARTED:
        #    try:
        #        pulse_multiple_counters([0, 2])
        #        logging.data("USB6363: EMG Stop")
        #        emg_trigger_status = STOPPED
        #    except Exception as e:
        #        logging.error(f"Unexpected error: {e}")
        #        logging.flush()
      End Routine:
        # Start EMG Machine
        if emg_trigger_status == NOT_STARTED:
            try:
                pulse_multiple_counters([0,1])
                log_and_print("USB6363: EMG Start")
                emg_trigger_status = STARTED
            except Exception as e:
                logging.error(f"Unexpected error: {e}")
                logging.flush()
    TextComponent t_instruction_body
      letterHeight = 0.05
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
      units = height
      wrapWidth = comp_wrap_width_body
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    TextComponent t_instruction_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Researcher) Start the recording, then press SPACEBAR to begin
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine regulation
    RoutineSettingsComponent regulation
      durationEstim = 0.5
      stopVal [duration (s)] = 0.5
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    CodeComponent code_regulation_helper
      Code Type = Py
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      Begin Routine:
        # Mark the start of the 20 seconds.
        if regulation_seconds == 0:
            sm.begin_routine_from_category("pain_regulation") # Create slider
            tb.send_event(*current_trigger_start)
            print("Sent: ", *current_trigger_start)
      End Routine:
        # Log rating and rt
        #sm.end_routine(currentLoop)
        sm.collect_data(currentLoop)

        # Mark the end of the 20 seconds.
        if regulation_seconds == 19.5:
            tb.send_event(*current_trigger_stop)
            print("Sent: ", *current_trigger_stop)
            sm.autodraw_off()
    TextComponent t_regulation_task
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $technique_text
      units = height
      wrapWidth = comp_wrap_width_body
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  Routine transition
    RoutineSettingsComponent transition
      saveStartStop = False
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    PolygonComponent cross_fixation_transition
      durationEstim = 0.5
      fillColor = white
      lineWidth = 0
      saveStartStop = False
      shape = custom polygon...
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
      vertices = [[.5,.05],[.5,-.05],[.05,-.05],[.05,-.5],[-.05,-.5],[-.05,-.05],[-.5,-.05],[-.5,.05],[-.05,.05],[-.05,.5],[.05,.5],[.05,.05]]
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  Routine delayTimer
    RoutineSettingsComponent delayTimer
      saveStartStop = False
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      desc:
        Create a timestamp in this routine to determine how long the cross fixation in the delay routine should last. The maximum amount of time the fixation should last is 30 seconds. It is assumed that the state measure following will take at most 5 seconds.
        Example: If 10 seconds have passed starting from now to the delay routine, then the cross fixation should only last 25 seconds. If only 3 seconds have passed, the fixation duration should remain at 30 seconds.
    CodeComponent code_delay_timer
      Code Type = Py
      Begin Routine:
        # code_delay_timer
        #
        # Create a timestamp in this routine to determine how long the cross fixation
        # in the delay routine should last. The maximum amount of time the fixation
        # should last is 30 seconds. It is assumed that the state measure following
        # will take at most 5 seconds.
        #
        # Example: If 10 seconds have passed starting from now to the delay routine,
        # then the cross fixation should only last 25 seconds. If only 3 seconds have
        # passed, the fixation duration should remain at 30 seconds.

        delay_time = globalClock.getTime(format='float')
        print("Delay Clock Start Time:", delay_time)
  Routine delay
    RoutineSettingsComponent delay
      desc = Display a fixation between trials to break up the sections.
      saveStartStop = False
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    CodeComponent code_delay
      Code Type = Py
      Begin Experiment:
        # Skip the delay fixation on the final trial.
        fixation_duration = 60
        skip_fixation_counter = 0
        skip_fixation_target = 2
      Begin Routine:
        if skip_fixation_counter >= skip_fixation_target:
            fixation_duration = 0

        skip_fixation_counter += 1
    PolygonComponent cross_fixation_delay
      durationEstim = 60
      fillColor = white
      lineWidth = 0
      saveStartStop = False
      shape = custom polygon...
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_duration
      units = height
      vertices = [[.5,.05],[.5,-.05],[.05,-.05],[.05,-.5],[-.05,-.5],[-.05,-.05],[-.5,-.05],[-.5,.05],[-.05,.05],[-.05,.5],[.05,.5],[.05,.05]]
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  Routine goodbye
    RoutineSettingsComponent goodbye
      saveStartStop = False
      stopVal [duration (s)] = 4
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    TextComponent t_goodbye
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = You have completed the trial. Thank you!
      units = height
      wrapWidth = comp_wrap_width_header
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    CodeComponent code_goodbye
      Code Type = Py
      Begin Routine:
        try:
            pulse_multiple_counters([0, 2])
            logging.data("USB6363: EMG Stop")
        except Exception as e:
            logging.error(f"Unexpected error: {e}")
            logging.flush()
Flow
  Routine experimentSetup
  LoopInitiator intro_prompts loopType="TrialHandler"
    conditionsFile = pain-regulation_loop_intro.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('message', 'Welcome to the Pain Regulation Task!')]),
      OrderedDict([('message', 'Please relax and remain still during the experiment while we record your brain activity.')]),
      OrderedDict([('message', 'In this task, you will read a brief script and form the mental images it describes.\n\nYour role is simply to engage with the imagery as instructed.\n\nYou will complete the imagery task and a confidence rating five times before moving on.')]),
      OrderedDict([('message', 'There will be a 30 second break between each regulation technique section.')]),
      OrderedDict([('message', 'The state measure will begin on the following screen.\n\nPlease let us know if you have any remaining questions.')])]
    Routine welcome
  LoopTerminator intro_prompts
  LoopInitiator state_measure_pretrial loopType="TrialHandler"
    Selected rows = [0, 1, 2, 3, 4, 5, 6]
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_category', 'fatigue')]),
      OrderedDict([('rating_category', 'sleepiness')]),
      OrderedDict([('rating_category', 'pain')]),
      OrderedDict([('rating_category', 'pain_unpleasantness')]),
      OrderedDict([('rating_category', 'sam_valence')]),
      OrderedDict([('rating_category', 'sam_arousal')]),
      OrderedDict([('rating_category', 'sam_dominance')]),
      OrderedDict([('rating_category', 'emotion_regulation')]),
      OrderedDict([('rating_category', 'pain_regulation_confidence')])]
    Routine stateMeasure
  LoopTerminator state_measure_pretrial
  LoopInitiator technique_trial loopType="TrialHandler"
    conditionsFile = pain-regulation_loop_techniques.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('technique', 'inhibit')]),
      OrderedDict([('technique', 'observe')]),
      OrderedDict([('technique', 'facilitate')])]
    LoopInitiator regulation_block loopType="TrialHandler"
      conditionsFile = pain-regulation_loop_block.csv
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('regulation_trial_num', np.int64(1))]),
        OrderedDict([('regulation_trial_num', np.int64(2))]),
        OrderedDict([('regulation_trial_num', np.int64(3))]),
        OrderedDict([('regulation_trial_num', np.int64(4))]),
        OrderedDict([('regulation_trial_num', np.int64(5))])]
      Routine instruction
      LoopInitiator seconds loopType="TrialHandler"
        conditionsFile = pain-regulation_loop_seconds.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('regulation_seconds', np.int64(1))]),
          OrderedDict([('regulation_seconds', np.int64(2))]),
          OrderedDict([('regulation_seconds', np.int64(3))]),
          OrderedDict([('regulation_seconds', np.int64(4))]),
          OrderedDict([('regulation_seconds', np.int64(5))]),
          OrderedDict([('regulation_seconds', np.int64(6))]),
          OrderedDict([('regulation_seconds', np.int64(7))]),
          OrderedDict([('regulation_seconds', np.int64(8))]),
          OrderedDict([('regulation_seconds', np.int64(9))]),
          OrderedDict([('regulation_seconds', np.int64(10))]),
          OrderedDict([('regulation_seconds', np.int64(11))]),
          OrderedDict([('regulation_seconds', np.int64(12))]),
          OrderedDict([('regulation_seconds', np.int64(13))]),
          OrderedDict([('regulation_seconds', np.int64(14))]),
          OrderedDict([('regulation_seconds', np.int64(15))]),
          OrderedDict([('regulation_seconds', np.int64(16))])]
        Routine regulation
      LoopTerminator seconds
      Routine transition
      LoopInitiator state_measure_regulation loopType="TrialHandler"
        Selected rows = 8
        conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('rating_category', 'fatigue')]),
          OrderedDict([('rating_category', 'sleepiness')]),
          OrderedDict([('rating_category', 'pain')]),
          OrderedDict([('rating_category', 'pain_unpleasantness')]),
          OrderedDict([('rating_category', 'sam_valence')]),
          OrderedDict([('rating_category', 'sam_arousal')]),
          OrderedDict([('rating_category', 'sam_dominance')]),
          OrderedDict([('rating_category', 'emotion_regulation')]),
          OrderedDict([('rating_category', 'pain_regulation_confidence')])]
        Routine stateMeasure
      LoopTerminator state_measure_regulation
    LoopTerminator regulation_block
    LoopInitiator state_measure_pain loopType="TrialHandler"
      Selected rows = 2
      conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine stateMeasure
    LoopTerminator state_measure_pain
    Routine delay
  LoopTerminator technique_trial
  LoopInitiator state_measure_end loopType="TrialHandler"
    Selected rows = [0, 1, 2, 3, 4, 5, 6]
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine stateMeasure
  LoopTerminator state_measure_end
  Routine goodbye
