PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $(-0.5000, -0.5000, -0.5000)
  expName = phoda
  expVersion = 0.52
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine experimentSetup
    RoutineSettingsComponent experimentSetup
      saveStartStop = False
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      desc:
        This routine contains all Before Experiment and Begin Experiment code components used across the entire study.
        It centralizes global variables, screen geometry, scaling logic, and shared helper functions so that all other routines operate within a consistent coordinate system and configuration.

        Because these variables are referenced throughout the experiment, changes should be made cautiously and with awareness of downstream effects.
        This routine must appear before any trial‑based routines in the experiment flow.
    CodeComponent code_experiment_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_experiment_setup
        # Global screen geometry and shared layout variables.
        #
        # Computes window aspect ratio and establishes a unified
        # coordinate system in 'height' units so all routines scale
        # consistently across monitors.
        #
        # Also defines shared wrap-width values for text components.
        # Also includes imports for later components
        # ------------------------------------------------------------

        import random # for t_blank_delayer

        # ============================================================
        # =============== GLOBAL SCREEN GEOMETRY =====================
        # ============================================================
        # Centralized screen geometry so all routines share the same coordinate system

        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5

        # Wrap width as a percentage of screen width
        aspect80 = aspect * 0.80 # 80% of screen width
        aspect20 = aspect * 0.20  # 20% of screen width
        comp_wrap_width_body = aspect80
        comp_wrap_width_header = aspect80
        comp_wrap_width_continue = aspect80
    CodeComponent code_state_measure_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_state_measure_setup
        # Global setup logic for the stateMeasure routine.
        #
        # Handles scaling rules, slider configuration helpers, and
        # shared variables needed to dynamically construct rating
        # scales based on loop parameters.
        #
        # The stateMeasure routine depends on this setup code to
        # size components correctly and interpret SAM/text settings.
        # ------------------------------------------------------------
        _THIS_DIR = os.path.dirname(__file__)
        _REPO_ROOT = os.path.abspath(os.path.join(_THIS_DIR, '..', '..', '..'))
        if _REPO_ROOT not in sys.path:
            sys.path.insert(0, _REPO_ROOT)

        from neuroflare.shared.state_measure import StateMeasure, parse_tick_values

        sm = StateMeasure(win=win, aspect=aspect, screen_width=screen_width, screen_height=screen_height)
    CodeComponent code_trigger_setup
      Code Type = Py
      Begin Experiment:
        # ------------------------------------------------------------
        # code_trigger_setup

        # Manage a Brain Products TriggerBox over a virtual serial port.
        # Provides connection discovery, reconnection, and high/low
        # trigger management without crashing when the COM port is missing.
        # ------------------------------------------------------------
        from neuroflare.shared.trigger_box import TriggerBoxManager
        tb = TriggerBoxManager()
        tb.begin_experiment()

        # PHODA (40-49):
        trigger_image_phoda = (40, "image_phoda")
        trigger_rating_pulse = (49, "rating_pulse")
      End Experiment:
        # Close connection and send reset byte.
        tb.end_experiment()
      End Routine:
        # Clear out any residual triggers
        # Acts as both a marker and connection insurance.
        tb.send_event(value=1, name="experiment_start")
        tb.send_idle() # immediately return to baseline
    CodeComponent code_phoda_slider_setup
      Code Type = Py
      Begin Experiment:
        # ============================================================
        # =================== CONFIGURATION ==========================
        # ============================================================

        # PHODA image settings
        PS_PHODA_IMG_PATH = ''
        PS_PHODA_IMG_PX_WIDTH = 283
        PS_PHODA_IMG_PX_HEIGHT = 425
        PS_PHODA_IMG_HEIGHT_RATIO = 0.62  # Percentage of screen height
        PS_PHODA_IMG_POS_Y = 0.13  # Vertical position (0 = center, positive = above center)

        # Slider settings
        PS_SLIDER_WIDTH_RATIO = 0.8  # Percentage of screen width
        PS_SLIDER_HEIGHT = 0.08
        PS_SLIDER_MARKER_WIDTH = 0.02
        PS_SLIDER_GRANULARITY = 1  # 0 for continuous (VAS), 1 for integers
        PS_SLIDER_TICKS = range(0, 101)

        # Spacing
        PS_IMAGE_SLIDER_GAP = 0.08  # Vertical space between image and slider
        PS_SLIDER_LABELS_GAP = 0.03  # Vertical space between slider and numeric labels

        # Label settings
        PS_LABEL_VALUES = [0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100]
        PS_LABEL_HEIGHT = 0.03
        PS_LABEL_FONT = 'Noto Sans'
        PS_LABEL_COLOR = 'white'

        # Endpoint labels
        PS_LABEL_LEFT_TEXT = 'Not at all\nharmful'
        PS_LABEL_RIGHT_TEXT = 'Extremely\nharmful'
        PS_LABEL_ENDPOINT_HEIGHT = 0.025
        PS_LABEL_ENDPOINT_OFFSET = 0.055 # subtracted from label y-pos

        # Rating display
        PS_RATING_TEXT_HEIGHT = 0.04
        PS_RATING_TEXT_DEFAULT = 'Click or drag the slider to rate'

        # Auto logging for all components
        PS_AUTO_LOG = False
        PS_AUTO_LOG_SLIDER = False

        # ============================================================
        # =================== HELPER FUNCTIONS =======================
        # ============================================================

        def calculate_phoda_geometry():
            """
            Calculate all geometry for PHODA image and slider layout.
            Returns a dictionary with all positioning and sizing values.
            """
            # Image geometry
            img_aspect = PS_PHODA_IMG_PX_WIDTH / PS_PHODA_IMG_PX_HEIGHT
            img_height = PS_PHODA_IMG_HEIGHT_RATIO
            img_width = img_height * img_aspect

            # Slider geometry
            slider_width = aspect * PS_SLIDER_WIDTH_RATIO
            slider_height = PS_SLIDER_HEIGHT

            # Vertical positioning
            img_pos_y = PS_PHODA_IMG_POS_Y  # Use the defined position for the image
            img_bottom = img_pos_y - img_height / 2
            slider_pos_y = img_bottom - PS_IMAGE_SLIDER_GAP
            label_pos_y = slider_pos_y - slider_height / 2 - PS_SLIDER_LABELS_GAP

            # Slider boundaries
            slider_left = -slider_width / 2
            slider_right = slider_width / 2

            return {
                'img_width': img_width,
                'img_height': img_height,
                'img_pos_y': img_pos_y,
                'slider_width': slider_width,
                'slider_height': slider_height,
                'slider_pos_y': slider_pos_y,
                'slider_left': slider_left,
                'slider_right': slider_right,
                'label_pos_y': label_pos_y
            }

        def create_custom_slider(geom):
            """
            Create and customize a PHODA slider with narrow marker.
            """
            slider = visual.Slider(
                win=win,
                size=(geom['slider_width'], geom['slider_height']),
                pos=(0, geom['slider_pos_y']),
                ticks=PS_SLIDER_TICKS,
                labels=None,
                granularity=PS_SLIDER_GRANULARITY,
                style='scrollbar',
                flip=False,
                name="ps_phoda_slider",
                autoLog=PS_AUTO_LOG_SLIDER

            )

            # Customize marker width
            slider.marker.size = (PS_SLIDER_MARKER_WIDTH, slider.marker.size[1])

            # Adjust line size (compensate for scrollbar's 20% extra width)
            slider.line.size = (geom['slider_width'] + PS_SLIDER_MARKER_WIDTH, slider.line.size[1])

            return slider

        def create_slider_labels(geom):
            """
            Create numeric labels positioned along the slider.
            """
            labels = []
            slider_left = geom['slider_left']
            slider_right = geom['slider_right']
            label_pos_y = geom['label_pos_y']

            for label_val in PS_LABEL_VALUES:
                label_ratio = label_val / 100
                x_pos = slider_left + (slider_right - slider_left) * label_ratio

                label_obj = visual.TextStim(
                    win=win,
                    text=str(label_val),
                    pos=(x_pos, label_pos_y),
                    height=PS_LABEL_HEIGHT,
                    anchorVert='top',
                    color=PS_LABEL_COLOR,
                    font=PS_LABEL_FONT,
                    name=f"ps_slider_label_{label_val}",
                    autoLog=PS_AUTO_LOG
                )
                labels.append(label_obj)

            return labels

        def create_endpoint_labels(geom):
            """
            Create left and right endpoint description labels.
            """
            label_left = visual.TextStim(
                win=win,
                text=PS_LABEL_LEFT_TEXT,
                pos=(geom['slider_left'], geom['label_pos_y'] - PS_LABEL_ENDPOINT_OFFSET),
                height=PS_LABEL_ENDPOINT_HEIGHT,
                anchorVert='top',
                color=PS_LABEL_COLOR,
                font=PS_LABEL_FONT,
                name="ps_label_left",
                autoLog=PS_AUTO_LOG
            )

            label_right = visual.TextStim(
                win=win,
                text=PS_LABEL_RIGHT_TEXT,
                pos=(geom['slider_right'], geom['label_pos_y'] - PS_LABEL_ENDPOINT_OFFSET),
                height=PS_LABEL_ENDPOINT_HEIGHT,
                anchorVert='top',
                color=PS_LABEL_COLOR,
                font=PS_LABEL_FONT,
                name="ps_label_right",
                autoLog=PS_AUTO_LOG
            )

            return label_left, label_right

        def run_phoda_trial():
            """
            Draw all PHODA components on the window.
            """
            ps_phoda_slider.draw()
            for label in ps_manual_labels:
                label.draw()
            ps_phoda_label_left.draw()
            ps_phoda_label_right.draw()

            # Update rating display in real-time
            if ps_phoda_slider.markerPos is not None:
                if PS_SLIDER_GRANULARITY == 0:
                    # Show float for VAS (continuous)
                    ps_phoda_rating_text.text = f'Current rating: {ps_phoda_slider.markerPos:.1f}'
                else:
                    # Show integer for discrete scale
                    ps_phoda_rating_text.text = f'Current rating: {int(ps_phoda_slider.markerPos)}'
            else:
                ps_phoda_rating_text.text = PS_RATING_TEXT_DEFAULT

            ps_phoda_rating_text.draw()

        def phoda_autodraw_on():
            """
            Turn on AutoDraw for all PHODA components on the window.
            """
            ps_phoda_slider.setAutoDraw(True)
            for label in ps_manual_labels:
                label.setAutoDraw(True)
            ps_phoda_label_left.setAutoDraw(True)
            ps_phoda_label_right.setAutoDraw(True)
            ps_phoda_rating_text.setAutoDraw(True)
            logging.exp("PHODA components: AutoDraw ON")

        def phoda_autodraw_off():
            """
            Turn off AutoDraw for all PHODA components on the window.
            """
            ps_phoda_slider.setAutoDraw(False)
            for label in ps_manual_labels:
                label.setAutoDraw(False)
            ps_phoda_label_left.setAutoDraw(False)
            ps_phoda_label_right.setAutoDraw(False)
            ps_phoda_rating_text.setAutoDraw(False)
            logging.exp("PHODA components: AutoDraw OFF")

        def update_phoda_rating_text(last_rating_value):
            """
            Update the PHODA rating display text if the slider value has changed.
            """
            current = ps_phoda_slider.markerPos

            # Only update when the value actually changes
            if current != last_rating_value:
                if current is None:
                    ps_phoda_rating_text.text = PS_RATING_TEXT_DEFAULT
                else:
                    if PS_SLIDER_GRANULARITY == 0:
                        ps_phoda_rating_text.text = f'Current rating: {current:.1f}'
                    else:
                        ps_phoda_rating_text.text = f'Current rating: {int(current)}'

                # Update the flag
                last_rating_value = current

            return last_rating_value

        # Calculate all geometry
        ps_geom = calculate_phoda_geometry()

        # ============================================================
        # =================== CREATE COMPONENTS ======================
        # ============================================================

        # PHODA image
        ps_phoda_comp_img_pos_y = ps_geom['img_pos_y']
        ps_phoda_comp_img_size = (ps_geom['img_width'], ps_geom['img_height'])

        # Custom slider
        ps_phoda_slider = create_custom_slider(ps_geom)

        # Slider labels
        ps_manual_labels = create_slider_labels(ps_geom)

        # Endpoint labels
        ps_phoda_label_left, ps_phoda_label_right = create_endpoint_labels(ps_geom)
        t_phoda_continue_pos_y = ps_geom['label_pos_y'] - PS_LABEL_ENDPOINT_OFFSET -0.02

        # Rating display text
        ps_phoda_rating_text = visual.TextStim(
            win=win,
            text=PS_RATING_TEXT_DEFAULT,
            pos=(0, ps_geom['slider_pos_y']),
            height=PS_RATING_TEXT_HEIGHT,
            bold=True,
            color=PS_LABEL_COLOR,
            font=PS_LABEL_FONT,
            name="ps_phoda_rating_text",
            autoLog=PS_AUTO_LOG
        )
  Routine welcome
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    TextComponent t_welcome_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Message
      units = height
      wrapWidth = comp_wrap_width_body
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    TextComponent t_welcome_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to continue
      units = height
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stateMeasure
    RoutineSettingsComponent stateMeasure
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      desc:
        This routine presents a rating scale that adapts based on parameters supplied by the surrounding loop.
        To use it, place stateMeasure inside a loop whose conditions file includes rating_category.
        Then, make sure state_measure_labels.py has the following for your category:
        - message
        - min_label
        - max_label
        - picture_path (SAM only; expects a 1168×231 image)
        - tick_values
        - granularity
        - style
        The routine reads these values on each iteration and configures the slider dynamically.
        Make sure to update Selected Rows to only use the ratings you want.
        The standard rows are: [0, 1, 2, 3, 4, 5, 6], which describe:
        fatigue, sleepiness, pain, pain_unpleasantness, sam_valence, sam_arousal, sam_dominance
        The experiment must include the code_state_measure_setup component, which handles global setup and shared logic.
    CodeComponent code_sm_helper
      Code Type = Py
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      Begin Routine:
        # --- Create a fresh slider for this trial ---
        allowContinue = False
        sm.begin_routine_from_category(rating_category)
      Each Frame:
        # If rated, allow spacebar to end the routine
        if sm.has_rating():
            allowContinue = True
      End Routine:
        # Log rating, rt, and turn off AutoDraw
        sm.end_routine(currentLoop)
    TextComponent t_sm_continue
      durationEstim = 4.8
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_sm
      allowedKeys [set every repeat] = 'space'
      durationEstim = 4.8
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 0.2
      startVal [condition] = $allowContinue == True
      store = nothing
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  Routine instruction
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    CodeComponent code_instruction_helper
      Code Type = Py
      Begin Experiment:
        view_mode_text = "You will see photographs of daily activities.\n\nIn this block, simply look at each picture as it appears."
        rate_mode_text = "You will see photographs of daily activities.\n\nFor each picture, please rate how harmful you feel the activity is to your body."
      Begin Routine:
        # ------------------------------------------------------------
        # code_instruction_helper

        # Select the appropriate instruction text based
        # on the current trial's mode value
        # ------------------------------------------------------------
        # Determine whether this PHODA trial is in view or rate mode.
        # In view mode, components must be allowed to start immediately.
        isModeView = (mode == 'view')
        isModeRate = (mode == 'rate')

        if isModeView:
            instruction_text = view_mode_text
        elif isModeRate:
            instruction_text = rate_mode_text
        else:
            # Fallback message in case the condition file contains an
            # unexpected category. This helps catch typos or file issues.
            instruction_text = "Unknown mode. Please contact the experimenter."
    TextComponent t_instruction_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
      units = height
      wrapWidth = comp_wrap_width_body
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    TextComponent t_instruction_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine phodaDelay
    RoutineSettingsComponent phodaDelay
      desc = The delay duration is randomized between 1.5-2.5 seconds using the code_delay_calculator component.
      durationEstim = 2.5
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    CodeComponent code_delay_calculator
      Code Type = Py
      Begin Routine:
        # Gives a random float between 1.5 and 2.5 seconds (i.e., 1500–2500 ms)
        # Used for t_blank_delayer or cross_fixation
        delay_time = random.uniform(1.5, 2.5)
        currentLoop.addData('delay_time', delay_time)
    TextComponent t_blank_delayer
      disabled = True
      durationEstim = 2.5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $delay_time
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    TextComponent t_test_mode
      disabled = True
      durationEstim = 2.5
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delay_time
      text [set every repeat] = $mode
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    PolygonComponent cross_fixation
      durationEstim = 2.5
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delay_time
      units = height
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  Routine phodaView
    RoutineSettingsComponent phodaView
      durationEstim = 6
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      desc:
        This routine presents a PHODA image for 6 seconds and optionally allows participant rating depending on the trial mode.

        code_phoda_helper: Sets the image path for the current trial, draws and manages the custom slider (if in rate mode), logs the rating and response time, and records the randomized delay duration from the preceding phodaDelay routine.

        image_phoda: Displays the PHODA image for a fixed duration of 6 seconds, regardless of trial mode.

        p_port_phoda: Sends a port signal while the image is on screen, starting when image_phoda begins and stopping when it ends - used for EEG/EMG synchronization.

        t_phoda_continue & key_resp_phoda: Only active during rate trials. These components allow the participant to continue once a rating is made. In view mode, they are bypassed, and the image disappears automatically after 6 seconds.
    CodeComponent code_phoda_helper
      Code Type = Py
      Begin Routine:
        # PsychoPy Builder evaluates component start conditions before any code runs.
        # We compute a stable flag here so both t_phoda_continue and key_resp_phoda
        # can rely on it without hitting race‑condition issues.
        canContinue = isModeView

        # Tracks the last displayed slider value so we only update the rating text
        # when the marker actually changes. This prevents unnecessary property updates
        # and keeps the log file clean.
        last_rating_value = "INIT"

        # Only draw slider components in rate mode. View mode hides all rating UI.
        if isModeRate:
            phoda_autodraw_on()

        # Reset the slider so markerPos doesn't carry over between trials.
        ps_phoda_slider.reset()

        # Set the image path for this trial. Used by image_phoda to load the correct photo.
        ps_phoda_img_path = f'phoda-stimuli\\{phoda_photo}'
      Each Frame:
        # Draws the slider, labels, and rating
        if isModeRate:
            last_rating_value = update_phoda_rating_text(last_rating_value)
            # If rated, allow spacebar to end the routine
            if ps_phoda_slider.getRating() is not None:
                canContinue = True
      End Routine:
        phoda_autodraw_off()

        if isModeRate:
            currentLoop.addData('rating', ps_phoda_slider.getRating())
            currentLoop.addData('rating_rt', ps_phoda_slider.getRT())
            currentLoop.addData('delay_time', delay_time)
            try:
                print(f'{phoda_photo} rating: {ps_phoda_slider.getRating()}')
                logging.data(f'{phoda_photo} rating: {ps_phoda_slider.getRating()}')
                logging.data(f'{phoda_photo} rating_rt: {ps_phoda_slider.getRT()}')
            except:
                logging.error("Error printing phoda rating")
    ImageComponent image_phoda
      durationEstim = 6
      image [set every repeat] = $ps_phoda_img_path
      pos [set every repeat] = (0, ps_phoda_comp_img_pos_y)
      size [set every repeat] = $ps_phoda_comp_img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent code_trigger_helper
      Code Type = Py
      Begin Routine:
        rating_pulse_active = False
        rating_pulse_sent = False
        rating_timer = core.Clock()
      Each Frame:
        # 1. Rating pulse takes priority
        if rating_pulse_active:
            # End pulse?
            if rating_timer.getTime() > 1.0:
                rating_pulse_active = False
                # Restore image state
                if image_phoda.status == STARTED:
                    tb.send_event(*trigger_image_phoda)
                else:
                    tb.send_idle()
        else:
            # 2. Image logic (only runs when no rating pulse is active)
            if image_phoda.status == STARTED:
                tb.send_event(*trigger_image_phoda)
            elif image_phoda.status == STOPPED:
                tb.send_idle()

            # 3. Rating detection (only once)
            if (ps_phoda_slider.getRating() is not None and not rating_pulse_sent):
                tb.send_event(*trigger_rating_pulse)
                rating_pulse_active = True
                rating_pulse_sent = True
                rating_timer.reset()
      End Routine:
        tb.send_idle()
    TextComponent t_phoda_continue
      durationEstim = 5.5
      letterHeight = 0.04
      pos [set every repeat] = (0, t_phoda_continue_pos_y)
      saveStartStop = False
      startEstim = 0.5
      startVal [condition] = $canContinue
      stopVal [condition] = $isModeView
      text [set every repeat] = Press the SPACEBAR to continue
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_phoda
      allowedKeys = 'space'
      durationEstim = 5.5
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 0.5
      startVal [condition] = $canContinue
      stopVal [condition] = $isModeView
      store = nothing
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  Routine goodbye
    RoutineSettingsComponent goodbye
      stopVal [duration (s)] = 4
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    TextComponent t_goodbye
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = You have completed the trial. Thank you!
      units = height
      wrapWidth = comp_wrap_width_header
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Flow
  Routine experimentSetup
  LoopInitiator intro_prompts loopType="TrialHandler"
    conditionsFile = loopPhodaIntro.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Message', 'Phoda Picture Viewing Task\n-Photographs of Daily Activities-')]),
      OrderedDict([('Message', 'In this task, you will complete two picture‑viewing blocks.\n\nOne block will ask you to rate each picture,\nand one block will ask you to simply view the pictures.')]),
      OrderedDict([('Message', 'The trial will begin on the following screen.\n\nPlease let us know if you have any remaining questions.')])]
    Routine welcome
  LoopTerminator intro_prompts
  LoopInitiator state_measure_pretrial loopType="TrialHandler"
    Selected rows = [0, 1, 2, 3, 4, 5, 6]
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_category', 'fatigue')]),
      OrderedDict([('rating_category', 'sleepiness')]),
      OrderedDict([('rating_category', 'pain')]),
      OrderedDict([('rating_category', 'pain_unpleasantness')]),
      OrderedDict([('rating_category', 'sam_valence')]),
      OrderedDict([('rating_category', 'sam_arousal')]),
      OrderedDict([('rating_category', 'sam_dominance')]),
      OrderedDict([('rating_category', 'emotion_regulation')])]
    Routine stateMeasure
  LoopTerminator state_measure_pretrial
  LoopInitiator phoda_mode_loop loopType="TrialHandler"
    conditionsFile = loopPhodaMode.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('mode', 'view')]),
      OrderedDict([('mode', 'rate')])]
    Routine instruction
    LoopInitiator phoda_trials loopType="TrialHandler"
      conditionsFile = phodaPhotoList.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('phoda_photo', '002.jpg')]),
        OrderedDict([('phoda_photo', '003.jpg')]),
        OrderedDict([('phoda_photo', '004.jpg')]),
        OrderedDict([('phoda_photo', '007.jpg')]),
        OrderedDict([('phoda_photo', '008.jpg')]),
        OrderedDict([('phoda_photo', '011.jpg')]),
        OrderedDict([('phoda_photo', '014.jpg')]),
        OrderedDict([('phoda_photo', '015.jpg')]),
        OrderedDict([('phoda_photo', '018.jpg')]),
        OrderedDict([('phoda_photo', '020.jpg')]),
        OrderedDict([('phoda_photo', '022.jpg')]),
        OrderedDict([('phoda_photo', '023.jpg')]),
        OrderedDict([('phoda_photo', '026.jpg')]),
        OrderedDict([('phoda_photo', '027.jpg')]),
        OrderedDict([('phoda_photo', '028.jpg')]),
        OrderedDict([('phoda_photo', '029.jpg')]),
        OrderedDict([('phoda_photo', '033.jpg')]),
        OrderedDict([('phoda_photo', '036.jpg')]),
        OrderedDict([('phoda_photo', '040.jpg')]),
        OrderedDict([('phoda_photo', '044.jpg')]),
        OrderedDict([('phoda_photo', '047.jpg')]),
        OrderedDict([('phoda_photo', '049.jpg')]),
        OrderedDict([('phoda_photo', '050.jpg')]),
        OrderedDict([('phoda_photo', '051.jpg')]),
        OrderedDict([('phoda_photo', '057.jpg')]),
        OrderedDict([('phoda_photo', '059.jpg')]),
        OrderedDict([('phoda_photo', '060.jpg')]),
        OrderedDict([('phoda_photo', '061.jpg')]),
        OrderedDict([('phoda_photo', '073.jpg')]),
        OrderedDict([('phoda_photo', '074.jpg')]),
        OrderedDict([('phoda_photo', '083.jpg')]),
        OrderedDict([('phoda_photo', '085.jpg')]),
        OrderedDict([('phoda_photo', '092.jpg')]),
        OrderedDict([('phoda_photo', '093.jpg')]),
        OrderedDict([('phoda_photo', '094.jpg')]),
        OrderedDict([('phoda_photo', '095.jpg')])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
      Routine phodaDelay
      Routine phodaView
    LoopTerminator phoda_trials
    LoopInitiator state_measure_trials loopType="TrialHandler"
      Selected rows = [0, 1, 2, 3, 4, 5, 6]
      conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('rating_category', 'fatigue')]),
        OrderedDict([('rating_category', 'sleepiness')]),
        OrderedDict([('rating_category', 'pain')]),
        OrderedDict([('rating_category', 'pain_unpleasantness')]),
        OrderedDict([('rating_category', 'sam_valence')]),
        OrderedDict([('rating_category', 'sam_arousal')]),
        OrderedDict([('rating_category', 'sam_dominance')]),
        OrderedDict([('rating_category', 'emotion_regulation')])]
      Routine stateMeasure
    LoopTerminator state_measure_trials
  LoopTerminator phoda_mode_loop
  Routine goodbye
