PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = spontaneous_eeg
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Sleepiness_01
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Please rate your current sleepiness level.
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    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      pos = (0, -0.010)
      size = (1.45, 0.275)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.08)
      size = (1.18, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10
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  Routine Fatigue_01
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Please rate your current fatigue level.
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SliderComponent slider_fatigue
      color = 1.0000, 1.0000, 1.0000
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      labels = "Not at all sleepy", "","","","","","","","","","As bad as you can imagine"
      letterHeight = 0.05
      pos = (0, -0.08)
      size = (1.18, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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  Routine Dominated_01
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Using your keyboard, rate how dominated or in-control you feel right now on a scale 1 - 9.
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    KeyboardComponent key_resp_6
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent SAM_Dominance
      image = C:/Users/colin/Desktop/OUPI/Fall 25/Research/neuroflare-experiments/psychopy/shared/pictures/SAM-dominance.png
      pos = (0, -0.15)
      size = (1.20, 0.40)
      startVal [time (s)] = 0.0
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    SliderComponent slider_dominated
      borderColor = 1.0000, 1.0000, 1.0000
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      labels = "Dominated","","","","","","","", "In Control"
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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  Routine Intro_01
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        We are now going to ask you to rate different words that describe pain. Click the number that best matches your experience for each word.​


        For each word shown, rate how well it describes your current pain using the following scale: ​

        0 – none, 1 – Mild, 2 – Moderate, 3 – Severe​

        ​

        **When you're ready, press the spacebar to begin.**
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine X
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine pain_adjectives01
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    TextComponent pain_adjectives_text
      letterHeight = 0.15
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every frame] = $pain_adjs
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    KeyboardComponent pain_adjectives_kb_response
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [condition] = $allowContinue == True
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    SliderComponent pain_slider_2
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      labels = "None","Mild","Moderate","Severe"
      letterHeight = 0.05
      pos [set every repeat] = (0, slider_y)
      size [set every repeat] = (slider_width, slider_height)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0, 1, 2, 3)
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    TextboxComponent pain_tb_continue_sm
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.25)
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
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    CodeComponent painHelperCode
      Code Type = Py
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      Begin Experiment:
        # Scale SAM properly
        # Window and coordinate setup
        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5


        # --- Generic Slider Scaling ---
        # Full-width slider across screen
        slider_gen_width = aspect * 0.7   # 70% of screen width

        # --- SAM image geometry (pixels) ---
        sam_px_width = 1168
        sam_px_height = 231
        sam_aspect = sam_px_width / sam_px_height  # ≈ 5.065

        # Pictogram/gap geometry (pixels)
        pictogram_px_width = 215
        gap_px_width = 23
        num_pictograms = 5
        num_gaps = num_pictograms - 1

        # Sanity check total width in px (info only)
        total_calc_px = num_pictograms * pictogram_px_width + num_gaps * gap_px_width
        # Note: total_calc_px ≈ 1175; close enough to 1170 given source image padding.

        # --- Layout decisions (height units) ---
        sam_height = 0.25                         # 25% of screen height
        sam_width  = sam_height * sam_aspect      # scaled width based on aspect
        sam_y      = 0.1                          # vertical position of the image

        # Slider layout (height units)
        slider_y      = -0.09                     # vertical position of the slider center
        slider_height = 0.06                      # slider thickness/height
        slider_px_width = sam_px_width - 215
        slider_width = sam_width * (slider_px_width / sam_px_width) # match slider width to image width

        # Label MinMax layout
        label_y = slider_y - 0.2 # slightly below the slider

        # Scale factor: px -> 'height' units within the image width
        scale_factor = sam_width / sam_px_width

        pictogram_w = pictogram_px_width * scale_factor
        gap_w       = gap_px_width * scale_factor

        # --- Compute 9 tick x-positions aligned to pictograms (1,3,5,7,9) and gaps (2,4,6,8) ---
        tick_positions = []
        # Start at the center of the first pictogram: left edge + half pictogram width
        x = -sam_width / 2 + pictogram_w / 2

        for i in range(9):
            tick_positions.append(x)
            # Advance: pictogram -> gap -> pictogram -> gap ...
            if i % 2 == 0:  # 0,2,4,6,8 (odd-numbered ticks under pictograms)
                x += pictogram_w / 2 + gap_w / 2
            else:           # 1,3,5,7 (even-numbered ticks under gaps)
                x += gap_w / 2 + pictogram_w / 2

        # Helpful mapping: tick index (0..8) -> value (1..9)
        tick_values = list(range(1, 10))
      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (pain_slider_2.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
  Routine End
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of this secion.

        Thank you.
  Routine Arousal
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Using your keyboard, rate how calm or excited you feel right now on a scale 1 - 9
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    KeyboardComponent key_resp_5
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent SAM_Arousal
      image = C:/Users/colin/Desktop/OUPI/Fall 25/Research/neuroflare-experiments/psychopy/shared/pictures/SAM-arousal.png
      pos = (0, -0.15)
      size = (1.20, 0.40)
      startVal [time (s)] = 0.0
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    SliderComponent sliderSAM
      borderColor = 1.0000, 1.0000, 1.0000
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      labels = "Calm","","","","","","","", "Excited"
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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  Routine Valence
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Using your keyboard, rate how pleasant or unpleasant you feel right now on a scale 1 - 9
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    KeyboardComponent key_resp_4
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent SAM_Valence
      image = C:/Users/colin/Desktop/OUPI/Fall 25/Research/neuroflare-experiments/psychopy/shared/pictures/SAM-valence.png
      pos = (0, -0.15)
      size = (1.20, 0.40)
      startVal [time (s)] = 0.0
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    SliderComponent sliderSam
      borderColor = 1.0000, 1.0000, 1.0000
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      labels = "Pleasant","","","","","","","", "Unpleasant"
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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  Routine Pain_current
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    TextComponent textCurrentPain
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = 1.5
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    SliderComponent slider_curr_pain_level
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = "No Pain","Mild","Discomforting","Distressing","Horrible","Excrutiating"
      letterHeight = 0.033
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (slider_gen_width2, 0.1)
      startVal [condition] = $rating_type == 'currPainLevel'
      stopVal [condition] = $rating_type != 'currPainLevel'
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5)
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    TextboxComponent tb_continue_sm
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.25)
      startVal [condition] = $allowContinue == True
      text = Please press the SPACEBAR to continue
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    KeyboardComponent key_resp_pain_curr
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [condition] = $allowContinue == True
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    CodeComponent currPainHelper
      Code Type = Py
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      Begin Experiment:
        # Scale SAM properly
        # Window and coordinate setup
        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5


        # --- Generic Slider Scaling ---
        # Full-width slider across screen
        slider_gen_width = aspect * 0.7   # 70% of screen width
        slider_gen_width2 = aspect * 0.75

        # --- SAM image geometry (pixels) ---
        sam_px_width = 1168
        sam_px_height = 231
        sam_aspect = sam_px_width / sam_px_height  # ≈ 5.065

        # Pictogram/gap geometry (pixels)
        pictogram_px_width = 215
        gap_px_width = 23
        num_pictograms = 5
        num_gaps = num_pictograms - 1

        # Sanity check total width in px (info only)
        total_calc_px = num_pictograms * pictogram_px_width + num_gaps * gap_px_width
        # Note: total_calc_px ≈ 1175; close enough to 1170 given source image padding.

        # --- Layout decisions (height units) ---
        sam_height = 0.25                         # 25% of screen height
        sam_width  = sam_height * sam_aspect      # scaled width based on aspect
        sam_y      = 0.1                          # vertical position of the image

        # Slider layout (height units)
        slider_y      = -0.09                     # vertical position of the slider center
        slider_height = 0.06                      # slider thickness/height
        slider_px_width = sam_px_width - 215
        slider_width = sam_width * (slider_px_width / sam_px_width) # match slider width to image width

        # Label MinMax layout
        label_y = slider_y - 0.2 # slightly below the slider

        # Scale factor: px -> 'height' units within the image width
        scale_factor = sam_width / sam_px_width

        pictogram_w = pictogram_px_width * scale_factor
        gap_w       = gap_px_width * scale_factor

        # --- Compute 9 tick x-positions aligned to pictograms (1,3,5,7,9) and gaps (2,4,6,8) ---
        tick_positions = []
        # Start at the center of the first pictogram: left edge + half pictogram width
        x = -sam_width / 2 + pictogram_w / 2

        for i in range(9):
            tick_positions.append(x)
            # Advance: pictogram -> gap -> pictogram -> gap ...
            if i % 2 == 0:  # 0,2,4,6,8 (odd-numbered ticks under pictograms)
                x += pictogram_w / 2 + gap_w / 2
            else:           # 1,3,5,7 (even-numbered ticks under gaps)
                x += gap_w / 2 + pictogram_w / 2

        # Helpful mapping: tick index (0..8) -> value (1..9)
        tick_values = list(range(1, 10))
      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (slider_curr_pain_level.getRating() is not None) or (slider_curr_pain_generic.getRating() is not None) or (slider_curr_pain_conf.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
    SliderComponent slider_curr_pain_generic
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.045
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (slider_gen_width, 0.1)
      startVal [condition] = $rating_type == 'generic'
      stopVal [condition] = $rating_type != 'generic'
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent slider_curr_pain_conf
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = "Not at all \nconfident","Slightly \nconfident", "Moderately \nconfident", "Very \nconfident", "Extremely \nconfident"
      letterHeight = 0.040
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (slider_gen_width2, 0.1)
      startVal [condition] = $rating_type == 'currPainConf'
      stopVal [condition] = $rating_type != 'currPainConf'
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textLabelMin
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[0]-0.075, label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_min_label
      wrapWidth = 0.5
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    TextComponent textLabelMax
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[-1], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_max_label
      wrapWidth = 0.5
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  Routine X_2
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine state_measure_intro
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  Routine state_measure_intro_2
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    SliderComponent slider_generic0
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 0,1,2,3,4,5,6,7,8,9,10
      letterHeight = 0.05
      size [set every repeat] = (slider_gen_width, 0.1)
      startVal [condition] = $rating_type == 'Generic'
      stopVal [condition] = $rating_type != 'Generic'
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent slider_SAM0
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos [set every repeat] = (0, slider_y)
      size [set every repeat] = (slider_width, slider_height)
      startVal [condition] = $rating_type == 'SAM'
      stopVal [condition] = $rating_type != 'SAM'
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent textStateMeasure0
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = 1.5
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    TextComponent textLabelMin0
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[0], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_min_label
      wrapWidth = 0.5
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    TextComponent textLabelMax0
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[-1], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_max_label
      wrapWidth = 0.5
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    TextboxComponent tb_continue_sm0
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.25)
      startVal [condition] = $allowContinue == True
      text = Press SPACEBAR to continue
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    KeyboardComponent key_resp_state_measure0
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [condition] = $allowContinue == True
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    ImageComponent imageSAM0
      image [set every repeat] = $picture_path
      pos [set every repeat] = (0, sam_y)
      size [set every repeat] = (sam_width, sam_height)
      startVal [time (s)] = 0.0
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    CodeComponent stateMeasureHelper0
      Code Type = Py
      Begin Experiment:
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      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (slider_generic0.getRating() is not None) or (slider_SAM0.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
  Routine state_measure_outro
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    SliderComponent sliderGeneric2
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10
      letterHeight = 0.05
      size [set every repeat] = (slider_gen_width, 0.1)
      startVal [condition] = $rating_type == 'Generic'
      stopVal [condition] = $rating_type != 'Generic'
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent sliderSAM2
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      labels = 1, 2, 3, 4, 5, 6, 7, 8, 9
      letterHeight = 0.05
      pos [set every repeat] = (0, slider_y)
      size [set every repeat] = (slider_width, slider_height)
      startVal [condition] = $rating_type == 'SAM'
      stopVal [condition] = $rating_type != 'SAM'
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ImageComponent imageSAM2
      image [set every repeat] = $picture_path
      pos [set every repeat] = (0, sam_y)
      size [set every repeat] = (sam_width, sam_height)
      startVal [time (s)] = 0
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    TextComponent textStateMeasure2
      letterHeight = 0.05
      pos [set every repeat] = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = 1.5
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    TextComponent textLabelMin2
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[0], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_min_label
      wrapWidth = 0.5
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    TextComponent textLabelMax2
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[-1], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_max_label
      wrapWidth = 0.5
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    TextboxComponent tb_continue_02
      bold = False
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, -0.40)
      size [set every repeat] = (0.5, 0.25)
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
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    CodeComponent stateMeasureHelper2
      Code Type = Py
      Begin Experiment:
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      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (sliderGeneric2.getRating() is not None) or (sliderSAM2.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
    KeyboardComponent key_resp_state_measure2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [condition] = $allowContinue == True
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  Routine blnk
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = blank
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  Routine pain_adjectives02
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    TextComponent pain_adjectives2_text
      letterHeight = 0.15
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pain_adjs
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    KeyboardComponent pain_adjectives_key_resp02
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent pain_continue_tb2
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = Press SPACEBAR to continue
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  Routine X2
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    PolygonComponent polygon_3
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please relax and remain as still as possible while we record your brain activity.

        Follow the on-screen instructions to assess your body pain at present.

        When you're ready, press the spacebar to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator state_measure_01 loopType="TrialHandler"
    conditionsFile = D:/Github/neuroflare-experiments/neuroflare/shared/loop-templates/loopStateMeasure.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'rating_type': 'Generic', 'rating_category': 'Fatigue', 'rating_min_label': 'No fatigue at all', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current fatigue level'},
      {'rating_type': 'Generic', 'rating_category': 'Sleepiness', 'rating_min_label': 'Not at all sleepy', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current sleepiness level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain', 'rating_min_label': 'No pain', 'rating_max_label': 'Worst possible pain', 'picture_path': None, 'rating_message': 'Rate your current pain level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain Unpleasantness', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Rate your current pain unpleasantness level'},
      {'rating_type': 'SAM', 'rating_category': 'Valence', 'rating_min_label': 'Pleasant', 'rating_max_label': 'Unpleasant', 'picture_path': '../../shared/pictures/sam-valence.png', 'rating_message': 'Rate how pleasant or unpleasant you feel'},
      {'rating_type': 'SAM', 'rating_category': 'Arousal', 'rating_min_label': 'Calm', 'rating_max_label': 'Excited', 'picture_path': '../../shared/pictures/sam-arousal.png', 'rating_message': 'Rate how calm or excited you feel'}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
    Routine state_measure_intro_2
  LoopTerminator state_measure_01
  Routine Intro_01
  LoopInitiator pain_adjectives_loop loopType="TrialHandler"
    conditionsFile = pain_adjectives_01.xlsx
    loopType = random
    nReps = 1
    random seed = 1234
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    conditions:
      [{'pain_adjs': 'Throbbing'},
      {'pain_adjs': 'Shooting'},
      {'pain_adjs': 'Stabbing'},
      {'pain_adjs': 'Sharp'},
      {'pain_adjs': 'Gnawing'},
      {'pain_adjs': 'Hot-Burning'},
      {'pain_adjs': 'Aching'},
      {'pain_adjs': 'Heavy'},
      {'pain_adjs': 'Tender'},
      {'pain_adjs': 'Splitting'},
      {'pain_adjs': 'Tiring-Exhausting'},
      {'pain_adjs': 'Sickening'},
      {'pain_adjs': 'Fearful'},
      {'pain_adjs': 'Punishing-Cruel'},
      {'pain_adjs': 'Cramping'}]
    Routine X
    Routine pain_adjectives01
  LoopTerminator pain_adjectives_loop
  LoopInitiator pain_adjectives_loop2 loopType="TrialHandler"
    conditionsFile = pain_adjectives_01.xlsx
    loopType = random
    nReps = 1
    random seed = 1
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    conditions:
      [{'pain_adjs': 'Throbbing'},
      {'pain_adjs': 'Shooting'},
      {'pain_adjs': 'Stabbing'},
      {'pain_adjs': 'Sharp'},
      {'pain_adjs': 'Gnawing'},
      {'pain_adjs': 'Hot-Burning'},
      {'pain_adjs': 'Aching'},
      {'pain_adjs': 'Heavy'},
      {'pain_adjs': 'Tender'},
      {'pain_adjs': 'Splitting'},
      {'pain_adjs': 'Tiring-Exhausting'},
      {'pain_adjs': 'Sickening'},
      {'pain_adjs': 'Fearful'},
      {'pain_adjs': 'Punishing-Cruel'},
      {'pain_adjs': 'Cramping'}]
    Routine X2
    Routine pain_adjectives02
  LoopTerminator pain_adjectives_loop2
  LoopInitiator pain_current_loop loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = C:/Users/colin/Desktop/OUPI/Research Projects/Sophia_You/You_Pain/shared/loop-templates/loopSpontaneousPainExpected.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'rating_type': 'currPainLevel', 'rating_category': 'CurrentPainLevel', 'rating_min_label': ' ', 'rating_max_label': ' ', 'picture_path': None, 'rating_message': 'Please select the word that best describes your current pain level:', 'current_pain_1': 'Mild', 'current_pain_2': 'Discomforting', 'current_pain_3': 'Distressing', 'current_pain_4': 'Horrible', 'anticip_conf_pain_2': None, 'anticip_conf_pain_3': None, 'anticip_conf_pain_4': None},
      {'rating_type': 'generic', 'rating_category': 'OverallPainIntensity', 'rating_min_label': 'No Pain', 'rating_max_label': 'Worst Possible Pain', 'picture_path': None, 'rating_message': 'Please rate your overall pain intensity by marking a point on the line that best represents your pain level at present', 'current_pain_1': None, 'current_pain_2': None, 'current_pain_3': None, 'current_pain_4': None, 'anticip_conf_pain_2': None, 'anticip_conf_pain_3': None, 'anticip_conf_pain_4': None},
      {'rating_type': 'generic', 'rating_category': 'UnplesantPain', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Please rate how unpleasnt your pain feels at present', 'current_pain_1': None, 'current_pain_2': None, 'current_pain_3': None, 'current_pain_4': None, 'anticip_conf_pain_2': None, 'anticip_conf_pain_3': None, 'anticip_conf_pain_4': None},
      {'rating_type': 'generic', 'rating_category': 'PainMgmntConfidence', 'rating_min_label': 'No control', 'rating_max_label': 'Perfect Control', 'picture_path': None, 'rating_message': 'How confident are you in managing your pain sensations now?', 'current_pain_1': None, 'current_pain_2': None, 'current_pain_3': None, 'current_pain_4': None, 'anticip_conf_pain_2': None, 'anticip_conf_pain_3': None, 'anticip_conf_pain_4': None}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
    Routine X_2
    Routine Pain_current
  LoopTerminator pain_current_loop
  LoopInitiator state_measure_02 loopType="TrialHandler"
    conditionsFile = D:/Github/neuroflare-experiments/neuroflare/shared/loop-templates/loopStateMeasureOutro.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'rating_type': 'Generic', 'rating_category': 'Fatigue', 'rating_min_label': 'No fatigue at all', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current fatigue level'},
      {'rating_type': 'Generic', 'rating_category': 'Sleepiness', 'rating_min_label': 'Not at all sleepy', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current sleepiness level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain', 'rating_min_label': 'No pain', 'rating_max_label': 'Worst possible pain', 'picture_path': None, 'rating_message': 'Rate your current pain level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain Unpleasantness', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Rate your current pain unpleasantness level'},
      {'rating_type': 'SAM', 'rating_category': 'Valence', 'rating_min_label': 'Pleasant', 'rating_max_label': 'Unpleasant', 'picture_path': '../../shared/pictures/sam-valence.png', 'rating_message': 'Rate how pleasant or unpleasant you feel'},
      {'rating_type': 'SAM', 'rating_category': 'Arousal', 'rating_min_label': 'Calm', 'rating_max_label': 'Excited', 'picture_path': '../../shared/pictures/sam-arousal.png', 'rating_message': 'Rate how calm or excited you feel'}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
    Routine state_measure_outro
  LoopTerminator state_measure_02
  Routine End
