PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -0.5000, -0.5000, -0.5000
  expName = emotion-regulation
  expVersion = 0.5
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine experimentSetup
    RoutineSettingsComponent experimentSetup
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      desc:
        This routine contains all Before Experiment and Begin Experiment code components used across the entire study.
        It centralizes global variables, screen geometry, scaling logic, and shared helper functions so that all other routines operate within a consistent coordinate system and configuration.

        Because these variables are referenced throughout the experiment, changes should be made cautiously and with awareness of downstream effects.
        This routine must appear before any trial‑based routines in the experiment flow.
    CodeComponent code_experiment_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_experiment_setup
        # Global screen geometry and shared layout variables.
        #
        # Computes window aspect ratio and establishes a unified
        # coordinate system in 'height' units so all routines scale
        # consistently across monitors.
        #
        # Also defines shared wrap-width values for text components.
        # ------------------------------------------------------------

        # ============================================================
        # =============== GLOBAL SCREEN GEOMETRY =====================
        # ============================================================
        # Centralized screen geometry so all routines share the same coordinate system

        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5

        # Wrap width as a percentage of screen width
        aspect80 = aspect * 0.80 # 80% of screen width
        aspect20 = aspect * 0.20  # 20% of screen width
        comp_wrap_width_body = aspect80
        comp_wrap_width_header = aspect80
        comp_wrap_width_continue = aspect80
    CodeComponent code_state_measure_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_state_measure_setup
        # Global setup logic for the stateMeasure routine.
        #
        # Handles scaling rules, slider configuration helpers, and
        # shared variables needed to dynamically construct rating
        # scales based on loop parameters.
        #
        # The stateMeasure routine depends on this setup code to
        # size components correctly and interpret SAM/text settings.
        # ------------------------------------------------------------

        # --- Helper functions for dynamic slider configuration ---
        def parse_tick_values(raw):
            # If PsychoPy already parsed it into a list, just return it
            if isinstance(raw, list):
                return raw
            # Otherwise assume it's a comma-separated string
            return [int(x.strip()) for x in raw.split(',')]

        # ===============================================================
        # ============== STATE-MEASURE SPECIFIC GEOMETRY ================
        # ===============================================================

        def sm_compute_tick_positions(tick_values, rating_type):
            """
            Compute slider size, slider position, and min/max label positions
            for both SAM and Generic rating types.
            """

            if rating_type == "SAM":
                # SAM uses the precomputed geometry
                slider_size = (sm_sam_comp_slider_width, sm_sam_comp_slider_size_height)
                slider_pos  = (0, sm_sam_comp_slider_pos_y)

                # Tick positions already computed globally
                tick_positions = sm_sam_tick_positions

                label_min_pos = (tick_positions[0],  sm_sam_comp_label_pos_y)
                label_max_pos = (tick_positions[-1], sm_sam_comp_label_pos_y)

            else:
                # Generic slider: evenly spaced ticks across the slider width
                slider_size = (sm_gen_comp_slider_size_width, sm_gen_comp_slider_size_height)
                slider_pos  = (0, sm_gen_comp_slider_pos_y)

                # Compute generic tick positions dynamically
                num_ticks = len(tick_values)
                half_width = sm_gen_comp_slider_size_width / 2

                # Even spacing across the width
                tick_positions = [
                    -half_width + (i / (num_ticks - 1)) * sm_gen_comp_slider_size_width
                    for i in range(num_ticks)
                ]

                # Labels sit below the slider
                label_min_pos = (tick_positions[0],  sm_gen_comp_label_pos_y)
                label_max_pos = (tick_positions[-1], sm_gen_comp_label_pos_y)

            return {
                "slider_size": slider_size,
                "slider_pos": slider_pos,
                "tick_positions": tick_positions,
                "label_min_pos": label_min_pos,
                "label_max_pos": label_max_pos
            }

        # ===============================================================
        # =================== GEN SPECIFIC GEOMETRY =====================
        # ===============================================================

        # --- Generic Slider Scaling ---
        # Full-width slider across screen
        # Generic slider (used when rating_type != "SAM")

        # Slider layout (height units)
        sm_gen_comp_slider_size_width  = aspect * 0.6  # 60% of screen width
        sm_gen_comp_slider_size_height = 0.1           # slider thickness/height
        sm_gen_comp_slider_pos_y       = 0             # vertical position of the slider center

        # Label Min/Max layout
        sm_gen_comp_label_pos_y = sm_gen_comp_slider_pos_y - 0.2

        # ===============================================================
        # =================== SAM SPECIFIC GEOMETRY =====================
        # ===============================================================

        # --- SAM image geometry (pixels) ---
        sm_sam_img_px_width  = 1168
        sm_sam_img_px_height = 231
        sm_sam_img_aspect    = sm_sam_img_px_width / sm_sam_img_px_height  # ≈ 5.056

        # Pictogram/gap geometry (pixels)
        # Note: there are 5 pictograms and 4 gaps spanning the full image width
        sm_sam_pictogram_px_width     = 215
        sm_sam_pictogram_gap_px_width = 23

        # --- Layout decisions (height units) ---
        sm_sam_comp_img_size_height = 0.25                                             # 25% of screen height
        sm_sam_comp_img_size_width  = sm_sam_comp_img_size_height * sm_sam_img_aspect  # scaled width based on aspect
        sm_sam_comp_img_pos_y       = 0.1                                              # vertical position of the image

        # Message Layout
        sm_sam_comp_message_pos_y = sm_sam_comp_img_pos_y + 0.2

        # Slider layout (height units)
        sm_sam_comp_slider_pos_y       = -0.09      # vertical position of the slider center
        sm_sam_comp_slider_size_height = 0.06       # slider thickness/height
        sm_sam_slider_px_width    = sm_sam_img_px_width - 215
        sm_sam_comp_slider_width  = sm_sam_comp_img_size_width * (sm_sam_slider_px_width / sm_sam_img_px_width)

        # Scale factor: px -> 'height' units within the image width
        sm_sam_scale_factor = sm_sam_comp_img_size_width / sm_sam_img_px_width

        sm_sam_pictogram_w  = sm_sam_pictogram_px_width * sm_sam_scale_factor
        sm_sam_gap_w        = sm_sam_pictogram_gap_px_width * sm_sam_scale_factor

        # --- Compute 9 tick x-positions aligned to pictograms ---
        sm_sam_tick_positions = []
        sm_sam_tick_x = -sm_sam_comp_img_size_width / 2 + sm_sam_pictogram_w / 2

        for i in range(9):
            sm_sam_tick_positions.append(sm_sam_tick_x)
            if i % 2 == 0:
                sm_sam_tick_x += sm_sam_pictogram_w / 2 + sm_sam_gap_w / 2
            else:
                sm_sam_tick_x += sm_sam_gap_w / 2 + sm_sam_pictogram_w / 2

        # Label Min/Max layout
        sm_sam_comp_label_pos_y = sm_sam_comp_slider_pos_y - 0.15
    CodeComponent code_iasp_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_iasp_setup
        # Computes on-screen size for IASP images based on the window's
        # aspect ratio. Preserves the original 4:3 image ratio and scales
        # to the largest size that fits without distortion.
        #
        # Used by iaspView to size the image consistently across monitors.
        # ------------------------------------------------------------

        # Image aspect ratio (width / height)
        iasp_img_aspect = 1024 / 768  # = 1.3333

        # If the window is wider than the image, height is the limiting factor
        if aspect >= iasp_img_aspect:
            # Height fills the screen (minus a small margin if you want)
            iasp_comp_img_size_height = 1.0
            iasp_comp_img_size_width = iasp_comp_img_size_height * aspect
        else:
            # Width fills the screen
            iasp_comp_img_size_width = aspect
            iasp_comp_img_size_height = iasp_comp_img_size_width / aspect

        # If you want a little breathing room around the image:
        #iasp_margin = 0.05  # 5% margin
        #iasp_comp_img_height *= (1 - iasp_margin)
        #iasp_comp_img_width  *= (1 - iasp_margin)
    CodeComponent code_iasp_block_randomizer
      Code Type = Py
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      Before Experiment:
        # ------------------------------------------------------------
        # code_iasp_block_randomizer
        #
        # Generates all trial CSV files used by the experiment:
        #   - emotion_regulation_unpleasant_trials.csv
        #   - emotion_regulation_neutral_trials.csv
        #   - emotion_regulation_practice_trials.csv
        #
        # Performs the following:
        #   • Checks for missing or extra IASP images
        #   • Randomizes technique assignment to blocks
        #   • Randomizes block order
        #   • Randomizes photo order within each block
        #   • Inserts placeholder images if needed
        #
        # This code runs once before the experiment begins and writes
        # fully randomized trial files that the main loops will read.
        #
        # IMPORTANT:
        #   This component does NOT slice or select trials during the
        #   experiment. It only creates the CSVs.
        # ------------------------------------------------------------

        import random
        import csv
        import os

        placeholder_filename = 'IASP/placeholder.jpg'

        # Fallback: if placeholder image is absent, use empty string to avoid PsychoPy crash
        if not os.path.exists(placeholder_filename):
            print("Warning: placeholder image not found; using empty string to avoid crash.")
            placeholder_filename = ''

        # Techniques and blocks
        techniques = ['View', 'Suppress', 'Reappraise', 'Suppress and Reappraise']
        block_ids = ['block1', 'block2', 'block3', 'block4']

        # Photo sets per block
        photo_sets = {
            'block1': [1019, 1040, 1070, 1110, 1201, 1321, 2130, 2691, 2700, 2751, 2811, 3016, 3215, 3301, 5920, 6010, 6242, 6311, 6370, 6800, 6940, 8485, 9041, 9180, 9230, 9300, 9340, 9404, 9410, 9419, 9425, 9430, 9471, 9561, 9584, 9611, 9635, 9900, 9910, 9920],
            'block2': [1022, 1050, 1080, 1111, 1274, 1302, 2120, 2683, 2695, 2705, 2800, 3005, 3181, 3300, 4621, 5973, 6241, 6260, 6315, 6571, 6840, 8480, 9040, 9140, 9220, 9270, 9330, 9373, 9411, 9420, 9426, 9440, 9480, 9570, 9592, 9620, 9700, 9901, 9911, 9921],
            'block3': [1026, 1051, 1090, 1114, 1275, 1301, 2095, 2220, 2694, 2704, 2799, 3001, 3110, 3230, 3530, 5971, 6212, 6250, 6313, 6560, 6383, 8231, 9001, 9120, 9210, 9254, 9320, 9342, 9409, 9417, 9423, 9429, 9470, 9520, 9582, 9600, 9630, 9830, 9903, 9913],
            'block4': [1030, 1052, 1101, 1200, 1300, 1932, 2205, 2692, 2703, 2795, 2900, 3030, 3225, 3500, 5950, 6200, 6243, 6312, 6550, 6821, 8230, 9000, 9050, 9181, 9250, 9301, 9341, 9405, 9415, 9421, 9427, 9452, 9490, 9571, 9594, 9622, 9810, 9902, 9912, 9925],
        }

        block_neutral = [2272, 2383, 2393, 2396, 2397, 2435, 2480, 2514, 2518, 2575, 2580, 2593, 2594, 2870, 2880, 2980, 5395, 5455, 5471, 5520, 5740, 7002, 7004, 7036, 7037, 7041, 7130, 7140, 7205, 7217, 7491, 7493, 7495, 7496, 7504, 7546, 7550, 7640, 7705, 8221]
        block_practice = [1205, 3103, 3180, 3213, 3220, 3280, 5970, 6190]

        all_sets = list(photo_sets.values()) + [block_neutral, block_practice]

        # Check to see if any photos are missing
        def check_missing_photos(photo_id: str) -> bool:
            return not os.path.exists(f"IASP/{photo_id}.jpg")

        missing_list = [
            photo_id
            for block in all_sets
            for photo_id in block
            if check_missing_photos(photo_id)
        ]

        missing_set = set(missing_list)

        if missing_list:
            print(f"Missing stimuli: {len(missing_set)}")
            print("Names:", sorted(missing_set))
        else:
            print("All IASP files found.")

        # ----------------------------------------------------------
        # Check for extra files in IASP/ that are not referenced in any block
        def _collect_image_ids(folder: str) -> set[int]:
            ids = set()
            try:
                for name in os.listdir(folder):
                    lower = name.lower()
                    if lower.endswith(('.jpg', '.jpeg')):
                        stem, _ = os.path.splitext(name)
                        if stem.lower() == 'placeholder':
                            continue
                        if stem.isdigit():
                            ids.add(int(stem))
            except FileNotFoundError:
                pass
            return ids

        iasp_folder = 'IASP'
        available_ids = _collect_image_ids(iasp_folder)
        expected_ids = {pid for block in all_sets for pid in block}
        extra_ids = sorted(available_ids - expected_ids)

        if not os.path.isdir(iasp_folder):
            print("IASP folder not found; skipping extra-file check.")
        elif extra_ids:
            print(f"Extra stimuli in IASP not used: {len(extra_ids)}")
            print("Names:", extra_ids)
        else:
            print("No extra stimuli in IASP source folder.")

        # ----------------------------------------------------------
        # Create negative blocks trials file
        # Randomly assign techniques to blocks
        negative_file_name = 'emotion_regulation_unpleasant_trials.csv'

        random.shuffle(techniques)
        block_to_technique = dict(zip(block_ids, techniques))
        negative_trials_technique_order = [] # Referenced in reset routine

        # Randomize block order
        block_order = block_ids.copy()
        random.shuffle(block_order)

        # Build trial list
        negative_trials = []
        negative_trial_number = 1

        for block in block_order:
            technique = block_to_technique[block]
            negative_trials_technique_order.append(technique)
            photos = photo_sets[block].copy()
            random.shuffle(photos)

            for photo_id in photos:
                if photo_id in missing_set:
                    photo_path = placeholder_filename
                else:
                    photo_path = f"IASP/{photo_id}.jpg"

                negative_trials.append({
                    'trial_number': negative_trial_number,
                    'block_id': block,
                    'technique': technique,
                    'photo_filename': photo_path
                })
                negative_trial_number += 1

        # Save to CSV
        with open(negative_file_name, 'w', newline='') as f:
            writer = csv.DictWriter(f, fieldnames=negative_trials[0].keys())
            writer.writeheader()
            writer.writerows(negative_trials)

        print(f"Saved randomized trial file: {negative_file_name}")

        # ----------------------------------------------------------
        # Create block_neutral trials file
        neutral_file_name = 'emotion_regulation_neutral_trials.csv'
        neutral_trials = []
        neutral_trial_number = 1

        # Randomize photo order
        neutral_photos = block_neutral.copy()
        random.shuffle(neutral_photos)

        for photo_id in neutral_photos:
            if photo_id in missing_set:
                photo_path = placeholder_filename
            else:
                photo_path = f"IASP/{photo_id}.jpg"

            neutral_trials.append({
                'trial_number': neutral_trial_number,
                'block_id': 'block_neutral',
                'technique': 'View',
                'photo_filename': photo_path
            })
            neutral_trial_number += 1

        # Save block_neutral to CSV
        with open(neutral_file_name, 'w', newline='') as f:
            writer = csv.DictWriter(f, fieldnames=neutral_trials[0].keys())
            writer.writeheader()
            writer.writerows(neutral_trials)

        print(f"Saved randomized trial file: {neutral_file_name}")

        # ----------------------------------------------------------
        # Create block_practice trials file
        practice_file_name = 'emotion_regulation_practice_trials.csv'
        practice_trials = []
        practice_trial_number = 1

        # Randomize photo order
        practice_photos = block_practice.copy()
        random.shuffle(practice_photos)

        for photo_id in practice_photos:
            if photo_id in missing_set:
                photo_path = placeholder_filename
            else:
                photo_path = f"IASP/{photo_id}.jpg"

            practice_trials.append({
                'trial_number': practice_trial_number,
                'block_id': 'block_practice',
                'technique': 'View',
                'photo_filename': photo_path
            })
            practice_trial_number += 1

        # Save block_practice to CSV
        with open(practice_file_name, 'w', newline='') as f:
            writer = csv.DictWriter(f, fieldnames=practice_trials[0].keys())
            writer.writeheader()
            writer.writerows(practice_trials)

        print(f"Saved randomized trial file: {practice_file_name}")
      Begin Experiment:
        # Initialize slice indices
        start = 0
        end = 40

        # Store for logging
        thisExp.addData('block_order', block_order)
        thisExp.addData('block_to_technique', block_to_technique)
  Routine welcome
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    TextComponent t_welcome_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Message
      units = height
      wrapWidth = comp_wrap_width_body
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    TextComponent t_welcome_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to continue
      units = height
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine stateMeasure
    RoutineSettingsComponent stateMeasure
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      desc:
        This routine presents a rating scale that adapts based on parameters supplied by the surrounding loop.
        To use it, place stateMeasure inside a loop whose conditions file includes the following columns:
        - rating_type
        - rating_category
        - rating_message
        - rating_min_label
        - rating_max_label
        - picture_path (SAM only; expects a 1168×231 image)
        - tick_values
        - granularity
        - style
        The routine reads these values on each iteration and configures the slider dynamically.
        The experiment must include the code_state_measure_setup component, which handles global setup and shared logic.
    CodeComponent code_sm_helper
      Code Type = Py
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      Begin Routine:
        allowContinue = False

        # Parse tick values from the condition file
        print(f"ROW: {rating_category}, {rating_type}")
        tick_values_parsed = parse_tick_values(tick_values)
        print(tick_values_parsed)

        # Compute geometry based on rating type
        sm_geometry = sm_compute_tick_positions(tick_values_parsed, rating_type)

        sm_comp_slider_size = sm_geometry["slider_size"]
        sm_comp_slider_pos  = sm_geometry["slider_pos"]
        sm_comp_label_min_pos = sm_geometry["label_min_pos"]
        sm_comp_label_max_pos = sm_geometry["label_max_pos"]

        t_sm_label_min = visual.TextStim(
            win=win,
            text=rating_min_label,
            pos=(sm_comp_label_min_pos[0], sm_comp_label_min_pos[1]),
            wrapWidth=aspect20,
            anchorVert='top',
            height=0.05,
            color='white',
            font='Noto Sans'
        )

        t_sm_label_max = visual.TextStim(
            win=win,
            text=rating_max_label,
            pos=(sm_comp_label_max_pos[0], sm_comp_label_max_pos[1]),
            wrapWidth=aspect20,
            anchorVert='top',
            height=0.05,
            color='white',
            font='Noto Sans'
        )

        #t_label_min.setPos(sm_comp_label_min_pos)
        #t_label_max.setPos(sm_comp_label_max_pos)

        # --- Create a fresh slider for this trial ---
        sm_slider = visual.Slider(
            win=win,
            ticks=tick_values_parsed,
            labels=tick_values_parsed,
            granularity=granularity,
            style=style.lower(),
            pos=sm_comp_slider_pos,
            size=sm_comp_slider_size,
            labelHeight=0.05,
            colorSpace='rgb',
            markerColor='Red',
            lineColor='White',
            labelColor='LightGray',
            font='Noto Sans'
        )

        # --- SAM image logic ---
        if rating_type == 'SAM':
            image_SAM.setImage(picture_path)
            image_SAM.setAutoDraw(True)
        else:
            image_SAM.setAutoDraw(False)
      Each Frame:
        # Draw state measure components
        sm_slider.draw()
        t_sm_label_min.draw()
        t_sm_label_max.draw()

        # If rated, allow spacebar to end the routine
        if sm_slider.getRating() is not None:
            allowContinue = True
      End Routine:
        #thisExp.addData('rating', sm_slider.getRating())
        currentLoop.addData('rating', sm_slider.getRating())
        currentLoop.addData('rating_rt', sm_slider.getRT())

        try:
            print(f"{rating_category}: {sm_slider.getRating()}")
        except:
            print("Error printing rating")
    SliderComponent slider_generic
      disabled = True
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10
      letterHeight = 0.05
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (slider_gen_width, 0.1)
      startVal [condition] = $rating_type == 'Generic'
      stopVal [condition] = $rating_type != 'Generic'
      styles = rating
      ticks = 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10
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    SliderComponent slider_SAM
      disabled = True
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 1, 2, 3, 4, 5, 6, 7, 8, 9
      letterHeight = 0.05
      pos [set every repeat] = (0, sm_sam_comp_slider_pos_y)
      size [set every repeat] = (sm_sam_comp_slider_width, sm_sam_comp_slider_size_height)
      startVal [condition] = $rating_type == 'SAM'
      stopVal [condition] = $rating_type != 'SAM'
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ImageComponent image_SAM
      image [set every repeat] = $picture_path
      pos [set every repeat] = (0, sm_sam_comp_img_pos_y)
      saveStartStop = False
      size [set every repeat] = (sm_sam_comp_img_size_width, sm_sam_comp_img_size_height)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent t_sm_message
      letterHeight = 0.07
      pos = (0, .35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = comp_wrap_width_header
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    TextComponent t_sm_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_sm
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $allowContinue == True
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  Routine instructionNeutral
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    TextComponent t_neutral_instruction
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = comp_wrap_width_body
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      text [set every repeat]:
        First, you will just view neutral pictures.

        Look at the picture naturally without trying to change your thoughts or feelings. Avoid thinking about unrelated topics.
    TextComponent t_neutral_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_neutral
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructionUnpleasant
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    TextComponent t_unpleasant_instruction
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = comp_wrap_width_body
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      text [set every repeat]:
        Next, you will begin the main set of unpleasant picture trials.

        If at any point you would like to stop, please let the experimenter know.
    TextComponent t_unpleasant_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Otherwise, press the SPACEBAR to begin the emotion regulation tasks
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_unpleasant
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine reset
    RoutineSettingsComponent reset
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      desc:
        Prepares participants for the upcoming block by displaying emotion regulation instructions and advancing the trial slice.
        This routine:
        - Shows task instructions before each block
        - Uses code_slicer_helper to select the next 40-trial slice
        - Can be extended to display block-specific strategy guidance
        If dynamic instructions are enabled, the routine can show tailored guidance based on the current emotion regulation strategy (e.g., Suppress, Reappraise).
        To support this, the current technique must be accessible from the loop or stored globally during block setup.
    CodeComponent code_slicer_helper
      Code Type = Py
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      Begin Experiment:
        reset_routine_counter = 0
        just_view_text = "Just View\n\nSimply look at the picture as it appears.\nDo not try to change your feelings or reactions.\nLet your natural response happen and just observe."
        suppress_text = "Suppress Emotion\n\nTry not to feel the unpleasant emotions the picture might bring up.\nYou can push the feelings down, ignore them, or keep a neutral expression.\nFocus on staying calm and steady."
        reappraise_text = "Reappraise\n\nChange the way you think about the picture so it feels less unpleasant.\nYou might imagine the situation has a neutral or positive outcome, that it is staged or not real, or that the people are safe afterward."
        suppress_and_reappraise_text = "Suppress and Reappraise\n\nUse both strategies at the same time.\nFirst reinterpret the picture to make it feel less unpleasant.\nAt the same time, try not to show or feel the unpleasant emotion."
      Begin Routine:
        # ------------------------------------------------------------
        # code_slicer_helper
        #
        # Selects the current 40 trial slice from the pre-randomized
        # CSV file. The surrounding loop uses this slice to determine
        # which trials to run for the current block.
        #
        # Begin Routine:
        #   • Builds a "start:end" slice string (e.g., "0:40")
        #   • Logs the slice to the data file for analysis
        #
        # End Routine:
        #   • Advances start/end by 40 to move to the next block
        #
        # This component does NOT randomize trials. It only selects
        # which portion of the CSV to use on each loop iteration.
        # ------------------------------------------------------------

        # Define slice for current block
        row_section = f"{start}:{end}"
        print(row_section)

        # Log which slice was used
        #currentLoop.addData('row_section', row_section)

        # Change current emotion regulation strategy text
        current_technique = negative_trials_technique_order[reset_routine_counter]
        t_reset_instruction_text = ""

        if current_technique == "View":
            t_reset_instruction_text = just_view_text
        elif current_technique == "Suppress":
            t_reset_instruction_text = suppress_text
        elif current_technique == "Reappraise":
            t_reset_instruction_text = reappraise_text
        elif current_technique == "Suppress and Reappraise":
            t_reset_instruction_text = suppress_and_reappraise_text
        else:
            t_reset_instruction_text = "Unknown technique. Please contact the experimenter."
      End Routine:
        # Advance slice for next block
        start += 40
        end += 40

        if reset_routine_counter < len(negative_trials_technique_order):
            reset_routine_counter += 1
    TextComponent t_reset_instruction
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $t_reset_instruction_text
      wrapWidth = comp_wrap_width_body
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    TextComponent t_reset_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_reset
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine emotionRegulationCue
    RoutineSettingsComponent emotionRegulationCue
      color = -1.0000, -1.0000, -1.0000
      useWindowParams = True
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      desc:
        This routine presents the regulation cue for the current trial.
        It must be paired with iaspView inside the same loop.
        The loop’s conditions file must include the following columns:
        - trial_number
        - block_id
        - technique (required by this routine)
        - photo_filename
        The routine displays a fixation cross, followed by the regulation cue text, and then a variable blank delay.
        The delay duration is randomized between 0.5–1.5 seconds using the code_delay_calculator component.

        This routine does not handle trial order randomization; it only reads values supplied by the loop.
    CodeComponent code_delay_calculator
      Code Type = Py
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      Begin Routine:
        # Gives a random float between 0.5 and 1.5 seconds (i.e., 500–1500 ms)
        # Used for t_blank_delayer
        delay_time = random.uniform(0.5, 1.5)
        currentLoop.addData('delay_time', delay_time)
    PolygonComponent cross_fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = height
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    TextComponent t_emotion_regulation_cue
      letterHeight = 0.14
      pos = (0.0, 0.05)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1
      text [set every repeat] = $technique
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    TextComponent t_blank_delayer
      letterHeight = 0.07
      pos = (0.0, 0.05)
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = $delay_time
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  Routine iaspView
    RoutineSettingsComponent iaspView
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 5
      useWindowParams = True
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      desc:
        This routine presents the IASP image for the current trial and (optionally) sends the corresponding trigger.
        It must be paired with emotionRegulationCue inside the same loop.
        The loop’s conditions file must include the following columns:
        - trial_number
        - block_id
        - technique
        - photo_filename (required by this routine)
        The routine displays the trial’s image for a fixed duration and uses the p_port_iasp component to send a trigger aligned to image onset and offset (if available).
        Trigger behavior depends on the parallel‑port setup.

        This routine does not perform any randomization; it simply uses the values provided by the loop.
    KeyboardComponent key_resp_iasp_debug
      allowedKeys = 'right'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_iasp
      image [set every repeat] = $photo_filename
      size [set every repeat] = [iasp_comp_img_size_width, iasp_comp_img_size_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = height
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    ParallelOutComponent p_port_iasp
      address = 0x0378
      durationEstim = 4
      register = EIO
      startData = 1
      startEstim = 0
      startVal [condition] = $image_IASP.status == STARTED
      stopData = 0
      stopVal [condition] = $image_iasp.status == STOPPED
      syncScreen = True
      syncScreenRefresh = True
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  Routine goodbye
    RoutineSettingsComponent goodbye
      stopVal [duration (s)] = 4
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    TextComponent t_goodbye
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = You have completed the trial. Thank you!
      wrapWidth = comp_wrap_width_body
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  Routine instructionPractice
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    TextComponent t_practice_instruction
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = comp_wrap_width_body
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      text [set every repeat]:
        Next, you will see examples of unpleasant pictures.

        Look at the picture naturally without trying to change your thoughts or feelings. Avoid thinking about unrelated topics.
    TextComponent t_practice_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_practice
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine experimentSetup
  LoopInitiator intro_prompts loopType="TrialHandler"
    conditionsFile = loopEmotionRegulationIntro.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Message', 'Emotion Regulation\nPicture Viewing Task\n-Neutral or Unpleasant-')]),
      OrderedDict([('Message', 'You will see series of pictures that represent a lot of different events that occur in life.')]),
      OrderedDict([('Message', 'Pictures will show unpleasant events. We will do a neutral and practice trial before the actual run. Please let the experimenter know if you want to stop.')])]
    Routine welcome
  LoopTerminator intro_prompts
  LoopInitiator state_measure_pretrial loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Fatigue'), ('rating_message', 'Rate your current fatigue level'), ('rating_min_label', 'No fatigue at all'), ('rating_max_label', 'As bad as you can imagine'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
      OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Sleepiness'), ('rating_message', 'Rate your current sleepiness level'), ('rating_min_label', 'Not at all sleepy'), ('rating_max_label', 'As bad as you can imagine'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
      OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Pain'), ('rating_message', 'Rate your current pain level'), ('rating_min_label', 'No pain'), ('rating_max_label', 'Worst possible pain'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
      OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Pain Unpleasantness'), ('rating_message', 'Rate your current pain unpleasantness level'), ('rating_min_label', 'Not at all unpleasant pain'), ('rating_max_label', 'Worst possible unpleasant pain'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')])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
    Routine stateMeasure
  LoopTerminator state_measure_pretrial
  Routine instructionNeutral
  LoopInitiator iasp_neutral_trials loopType="TrialHandler"
    conditionsFile = emotion_regulation_neutral_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_number', np.int64(1)), ('block_id', 'block_neutral'), ('technique', 'view'), ('photo_filename', 'IASP/7496.jpg')]),
      OrderedDict([('trial_number', np.int64(2)), ('block_id', 'block_neutral'), ('technique', 'view'), ('photo_filename', 'IASP/2396.jpg')]),
      OrderedDict([('trial_number', np.int64(3)), ('block_id', 'block_neutral'), ('technique', 'view'), ('photo_filename', 'IASP/7002.jpg')]),
      OrderedDict([('trial_number', np.int64(4)), ('block_id', 'block_neutral'), ('technique', 'view'), ('photo_filename', 'IASP/2580.jpg')]),
      OrderedDict([('trial_number', np.int64(5)), ('block_id', 'block_neutral'), ('technique', 'view'), ('photo_filename', 'IASP/5395.jpg')]),
      OrderedDict([('trial_number', np.int64(6)), ('block_id', 'block_neutral'), ('technique', 'view'), ('photo_filename', 'IASP/5740.jpg')]),
      OrderedDict([('trial_number', np.int64(7)), ('block_id', 'block_neutral'), ('technique', 'view'), ('photo_filename', 'IASP/2980.jpg')]),
      OrderedDict([('trial_number', np.int64(8)), ('block_id', 'block_neutral'), ('technique', 'view'), ('photo_filename', 'IASP/2514.jpg')]),
      OrderedDict([('trial_number', np.int64(9)), ('block_id', 'block_neutral'), ('technique', 'view'), ('photo_filename', 'IASP/7205.jpg')]),
      OrderedDict([('trial_number', np.int64(10)), ('block_id', 'block_neutral'), ('technique', 'view'), ('photo_filename', 'IASP/2575.jpg')]),
      OrderedDict([('trial_number', np.int64(11)), ('block_id', 'block_neutral'), ('technique', 'view'), ('photo_filename', 'IASP/5455.jpg')])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
    Routine emotionRegulationCue
    Routine iaspView
  LoopTerminator iasp_neutral_trials
  LoopInitiator state_measure_neutral loopType="TrialHandler"
    Selected rows = [7, 2, 3, 4, 5, 6]
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Fatigue'), ('rating_message', 'Rate your current fatigue level'), ('rating_min_label', 'No fatigue at all'), ('rating_max_label', 'As bad as you can imagine'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
      OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Sleepiness'), ('rating_message', 'Rate your current sleepiness level'), ('rating_min_label', 'Not at all sleepy'), ('rating_max_label', 'As bad as you can imagine'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
      OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Pain'), ('rating_message', 'Rate your current pain level'), ('rating_min_label', 'No pain'), ('rating_max_label', 'Worst possible pain'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
      OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Pain Unpleasantness'), ('rating_message', 'Rate your current pain unpleasantness level'), ('rating_min_label', 'Not at all unpleasant pain'), ('rating_max_label', 'Worst possible unpleasant pain'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')])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
    Routine stateMeasure
  LoopTerminator state_measure_neutral
  Routine instructionPractice
  LoopInitiator iasp_practice_trials loopType="TrialHandler"
    conditionsFile = emotion_regulation_practice_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_number', np.int64(1)), ('block_id', 'block_practice'), ('technique', 'view'), ('photo_filename', 'IASP/3180.jpg')]),
      OrderedDict([('trial_number', np.int64(2)), ('block_id', 'block_practice'), ('technique', 'view'), ('photo_filename', 'IASP/3220.jpg')]),
      OrderedDict([('trial_number', np.int64(3)), ('block_id', 'block_practice'), ('technique', 'view'), ('photo_filename', 'IASP/3103.jpg')]),
      OrderedDict([('trial_number', np.int64(4)), ('block_id', 'block_practice'), ('technique', 'view'), ('photo_filename', 'IASP/3280.jpg')]),
      OrderedDict([('trial_number', np.int64(5)), ('block_id', 'block_practice'), ('technique', 'view'), ('photo_filename', 'IASP/3213.jpg')]),
      OrderedDict([('trial_number', np.int64(6)), ('block_id', 'block_practice'), ('technique', 'view'), ('photo_filename', 'IASP/6190.jpg')]),
      OrderedDict([('trial_number', np.int64(7)), ('block_id', 'block_practice'), ('technique', 'view'), ('photo_filename', 'IASP/5970.jpg')]),
      OrderedDict([('trial_number', np.int64(8)), ('block_id', 'block_practice'), ('technique', 'view'), ('photo_filename', 'IASP/1205.jpg')])]
    Routine emotionRegulationCue
    Routine iaspView
  LoopTerminator iasp_practice_trials
  LoopInitiator state_measure_practice loopType="TrialHandler"
    Selected rows = [7, 2, 3, 4, 5, 6]
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine stateMeasure
  LoopTerminator state_measure_practice
  Routine instructionUnpleasant
  LoopInitiator block_loop loopType="TrialHandler"
    conditionsFile = current_slice.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('current_slice', np.int64(1))]),
      OrderedDict([('current_slice', np.int64(2))]),
      OrderedDict([('current_slice', np.int64(3))]),
      OrderedDict([('current_slice', np.int64(4))])]
    Routine reset
    LoopInitiator iasp_unpleasant_trials loopType="TrialHandler"
      Selected rows = $row_section
      conditionsFile = emotion_regulation_unpleasant_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('trial_number', np.int64(1)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9181.jpg')]),
        OrderedDict([('trial_number', np.int64(2)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/6821.jpg')]),
        OrderedDict([('trial_number', np.int64(3)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/2703.jpg')]),
        OrderedDict([('trial_number', np.int64(4)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/2692.jpg')]),
        OrderedDict([('trial_number', np.int64(5)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9050.jpg')]),
        OrderedDict([('trial_number', np.int64(6)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/3225.jpg')]),
        OrderedDict([('trial_number', np.int64(7)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9405.jpg')]),
        OrderedDict([('trial_number', np.int64(8)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9341.jpg')]),
        OrderedDict([('trial_number', np.int64(9)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9912.jpg')]),
        OrderedDict([('trial_number', np.int64(10)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9301.jpg')]),
        OrderedDict([('trial_number', np.int64(11)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/1300.jpg')])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
      Routine emotionRegulationCue
      Routine iaspView
    LoopTerminator iasp_unpleasant_trials
    LoopInitiator state_measure_unpleasant loopType="TrialHandler"
      Selected rows = [7, 2, 3, 4, 5, 6]
      conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine stateMeasure
    LoopTerminator state_measure_unpleasant
  LoopTerminator block_loop
  Routine goodbye
