PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $(-0.5000, -0.5000, -0.5000)
  expName = phoda
  expVersion = 0.3
  keyboardBackend = ioHub
  logging level = debug
  runMode = 0
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Routines
  Routine experimentSetup
    RoutineSettingsComponent experimentSetup
      saveStartStop = False
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      desc:
        This routine contains all Before Experiment and Begin Experiment code components used across the entire study.
        It centralizes global variables, screen geometry, scaling logic, and shared helper functions so that all other routines operate within a consistent coordinate system and configuration.

        Because these variables are referenced throughout the experiment, changes should be made cautiously and with awareness of downstream effects.
        This routine must appear before any trial‑based routines in the experiment flow.
    CodeComponent code_experiment_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_experiment_setup
        # Global screen geometry and shared layout variables.
        #
        # Computes window aspect ratio and establishes a unified
        # coordinate system in 'height' units so all routines scale
        # consistently across monitors.
        #
        # Also defines shared wrap-width values for text components.
        # Also includes imports for later components
        # ------------------------------------------------------------

        import random # for t_blank_delayer

        # ============================================================
        # =============== GLOBAL SCREEN GEOMETRY =====================
        # ============================================================
        # Centralized screen geometry so all routines share the same coordinate system

        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5

        # Wrap width as a percentage of screen width
        aspect80 = aspect * 0.80 # 80% of screen width
        aspect20 = aspect * 0.20  # 20% of screen width
        comp_wrap_width_body = aspect80
        comp_wrap_width_header = aspect80
        comp_wrap_width_continue = aspect80
    CodeComponent code_state_measure_setup
      Code Type = Py
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      Begin Experiment:
        # ------------------------------------------------------------
        # code_state_measure_setup
        # Global setup logic for the stateMeasure routine.
        #
        # Handles scaling rules, slider configuration helpers, and
        # shared variables needed to dynamically construct rating
        # scales based on loop parameters.
        #
        # The stateMeasure routine depends on this setup code to
        # size components correctly and interpret SAM/text settings.
        # ------------------------------------------------------------

        # --- Helper functions for dynamic slider configuration ---
        def parse_tick_values(raw):
            # If PsychoPy already parsed it into a list, just return it
            if isinstance(raw, list):
                return raw
            # Otherwise assume it's a comma-separated string
            return [int(x.strip()) for x in raw.split(',')]

        # ===============================================================
        # ============== STATE-MEASURE SPECIFIC GEOMETRY ================
        # ===============================================================

        def sm_compute_tick_positions(tick_values, rating_type):
            """
            Compute slider size, slider position, and min/max label positions
            for both SAM and Generic rating types.
            """

            if rating_type == "SAM":
                # SAM uses the precomputed geometry
                slider_size = (sm_sam_comp_slider_width, sm_sam_comp_slider_size_height)
                slider_pos  = (0, sm_sam_comp_slider_pos_y)

                # Tick positions already computed globally
                tick_positions = sm_sam_tick_positions

                label_min_pos = (tick_positions[0],  sm_sam_comp_label_pos_y)
                label_max_pos = (tick_positions[-1], sm_sam_comp_label_pos_y)

            else:
                # Generic slider: evenly spaced ticks across the slider width
                slider_size = (sm_gen_comp_slider_size_width, sm_gen_comp_slider_size_height)
                slider_pos  = (0, sm_gen_comp_slider_pos_y)

                # Compute generic tick positions dynamically
                num_ticks = len(tick_values)
                half_width = sm_gen_comp_slider_size_width / 2

                # Even spacing across the width
                tick_positions = [
                    -half_width + (i / (num_ticks - 1)) * sm_gen_comp_slider_size_width
                    for i in range(num_ticks)
                ]

                # Labels sit below the slider
                label_min_pos = (tick_positions[0],  sm_gen_comp_label_pos_y)
                label_max_pos = (tick_positions[-1], sm_gen_comp_label_pos_y)

            return {
                "slider_size": slider_size,
                "slider_pos": slider_pos,
                "tick_positions": tick_positions,
                "label_min_pos": label_min_pos,
                "label_max_pos": label_max_pos
            }

        # ===============================================================
        # =================== GEN SPECIFIC GEOMETRY =====================
        # ===============================================================

        # --- Generic Slider Scaling ---
        # Full-width slider across screen
        # Generic slider (used when rating_type != "SAM")

        # Slider layout (height units)
        sm_gen_comp_slider_size_width  = aspect * 0.6  # 60% of screen width
        sm_gen_comp_slider_size_height = 0.1           # slider thickness/height
        sm_gen_comp_slider_pos_y       = 0             # vertical position of the slider center

        # Label Min/Max layout
        sm_gen_comp_label_pos_y = sm_gen_comp_slider_pos_y - 0.2

        # ===============================================================
        # =================== SAM SPECIFIC GEOMETRY =====================
        # ===============================================================

        # --- SAM image geometry (pixels) ---
        sm_sam_img_px_width  = 1168
        sm_sam_img_px_height = 231
        sm_sam_img_aspect    = sm_sam_img_px_width / sm_sam_img_px_height  # ≈ 5.056

        # Pictogram/gap geometry (pixels)
        # Note: there are 5 pictograms and 4 gaps spanning the full image width
        sm_sam_pictogram_px_width     = 215
        sm_sam_pictogram_gap_px_width = 23

        # --- Layout decisions (height units) ---
        sm_sam_comp_img_size_height = 0.25                                             # 25% of screen height
        sm_sam_comp_img_size_width  = sm_sam_comp_img_size_height * sm_sam_img_aspect  # scaled width based on aspect
        sm_sam_comp_img_pos_y       = 0.1                                              # vertical position of the image

        # Message Layout
        sm_sam_comp_message_pos_y = sm_sam_comp_img_pos_y + 0.2

        # Slider layout (height units)
        sm_sam_comp_slider_pos_y       = -0.09      # vertical position of the slider center
        sm_sam_comp_slider_size_height = 0.06       # slider thickness/height
        sm_sam_slider_px_width    = sm_sam_img_px_width - 215
        sm_sam_comp_slider_width  = sm_sam_comp_img_size_width * (sm_sam_slider_px_width / sm_sam_img_px_width)

        # Scale factor: px -> 'height' units within the image width
        sm_sam_scale_factor = sm_sam_comp_img_size_width / sm_sam_img_px_width

        sm_sam_pictogram_w  = sm_sam_pictogram_px_width * sm_sam_scale_factor
        sm_sam_gap_w        = sm_sam_pictogram_gap_px_width * sm_sam_scale_factor

        # --- Compute 9 tick x-positions aligned to pictograms ---
        sm_sam_tick_positions = []
        sm_sam_tick_x = -sm_sam_comp_img_size_width / 2 + sm_sam_pictogram_w / 2

        for i in range(9):
            sm_sam_tick_positions.append(sm_sam_tick_x)
            if i % 2 == 0:
                sm_sam_tick_x += sm_sam_pictogram_w / 2 + sm_sam_gap_w / 2
            else:
                sm_sam_tick_x += sm_sam_gap_w / 2 + sm_sam_pictogram_w / 2

        # Label Min/Max layout
        sm_sam_comp_label_pos_y = sm_sam_comp_slider_pos_y - 0.15
    CodeComponent code_open_closed_setup
      Code Type = Py
      Begin Experiment:
        # ------------------------------------------------------------
        # code_open_closed_setup
        # Define the instruction text for each eye-state condition.
        # ------------------------------------------------------------
        # These strings are kept in-code (rather than in the CSV) so the
        # condition file only needs to specify the Category. This keeps
        # the output cleaner and prevents text duplication across files.
        open_eyes_text = "Look at the + mark and stay still for 5 minutes."
        closed_eyes_text = "Close your eyes and stay still for 5 minutes."

        # This variable will be updated on each loop iteration by the
        # instruction helper code. It provides the text shown in the
        # instruction routine.
        instruction_text = "Default message."
    CodeComponent code_phoda_slider_setup
      Code Type = Py
      Begin Experiment:
        # ============================================================
        # =================== CONFIGURATION ==========================
        # ============================================================

        # PHODA image settings
        PS_PHODA_IMG_PATH = ''
        PS_PHODA_IMG_PX_WIDTH = 283
        PS_PHODA_IMG_PX_HEIGHT = 425
        PS_PHODA_IMG_HEIGHT_RATIO = 0.62  # Percentage of screen height
        PS_PHODA_IMG_POS_Y = 0.13  # Vertical position (0 = center, positive = above center)

        # Slider settings
        PS_SLIDER_WIDTH_RATIO = 0.8  # Percentage of screen width
        PS_SLIDER_HEIGHT = 0.08
        PS_SLIDER_MARKER_WIDTH = 0.02
        PS_SLIDER_GRANULARITY = 0  # 0 for continuous (VAS), 1 for integers
        PS_SLIDER_TICKS = range(0, 101)

        # Spacing
        PS_IMAGE_SLIDER_GAP = 0.08  # Vertical space between image and slider
        PS_SLIDER_LABELS_GAP = 0.03  # Vertical space between slider and numeric labels

        # Label settings
        PS_LABEL_VALUES = [0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100]
        PS_LABEL_HEIGHT = 0.03
        PS_LABEL_FONT = 'Noto Sans'
        PS_LABEL_COLOR = 'white'

        # Endpoint labels
        PS_LABEL_LEFT_TEXT = 'Not at all\nharmful'
        PS_LABEL_RIGHT_TEXT = 'Extremely\nharmful'
        PS_LABEL_ENDPOINT_HEIGHT = 0.025
        PS_LABEL_ENDPOINT_OFFSET = 0.055 # subtracted from label y-pos

        # Rating display
        PS_RATING_TEXT_HEIGHT = 0.04
        PS_RATING_TEXT_DEFAULT = 'Click or drag the slider to rate'

        # Auto logging for all components
        PS_AUTO_LOG = False
        PS_AUTO_LOG_SLIDER = False

        # ============================================================
        # =================== HELPER FUNCTIONS =======================
        # ============================================================

        def calculate_phoda_geometry():
            """
            Calculate all geometry for PHODA image and slider layout.
            Returns a dictionary with all positioning and sizing values.
            """
            # Image geometry
            img_aspect = PS_PHODA_IMG_PX_WIDTH / PS_PHODA_IMG_PX_HEIGHT
            img_height = PS_PHODA_IMG_HEIGHT_RATIO
            img_width = img_height * img_aspect

            # Slider geometry
            slider_width = aspect * PS_SLIDER_WIDTH_RATIO
            slider_height = PS_SLIDER_HEIGHT

            # Vertical positioning
            img_pos_y = PS_PHODA_IMG_POS_Y  # Use the defined position for the image
            img_bottom = img_pos_y - img_height / 2
            slider_pos_y = img_bottom - PS_IMAGE_SLIDER_GAP
            label_pos_y = slider_pos_y - slider_height / 2 - PS_SLIDER_LABELS_GAP

            # Slider boundaries
            slider_left = -slider_width / 2
            slider_right = slider_width / 2

            return {
                'img_width': img_width,
                'img_height': img_height,
                'img_pos_y': img_pos_y,
                'slider_width': slider_width,
                'slider_height': slider_height,
                'slider_pos_y': slider_pos_y,
                'slider_left': slider_left,
                'slider_right': slider_right,
                'label_pos_y': label_pos_y
            }

        def create_custom_slider(geom):
            """
            Create and customize a PHODA slider with narrow marker.
            """
            slider = visual.Slider(
                win=win,
                size=(geom['slider_width'], geom['slider_height']),
                pos=(0, geom['slider_pos_y']),
                ticks=PS_SLIDER_TICKS,
                labels=None,
                granularity=PS_SLIDER_GRANULARITY,
                style='scrollbar',
                flip=False,
                name="ps_phoda_slider",
                autoLog=PS_AUTO_LOG_SLIDER

            )

            # Customize marker width
            slider.marker.size = (PS_SLIDER_MARKER_WIDTH, slider.marker.size[1])

            # Adjust line size (compensate for scrollbar's 20% extra width)
            slider.line.size = (geom['slider_width'] + PS_SLIDER_MARKER_WIDTH, slider.line.size[1])

            return slider

        def create_slider_labels(geom):
            """
            Create numeric labels positioned along the slider.
            """
            labels = []
            slider_left = geom['slider_left']
            slider_right = geom['slider_right']
            label_pos_y = geom['label_pos_y']

            for label_val in PS_LABEL_VALUES:
                label_ratio = label_val / 100
                x_pos = slider_left + (slider_right - slider_left) * label_ratio

                label_obj = visual.TextStim(
                    win=win,
                    text=str(label_val),
                    pos=(x_pos, label_pos_y),
                    height=PS_LABEL_HEIGHT,
                    anchorVert='top',
                    color=PS_LABEL_COLOR,
                    font=PS_LABEL_FONT,
                    name=f"ps_slider_label_{label_val}",
                    autoLog=PS_AUTO_LOG
                )
                labels.append(label_obj)

            return labels

        def create_endpoint_labels(geom):
            """
            Create left and right endpoint description labels.
            """
            label_left = visual.TextStim(
                win=win,
                text=PS_LABEL_LEFT_TEXT,
                pos=(geom['slider_left'], geom['label_pos_y'] - PS_LABEL_ENDPOINT_OFFSET),
                height=PS_LABEL_ENDPOINT_HEIGHT,
                anchorVert='top',
                color=PS_LABEL_COLOR,
                font=PS_LABEL_FONT,
                name="ps_label_left",
                autoLog=PS_AUTO_LOG
            )

            label_right = visual.TextStim(
                win=win,
                text=PS_LABEL_RIGHT_TEXT,
                pos=(geom['slider_right'], geom['label_pos_y'] - PS_LABEL_ENDPOINT_OFFSET),
                height=PS_LABEL_ENDPOINT_HEIGHT,
                anchorVert='top',
                color=PS_LABEL_COLOR,
                font=PS_LABEL_FONT,
                name="ps_label_right",
                autoLog=PS_AUTO_LOG
            )

            return label_left, label_right

        def run_phoda_trial():
            """
            Draw all PHODA components on the window.
            """
            ps_phoda_slider.draw()
            for label in ps_manual_labels:
                label.draw()
            ps_phoda_label_left.draw()
            ps_phoda_label_right.draw()

            # Update rating display in real-time
            if ps_phoda_slider.markerPos is not None:
                if PS_SLIDER_GRANULARITY == 0:
                    # Show float for VAS (continuous)
                    ps_phoda_rating_text.text = f'Current rating: {ps_phoda_slider.markerPos:.1f}'
                else:
                    # Show integer for discrete scale
                    ps_phoda_rating_text.text = f'Current rating: {int(ps_phoda_slider.markerPos)}'
            else:
                ps_phoda_rating_text.text = PS_RATING_TEXT_DEFAULT

            ps_phoda_rating_text.draw()

        def phoda_autodraw_on():
            """
            Turn on AutoDraw for all PHODA components on the window.
            """
            ps_phoda_slider.setAutoDraw(True)
            for label in ps_manual_labels:
                label.setAutoDraw(True)
            ps_phoda_label_left.setAutoDraw(True)
            ps_phoda_label_right.setAutoDraw(True)
            ps_phoda_rating_text.setAutoDraw(True)
            logging.exp("PHODA components: AutoDraw ON")

        def phoda_autodraw_off():
            """
            Turn off AutoDraw for all PHODA components on the window.
            """
            ps_phoda_slider.setAutoDraw(False)
            for label in ps_manual_labels:
                label.setAutoDraw(False)
            ps_phoda_label_left.setAutoDraw(False)
            ps_phoda_label_right.setAutoDraw(False)
            ps_phoda_rating_text.setAutoDraw(False)
            logging.exp("PHODA components: AutoDraw OFF")

        def update_phoda_rating_text(last_rating_value):
            """
            Update the PHODA rating display text if the slider value has changed.
            """
            current = ps_phoda_slider.markerPos

            # Only update when the value actually changes
            if current != last_rating_value:
                if current is None:
                    ps_phoda_rating_text.text = PS_RATING_TEXT_DEFAULT
                else:
                    if PS_SLIDER_GRANULARITY == 0:
                        ps_phoda_rating_text.text = f'Current rating: {current:.1f}'
                    else:
                        ps_phoda_rating_text.text = f'Current rating: {int(current)}'

                # Update the flag
                last_rating_value = current

            return last_rating_value

        # Calculate all geometry
        ps_geom = calculate_phoda_geometry()

        # ============================================================
        # =================== CREATE COMPONENTS ======================
        # ============================================================

        # PHODA image
        ps_phoda_comp_img_pos_y = ps_geom['img_pos_y']
        ps_phoda_comp_img_size = (ps_geom['img_width'], ps_geom['img_height'])

        # Custom slider
        ps_phoda_slider = create_custom_slider(ps_geom)

        # Slider labels
        ps_manual_labels = create_slider_labels(ps_geom)

        # Endpoint labels
        ps_phoda_label_left, ps_phoda_label_right = create_endpoint_labels(ps_geom)
        t_phoda_continue_pos_y = ps_geom['label_pos_y'] - PS_LABEL_ENDPOINT_OFFSET -0.02

        # Rating display text
        ps_phoda_rating_text = visual.TextStim(
            win=win,
            text=PS_RATING_TEXT_DEFAULT,
            pos=(0, ps_geom['slider_pos_y']),
            height=PS_RATING_TEXT_HEIGHT,
            bold=True,
            color=PS_LABEL_COLOR,
            font=PS_LABEL_FONT,
            name="ps_phoda_rating_text",
            autoLog=PS_AUTO_LOG
        )
  Routine welcome
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    TextComponent t_welcome_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Message
      units = height
      wrapWidth = comp_wrap_width_body
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    TextComponent t_welcome_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to continue
      units = height
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stateMeasure
    RoutineSettingsComponent stateMeasure
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      desc:
        This routine presents a rating scale that adapts based on parameters supplied by the surrounding loop.
        To use it, place stateMeasure inside a loop whose conditions file includes the following columns:
        - rating_type
        - rating_category
        - rating_message
        - rating_min_label
        - rating_max_label
        - picture_path (SAM only; expects a 1168×231 image)
        - tick_values
        - granularity
        - style
        The routine reads these values on each iteration and configures the slider dynamically.
        The experiment must include the code_state_measure_setup component, which handles global setup and shared logic.
    CodeComponent code_sm_helper
      Code Type = Py
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      Begin Routine:
        allowContinue = False

        # Parse tick values from the condition file
        tick_values_parsed = parse_tick_values(tick_values)

        try:
            logging.debug(f"Starting state-measure in loop: {currentLoop.name}")
            logging.debug(f"State-measure current row: {rating_category}, {rating_type}")
            logging.debug(f"State-measure tick values: {tick_values_parsed}")
        except:
            logging.error("Error printing current state measure row.")

        # Compute geometry based on rating type
        sm_geometry = sm_compute_tick_positions(tick_values_parsed, rating_type)

        sm_comp_slider_size = sm_geometry["slider_size"]
        sm_comp_slider_pos  = sm_geometry["slider_pos"]
        sm_comp_label_min_pos = sm_geometry["label_min_pos"]
        sm_comp_label_max_pos = sm_geometry["label_max_pos"]

        t_sm_label_min = visual.TextStim(
            win=win,
            text=rating_min_label,
            pos=(sm_comp_label_min_pos[0], sm_comp_label_min_pos[1]),
            wrapWidth=aspect20,
            anchorVert='top',
            height=0.05,
            color='white',
            font='Noto Sans'
        )

        t_sm_label_max = visual.TextStim(
            win=win,
            text=rating_max_label,
            pos=(sm_comp_label_max_pos[0], sm_comp_label_max_pos[1]),
            wrapWidth=aspect20,
            anchorVert='top',
            height=0.05,
            color='white',
            font='Noto Sans'
        )

        #t_label_min.setPos(sm_comp_label_min_pos)
        #t_label_max.setPos(sm_comp_label_max_pos)

        # --- Create a fresh slider for this trial ---
        sm_slider = visual.Slider(
            win=win,
            ticks=tick_values_parsed,
            labels=tick_values_parsed,
            granularity=granularity,
            style=style.lower(),
            pos=sm_comp_slider_pos,
            size=sm_comp_slider_size,
            labelHeight=0.05,
            colorSpace='rgb',
            markerColor='Red',
            lineColor='White',
            labelColor='LightGray',
            font='Noto Sans'
        )

        # --- SAM image logic ---
        if rating_type == 'SAM':
            image_SAM.setImage(picture_path)
            image_SAM.setAutoDraw(True)
        else:
            image_SAM.setAutoDraw(False)
      Each Frame:
        # Draw state measure components
        sm_slider.draw()
        t_sm_label_min.draw()
        t_sm_label_max.draw()

        # If rated, allow spacebar to end the routine
        if sm_slider.getRating() is not None:
            allowContinue = True
      End Routine:
        #thisExp.addData('rating', sm_slider.getRating())
        currentLoop.addData('rating', sm_slider.getRating())
        currentLoop.addData('rating_rt', sm_slider.getRT())

        try:
            logging.data(f"State-measure rating: {rating_category}, {sm_slider.getRating()}")
        except:
            logging.error("Error printing state-measure rating")
    ImageComponent image_SAM
      image [set every repeat] = $picture_path
      pos [set every repeat] = (0, sm_sam_comp_img_pos_y)
      saveStartStop = False
      size [set every repeat] = (sm_sam_comp_img_size_width, sm_sam_comp_img_size_height)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent t_sm_message
      letterHeight = 0.07
      pos = (0, .35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = comp_wrap_width_header
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    TextComponent t_sm_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_sm
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $allowContinue == True
      store = nothing
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  Routine instruction
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    CodeComponent code_instruction_helper
      Code Type = Py
      Begin Routine:
        # ------------------------------------------------------------
        # code_instruction_helper

        # Select the appropriate instruction text based on the current
        # trial's Category value. This keeps the logic centralized and
        # avoids storing long text strings in the condition file.
        # ------------------------------------------------------------
        if Category == "Open-Eyes":
            instruction_text = open_eyes_text
        elif Category == "Closed-Eyes":
            instruction_text = closed_eyes_text
        else:
            # Fallback message in case the condition file contains an
            # unexpected category. This helps catch typos or file issues.
            instruction_text = "Unknown category. Please contact the experimenter."
    TextComponent t_instruction_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
      units = height
      wrapWidth = comp_wrap_width_body
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    TextComponent t_instruction_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    RoutineSettingsComponent fixation
      durationEstim = 300
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    PolygonComponent cross_fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      units = height
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    TextComponent t_fixation_closed
      durationEstim = 300
      letterHeight = 0.03
      pos = (0.0, -0.4)
      saveStartStop = False
      startEstim = 0
      startVal [condition] = $Category == "Closed-Eyes"
      stopVal [condition] = $Category != "Closed-Eyes"
      text [set every repeat] = Please keep your eyes closed during this block.
      units = height
      wrapWidth = comp_wrap_width_body
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    ParallelOutComponent p_port_fixation
      address = 0x0378
      disabled = True
      durationEstim = 300
      register = EIO
      startData = 1
      startEstim = 0
      startVal [condition] = $cross_fixation.status == STARTED
      stopData = 0
      stopVal [condition] = $cross_fixation.status == STOPPED
      syncScreen = True
      syncScreenRefresh = True
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    KeyboardComponent key_resp_fixation_debug
      allowedKeys = 'right'
      disabled = True
      durationEstim = 300
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine goodbye
    RoutineSettingsComponent goodbye
      stopVal [duration (s)] = 4
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    TextComponent t_goodbye
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = You have completed the trial. Thank you!
      units = height
      wrapWidth = comp_wrap_width_header
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  Routine phodaDelay
    RoutineSettingsComponent phodaDelay
      desc = The delay duration is randomized between 1.5-2.5 seconds using the code_delay_calculator component.
      durationEstim = 2.5
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    CodeComponent code_delay_calculator
      Code Type = Py
      Begin Routine:
        # Gives a random float between 1.5 and 2.5 seconds (i.e., 1500–2500 ms)
        # Used for t_blank_delayer
        delay_time = random.uniform(1.5, 2.5)
    TextComponent t_blank_delayer
      durationEstim = 2.5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $delay_time
      text [set every repeat] = $delay_time
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    TextComponent t_test_mode
      durationEstim = 2.5
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delay_time
      text [set every repeat] = $mode
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  Routine phodaView
    RoutineSettingsComponent phodaView
      durationEstim = 6
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    CodeComponent code_phoda_helper
      Code Type = Py
      Begin Routine:
        # Determine whether this PHODA trial is in view mode.
        # In view mode, components must be allowed to start immediately.
        isModeView = (mode == 'view')

        # Builder evaluates component start conditions BEFORE code runs,
        # so we pre-compute a stable flag that both t_phoda_continue and
        # key_resp_phoda can use reliably. This avoids race conditions where
        # a component starts and stops in the same frame.
        canContinue = isModeView

        last_rating_value = "INIT"
        if mode == 'rate':
            phoda_autodraw_on()

        ps_phoda_slider.reset()
        ps_phoda_img_path = f'phoda-stimuli\{phoda_photo}'
      Each Frame:
        # Draws the slider, labels, and rating
        if mode == 'rate':
            last_rating_value = update_phoda_rating_text(last_rating_value)
            # If rated, allow spacebar to end the routine
            if ps_phoda_slider.getRating() is not None:
                canContinue = True
      End Routine:
        phoda_autodraw_off()

        if mode == 'rate':
            currentLoop.addData('rating', ps_phoda_slider.getRating())
            currentLoop.addData('rating_rt', ps_phoda_slider.getRT())
            currentLoop.addData('delay_time', delay_time)
            try:
                print(f'{phoda_photo} rating: {ps_phoda_slider.getRating()}')
                logging.data(f'{phoda_photo} rating: {ps_phoda_slider.getRating()}')
                logging.data(f'{phoda_photo} rating_rt: {ps_phoda_slider.getRT()}')
            except:
                logging.error("Error printing phoda rating")
    ImageComponent image_phoda
      durationEstim = 6
      image [set every repeat] = $ps_phoda_img_path
      pos [set every repeat] = (0, ps_phoda_comp_img_pos_y)
      size [set every repeat] = $ps_phoda_comp_img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent t_phoda_continue
      durationEstim = 5.5
      letterHeight = 0.04
      pos [set every repeat] = (0, t_phoda_continue_pos_y)
      saveStartStop = False
      startEstim = 0.5
      startVal [condition] = $canContinue
      stopVal [condition] = $isModeView
      text [set every repeat] = Press the SPACEBAR to continue
      wrapWidth = comp_wrap_width_continue
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    KeyboardComponent key_resp_phoda
      allowedKeys = 'space'
      durationEstim = 5.5
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 0.5
      startVal [condition] = $canContinue
      stopVal [condition] = $isModeView
      store = nothing
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Flow
  Routine experimentSetup
  LoopInitiator phoda_mode_loop loopType="TrialHandler"
    conditionsFile = loopPhodaMode.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('mode', 'view')]),
      OrderedDict([('mode', 'rate')])]
    LoopInitiator phoda_trials loopType="TrialHandler"
      conditionsFile = phodaPhotoList.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('phoda_photo', '002.jpg')]),
        OrderedDict([('phoda_photo', '003.jpg')]),
        OrderedDict([('phoda_photo', '004.jpg')]),
        OrderedDict([('phoda_photo', '007.jpg')]),
        OrderedDict([('phoda_photo', '008.jpg')]),
        OrderedDict([('phoda_photo', '011.jpg')]),
        OrderedDict([('phoda_photo', '014.jpg')]),
        OrderedDict([('phoda_photo', '015.jpg')]),
        OrderedDict([('phoda_photo', '018.jpg')]),
        OrderedDict([('phoda_photo', '020.jpg')]),
        OrderedDict([('phoda_photo', '022.jpg')]),
        OrderedDict([('phoda_photo', '023.jpg')]),
        OrderedDict([('phoda_photo', '026.jpg')]),
        OrderedDict([('phoda_photo', '027.jpg')]),
        OrderedDict([('phoda_photo', '028.jpg')]),
        OrderedDict([('phoda_photo', '029.jpg')]),
        OrderedDict([('phoda_photo', '033.jpg')]),
        OrderedDict([('phoda_photo', '036.jpg')]),
        OrderedDict([('phoda_photo', '040.jpg')]),
        OrderedDict([('phoda_photo', '044.jpg')]),
        OrderedDict([('phoda_photo', '047.jpg')]),
        OrderedDict([('phoda_photo', '049.jpg')]),
        OrderedDict([('phoda_photo', '050.jpg')]),
        OrderedDict([('phoda_photo', '051.jpg')]),
        OrderedDict([('phoda_photo', '057.jpg')]),
        OrderedDict([('phoda_photo', '059.jpg')]),
        OrderedDict([('phoda_photo', '060.jpg')]),
        OrderedDict([('phoda_photo', '061.jpg')]),
        OrderedDict([('phoda_photo', '073.jpg')]),
        OrderedDict([('phoda_photo', '074.jpg')]),
        OrderedDict([('phoda_photo', '083.jpg')]),
        OrderedDict([('phoda_photo', '085.jpg')]),
        OrderedDict([('phoda_photo', '092.jpg')]),
        OrderedDict([('phoda_photo', '093.jpg')]),
        OrderedDict([('phoda_photo', '094.jpg')]),
        OrderedDict([('phoda_photo', '095.jpg')])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
      Routine phodaDelay
      Routine phodaView
    LoopTerminator phoda_trials
  LoopTerminator phoda_mode_loop
  LoopInitiator intro_prompts loopType="TrialHandler"
    conditionsFile = D:/Github/neuroflare-experiments/psychopy/experiments/open-closed/loopOpenClosedIntro.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Message', 'Welcome to the Open-Closed Eyes Experiment!\n\nThis is designed for the Wireless EEG and EMG devices. ')]),
      OrderedDict([('Message', 'Please relax and remain still during the experiment while we record your baseline brain activity.')]),
      OrderedDict([('Message', 'Follow the on-screen instructions to open or close your eyes as prompted.\n\nWe will do this twice, with each round lasting 5 minutes.')]),
      OrderedDict([('Message', 'During the eyes-open section,\nlook steadily at the cross mark in the center of the screen.')]),
      OrderedDict([('Message', "For the eyes-closed section,\nyou'll close your eyes for the given duration.\n\nPlease avoid falling asleep!")]),
      OrderedDict([('Message', 'The trial will begin on the following screen.\n\nPlease let us know if you have any remaining questions.')])]
    Routine welcome
  LoopTerminator intro_prompts
  LoopInitiator state_measure_pretrial loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Fatigue'), ('rating_message', 'Rate your current fatigue level'), ('rating_min_label', 'No fatigue at all'), ('rating_max_label', 'As bad as you can imagine'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
      OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Sleepiness'), ('rating_message', 'Rate your current sleepiness level'), ('rating_min_label', 'Not at all sleepy'), ('rating_max_label', 'As bad as you can imagine'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
      OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Pain'), ('rating_message', 'Rate your current pain level'), ('rating_min_label', 'No pain'), ('rating_max_label', 'Worst possible pain'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
      OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Pain Unpleasantness'), ('rating_message', 'Rate your current pain unpleasantness level'), ('rating_min_label', 'Not at all unpleasant pain'), ('rating_max_label', 'Worst possible unpleasant pain'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')])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
    Routine stateMeasure
  LoopTerminator state_measure_pretrial
  LoopInitiator openclosed_trials loopType="TrialHandler"
    conditionsFile = D:/Github/neuroflare-experiments/psychopy/experiments/open-closed/loopOpenClosedTrial.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Category', 'Open-Eyes')]),
      OrderedDict([('Category', 'Closed-Eyes')])]
    Routine instruction
    Routine fixation
    LoopInitiator state_measure_trials loopType="TrialHandler"
      Selected rows = 0:7
      conditionsFile = ../../shared/loop-templates/loopStateMeasure.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Fatigue'), ('rating_message', 'Rate your current fatigue level'), ('rating_min_label', 'No fatigue at all'), ('rating_max_label', 'As bad as you can imagine'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
        OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Sleepiness'), ('rating_message', 'Rate your current sleepiness level'), ('rating_min_label', 'Not at all sleepy'), ('rating_max_label', 'As bad as you can imagine'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
        OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Pain'), ('rating_message', 'Rate your current pain level'), ('rating_min_label', 'No pain'), ('rating_max_label', 'Worst possible pain'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')]),
        OrderedDict([('rating_type', 'Generic'), ('rating_category', 'Pain Unpleasantness'), ('rating_message', 'Rate your current pain unpleasantness level'), ('rating_min_label', 'Not at all unpleasant pain'), ('rating_max_label', 'Worst possible unpleasant pain'), ('picture_path', None), ('tick_values', '0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10'), ('granularity', np.int64(1)), ('style', 'rating')])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
      Routine stateMeasure
    LoopTerminator state_measure_trials
  LoopTerminator openclosed_trials
  Routine goodbye
