PsychoPy2experiment version="2025.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(-0.5000, -0.5000, -0.5000)
  expName = open-closed
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instructions
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    TextboxComponent tb_body
      bold = False
      editable = False
      letterHeight = 0.07
      pos = (0.0, 0.05)
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Message
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    TextboxComponent tb_continue
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to continue
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator introPrompts loopType="TrialHandler"
    conditionsFile = loop-templates/loopOpenClosedIntro.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Message': 'This is the Open-Closed Eyes Experiment, meant for the Wireless EEG and EMG devices. '},
      {'Message': 'Please relax and remain still while we record your baseline brain activity.'},
      {'Message': 'Follow the on-screen instructions to open or close your eyes as prompted. We will do this twice. '},
      {'Message': 'When your eyes are open, look at the cross mark on the screen. You will complete two rounds of eyes-open and eyes-closed.'}]
    Routine instructions
  LoopTerminator introPrompts
